SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Document 2
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	1
##BLOCKS=	12   
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	DOCUMENT
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Bruker/Granaticin_D
echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
(w/ gradients in back-INEPT w/matched adiabatic sweep)
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	2
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Bruker/Granaticin_D
echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
(w/ gradients in back-INEPT w/matched adiabatic sweep)
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	3
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Bruker/Granaticin_D
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	4
##DATA TYPE=	nD NMR SPECTRUM
##DATA CLASS=	NTUPLES
##NUMDIM=	2
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13300077999997484
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	hmbcgplpndqf
##LONGDATE=	2021/09/04 16:48:51.000
##.ACQUISITIONMODE=	SIMULTANEOUS
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqu2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/acqu2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 187	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-05 11:23:28.114 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/acqu2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/go
$$ ##$BF1= 125.757789
$$ ##$FnMODE= 1
$$ ##$NUC1= <13C>
$$ ##$O1= 13833.35679
$$ ##$SFO1= 125.77162235679
$$ ##$SW= 225
$$ ##$SW_h= 28298.6150302777
$$ ##$TD= 123
$$ ##END=
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 28	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-05 11:26:29.657 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= 1000000
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_getlinv>
$$ ##$AUTOPOS= <>
$$ ##$BF1= 500.13
$$ ##$BF2= 125.757789
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 1
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 50 9 1 1 1 1 1 1 1 50 30 40 1 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <garp>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <waltz16>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 3e-06 1.5 0.003448276 0.0023 0 0 0.05555556 0.4 0 0 0 0.03 2e-05 3e-06
$$ 0 0 0.0001 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$DATE= 1630799331
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 6.5
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 16
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 1
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 18
$$ ##$DS= 16
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 0
$$ ##$DSPFVS= 12
$$ ##$DTYPA= 0
$$ ##$EXP= </opt/topspin2.1pl8/exp/stan/nmr>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 1 0 0 0 0 0 0 0
$$ ##$FL1= 90
$$ ##$FL2= 90
$$ ##$FL3= 90
$$ ##$FL4= 90
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1892985.61151079
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <SINE.100>
$$ ##$GPNAM1= <SINE.100>
$$ ##$GPNAM10= <SINE.100>
$$ ##$GPNAM11= <SINE.100>
$$ ##$GPNAM12= <SINE.100>
$$ ##$GPNAM13= <SINE.100>
$$ ##$GPNAM14= <SINE.100>
$$ ##$GPNAM15= <SINE.100>
$$ ##$GPNAM16= <SINE.100>
$$ ##$GPNAM17= <SINE.100>
$$ ##$GPNAM18= <SINE.100>
$$ ##$GPNAM19= <SINE.100>
$$ ##$GPNAM2= <SINE.100>
$$ ##$GPNAM20= <SINE.100>
$$ ##$GPNAM21= <SINE.100>
$$ ##$GPNAM22= <SINE.100>
$$ ##$GPNAM23= <SINE.100>
$$ ##$GPNAM24= <SINE.100>
$$ ##$GPNAM25= <SINE.100>
$$ ##$GPNAM26= <SINE.100>
$$ ##$GPNAM27= <SINE.100>
$$ ##$GPNAM28= <SINE.100>
$$ ##$GPNAM29= <SINE.100>
$$ ##$GPNAM3= <SINE.100>
$$ ##$GPNAM30= <SINE.100>
$$ ##$GPNAM31= <SINE.100>
$$ ##$GPNAM4= <SINE.100>
$$ ##$GPNAM5= <SINE.100>
$$ ##$GPNAM6= <SINE.100>
$$ ##$GPNAM7= <SINE.100>
$$ ##$GPNAM8= <SINE.100>
$$ ##$GPNAM9= <SINE.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 50 30 40.1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <grad_out>
$$ ##$GRPDLY= -1
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 90
$$ ##$HL2= 90
$$ ##$HL3= 90
$$ ##$HL4= 90
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 1.765e-05 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 35.3374184188895 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5289
$$ ##$LOCKGN= 126.699996948242
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 148.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -2
$$ ##$NLOGCH= 1
$$ ##$NS= 256
$$ ##$NUC1= <1H>
$$ ##$NUC2= <13C>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 3000.78
$$ ##$O2= 13833.35679
$$ ##$O3= 3150.81899998404
$$ ##$O4= 3150.81899998404
$$ ##$O5= 3150.81899998404
$$ ##$O6= 3150.81899998404
$$ ##$O7= 3150.81899998404
$$ ##$O8= 3150.81899998404
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 10 10 20 11.12 22.24 19.8 30 60 20000 25 50 80000 80000 22 500 0 1000 2500
$$ 10000 600 2500 0 0 0 2000 250 0 10 2000 1000 0 1900 20000 0 0 0 0 0 0 192
$$ 2000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1500
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 1
$$ ##$PCPD= (0..9)
$$ 100 60 70 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 -2.5 -0.6 120 120 120 120 120 120 50 7.04 19.44 15.38 18.3 116.89 6.44
$$ 120 120 -2.5 13.06 120 116.89 120 120 116.89 120 120 19.44 120 120 15.38
$$ 9.36 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 3
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <hmbcgplpndqf>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 23170.5
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 128 0 0 0 1 0 0 0 0 0 0 0 0 0 1 0 0 0 0 0 0 0 0
$$ ##$ROUTWD2= (0..23)
$$ 1 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RSEL= (0..9)
$$ 0 1 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.13300078
$$ ##$SFO2= 125.77162235679
$$ ##$SFO3= 500.133150819
$$ ##$SFO4= 500.133150819
$$ ##$SFO5= 500.133150819
$$ ##$SFO6= 500.133150819
$$ ##$SFO7= 500.133150819
$$ ##$SFO8= 500.133150819
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 67.85 61.83 6.64 6.08 0 57.5 6.64 120 0 37.5 37.5 0 0 8.12 0 150 150
$$ 12.84 59.79 57.88 61.19 53.87 150 150 150 150 150 150 21.68 150 14.14
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gaus1.1000>
$$ ##$SPNAM10= <Squa100.1000>
$$ ##$SPNAM11= <Squa100.1000>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <Crp32,1.5,20.2>
$$ ##$SPNAM15= < >
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <Crp60_xfilt.2>
$$ ##$SPNAM19= <Sinc1.1000>
$$ ##$SPNAM2= <Gaus1_180r.1000>
$$ ##$SPNAM20= <Sinc1.1000>
$$ ##$SPNAM21= <Sinc1.1000>
$$ ##$SPNAM22= <Sinc1.1000>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <Crp60,20,20.10>
$$ ##$SPNAM3= <Crp60,0.5,20.1>
$$ ##$SPNAM30= <gauss>
$$ ##$SPNAM31= <Crp32,1.5,20.2>
$$ ##$SPNAM4= <Bip720,100,10.1>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Squa100.1000>
$$ ##$SPNAM7= <Crp60comp.4>
$$ ##$SPNAM8= < >
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 17.9808285823384
$$ ##$SWIBOX= (0..15)
$$ 0 1 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 8992.80575539568
$$ ##$SWfinal= 0
$$ ##$TD= 4096
$$ ##$TD0= 1
$$ ##$TE= 298.1
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <user>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 2048
$$ ##$WBSW= 26
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 0
$$ ##$YL= 0
$$ ##$YMAX_a= 179445
$$ ##$YMIN_a= -181406
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-05 11:26:26.749 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 19:40:41.231 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        terminated by command 'stop'
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 4K * 123
$$        7A 0F 09 02 AC 04 9B B3 F0 25 BD E2 84 A6 30 0D>)
$$ ##END=
$$ $$ hash MD5
$$ $$ 20 E3 E4 ED B0 CF AF B2 FB 0D 02 24 E9 07 C1 71
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-05 11:26:26.749 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 19:40:41.231 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        terminated by command 'stop'
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 4K * 123
$$        7A 0F 09 02 AC 04 9B B3 F0 25 BD E2 84 A6 30 0D>)
$$ (   2,<2021-09-05 11:26:31.312 -0400>,<rsamples>,<AV500>,<proc2d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        xfb F2: SI = 2K WDW = 3 SSB = 0 FT_mod = 6 PKNL = 1 F1: SI = 1K ME_mod = 2 NCOEF = 32 WDW = 3 SSB = 0 FT_mod = 6 PH_mod = 2
$$        data hash MD5: 2K * 1K
$$        70 53 4B E1 BC 92 7F 9C D6 A7 33 0B 5F B2 E9 89>)
$$ ##END=
$$ $$ hash MD5
$$ $$ 50 AE 17 31 06 25 30 18 F3 AC 73 A2 4B 6A E3 7B
##$PARAMETER FILE=	(clevels, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pdata/1/clevels, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 16	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 23:17:33.990 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/pdata/1/clevels
$$ $$ process /opt/topspin2.1pl8/prog/mod/dataserver
$$ ##$LEVELS= (0..255)
$$ -562879119.7 -312710622.1 -173728123.4 -96515624.1 -53619791.2 -29788772.9
$$ -16549318.3 -9194065.7 9194065.7 16549318.3 29788772.9 53619791.2 96515624.1
$$ 173728123.4 312710622.1 562879119.7 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0
$$ ##$LEVSIGN= 3
$$ ##$MAXLEV= 8
$$ ##$METHOD= 0
$$ ##$NEGBASE= -9194065.7
$$ ##$NEGINCR= 1.8
$$ ##$POSBASE= 9194065.7
$$ ##$POSINCR= 1.8
$$ ##END=
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/savethree.jdx, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		CNST2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"CNST2=CNST[2]"
$$ 		INV_REL	"CNST[2]=CNST2"
$$ 		FORMAT	"%14.7f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		CNST13
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"CNST13=CNST[13]"
$$ 		INV_REL	"CNST[13]=CNST13"
$$ 		FORMAT	"%14.7f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D0=D[0]"
$$ 		INV_REL	"D[0]=D0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D2=D[2]"
$$ 		INV_REL	"D[2]=D2"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D6
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D6=D[6]"
$$ 		INV_REL	"D[6]=D6"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D16=D[16]"
$$ 		INV_REL	"D[16]=D16"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		IN0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"IN0=IN[0]"
$$ 		INV_REL	"IN[0]=IN0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P2=P[2]"
$$ 		INV_REL	"P[2]=P2"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f2 ========"
$$ NAME		NUC2
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P3=P[3]"
$$ 		INV_REL	"P[3]=P3"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL2=PL[2]"
$$ 		INV_REL	"PL[2]=PL2"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL2W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL2W=306.7*pow(10.0,(-6-PL[2])/10.0)"
$$ 		INV_REL	"PL[2]=-6-4.3425*log(PL2W/306.7)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO2
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"====== GRADIENT CHANNEL ====="
$$ NAME		GPNAM1
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM2
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM3
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ1=GPZ[1]"
$$ 		INV_REL	"GPZ[1]=GPZ1"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ2=GPZ[2]"
$$ 		INV_REL	"GPZ[2]=GPZ2"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ3=GPZ[3]"
$$ 		INV_REL	"GPZ[3]=GPZ3"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P16=P[16]"
$$ 		INV_REL	"P[16]=P16"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
##$PARAMETER FILE=	(proc2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pdata/1/proc2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 15	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-05 11:26:31.312 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/pdata/1/proc2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <        >
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F1>
$$ ##$AXNUC= <13C>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 0
$$ ##$LPBIN= 246
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 2
$$ ##$MI= 1
$$ ##$NCOEF= 32
$$ ##$NC_proc= 0
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 222.5124
$$ ##$PC= 4
$$ ##$PHC0= 0
$$ ##$PHC1= 0
$$ ##$PH_mod= 2
$$ ##$PKNL= no
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 1
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 125.757788992341
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 1024
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <1H.DMSO>
$$ ##$SSB= 0
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 28298.6150302777
$$ ##$SYMM= 0
$$ ##$S_DEV= 3214342
$$ ##$TDeff= 246
$$ ##$TDoff= 0
$$ ##$TI= <        >
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 3
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 265985858
$$ ##$YMIN_p= 0
$$ ##END=
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 15	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-05 11:26:31.312 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_2dpl>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F2>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 2048
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 35
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= 0
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 14.9729
$$ ##$PC= 1.4
$$ ##$PHC0= 0
$$ ##$PHC1= 0
$$ ##$PH_mod= 0
$$ ##$PKNL= yes
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 0
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.130008784643
$$ ##$SI= 2048
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 2048
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <1H.DMSO>
$$ ##$SSB= 0
$$ ##$STSI= 2048
$$ ##$STSR= 0
$$ ##$SW_p= 8992.8057553957
$$ ##$SYMM= 0
$$ ##$S_DEV= 3214342
$$ ##$TDeff= 4096
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 100
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 3
$$ ##$XDIM= 2048
$$ ##$YMAX_p= 265985858
$$ ##$YMIN_p= 0
$$ ##END=
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf"
$$ ;hmbcgplpndqf
$$ ;avance-version (07/04/04)
$$ ;HMBC
$$ ;2D H-1/X correlation via heteronuclear zero and double quantum
$$ ;   coherence
$$ ;optimized on long range couplings
$$ ;with low-pass J-filter to suppress one-bond correlations
$$ ;no decoupling during acquisition
$$ ;using gradient pulses for selection
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=2D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 18 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf" 2
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Grad.incl" 1
$$ ;Grad2.incl  -  include file for Gradient Spectroscopy
$$ ;   for 1
$$ ;
$$ ;avance-version (07/01/17)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ define list<gradient> EA=<EA>
$$ ;$Id: Grad2.incl,v 1.12 2007/01/22 14:22:35 ber Exp $
$$ # 19 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf" 2
$$   
$$ "p2=p1*2"
$$ "d2=1s/(cnst2*2)"
$$ "d6=1s/(cnst13*2)"
$$ "d0=3u"
$$ "in0=inf1/2"
$$ # 1 "mc_line 32 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ "MCWRK = 0.500000*d1"
$$ "MCREST = d1 - d1"
$$     dccorr
$$ # 32 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf"
$$ 1 ze 
$$ # 1 "mc_line 32 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf expanding definition of mc command after ze"
$$ # 33 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf"
$$ # 1 "mc_line 33 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf expanding start label for mc command"
$$ 2 MCWRK 
$$ LBLF1, MCWRK
$$   MCREST
$$ # 34 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf"
$$ 3 p1 ph1
$$   d2
$$   p3:f2 ph3
$$   d6
$$   p3:f2 ph4
$$   d0
$$   50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
$$   p16:gp1
$$   d16
$$   p2 ph2
$$   50u
$$   p16:gp2
$$   d16
$$   d0
$$   p3:f2 ph5
$$   4u
$$   p16:gp3
$$   d16
$$   4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$   go=2 ph31
$$ # 1 "mc_line 54 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf expanding mc command in line"
$$   MCWRK  wr #0 if #0 zd id0 
$$   lo to LBLF1 times td1
$$   MCWRK
$$ # 55 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf"
$$ exit 
$$   
$$ ph1=0 
$$ ph2=0 0 0 0 2 2 2 2
$$ ph3=0 0 2 2
$$ ph4=0 2
$$ ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
$$ ph31=0 2 0 2 0 2 0 2 2 0 2 0 2 0 2 0
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;pl2 : f2 channel - power level for pulse (default)
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;p2 : f1 channel - 180 degree high power pulse
$$ ;p3 : f2 channel -  90 degree high power pulse
$$ ;p16: homospoil/gradient pulse
$$ ;d0 : incremented delay (2D)                  [3 usec]
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;d2 : 1/(2J)XH
$$ ;d6 : delay for evolution of long range couplings
$$ ;d16: delay for homospoil/gradient recovery
$$ ;cnst2: = J(XH)
$$ ;cnst13: = J(XH) long range
$$ ;inf1: 1/SW(X) = 2 * DW(X)
$$ ;in0: 1/(2 * SW(X)) = DW(X)
$$ ;nd0: 2
$$ ;NS: 2 * n
$$ ;DS: 16
$$ ;td1: number of experiments
$$ ;FnMODE: QF
$$ ;use gradient ratio: 	gp 1 : gp 2 : gp 3
$$ ;			  50 :   30 : 40.1   for C-13
$$ ;			  70 :   30 : 50.1   for N-15
$$ ;for z-only gradients:
$$ ;gpz1: 50% for C-13, 70% for N-15
$$ ;gpz2: 30%
$$ ;gpz3: 40.1% for C-13, 50.1% for N-15
$$ ;use gradient files:   
$$ ;gpnam1: SINE.100
$$ ;gpnam2: SINE.100
$$ ;gpnam3: SINE.100
$$ ;$Id: hmbcgplpndqf,v 1.4 2007/04/11 13:34:29 ber Exp $
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pdata/1/title, 0)
$$ echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
$$ (w/ gradients in back-INEPT w/matched adiabatic sweep)
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/uxnmr.par, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Bruker/Granaticin_D
echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
(w/ gradients in back-INEPT w/matched adiabatic sweep)
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	5
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Bruker/Granaticin_D
echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
(w/ gradients in back-INEPT w/matched adiabatic sweep)
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	6
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Bruker/Granaticin_D
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	7
##DATA TYPE=	nD NMR SPECTRUM
##DATA CLASS=	NTUPLES
##NUMDIM=	2
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13235211138999148
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	hsqcedetgpsisp2.3
##LONGDATE=	2021/09/04 13:39:17.000
##.ACQUISITIONMODE=	SIMULTANEOUS
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqu2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/acqu2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 257	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 18:27:21.880 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/acqu2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/go
$$ ##$BF1= 125.757789
$$ ##$FnMODE= 6
$$ ##$NUC1= <13C>
$$ ##$O1= 8802.58583910631
$$ ##$SFO1= 125.766591585839
$$ ##$SW= 165.658016737528
$$ ##$SW_h= 20834.2441339488
$$ ##$TD= 128
$$ ##END=
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 19	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 18:27:26.135 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= 1000000
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_zg>
$$ ##$AUTOPOS= <1 >
$$ ##$BF1= 500.13
$$ ##$BF2= 125.757789
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 1
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 1 1 1 1 1 -0.5 1 1 1 80 30 20 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <garp>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <bi_p5m4sp_4sp.2>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 3e-06 1.5 0.00345 0.0023 0.001724138 0 0 0.484 0.12 0 0 0.03 2e-05 3e-06
$$ 0 0 0.0001 0 0 0 0 0.0036 0 0 0.00089 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$DATE= 1630787957
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 6.5
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 24
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 1
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 18
$$ ##$DS= 16
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 0
$$ ##$DSPFVS= 12
$$ ##$DTYPA= 0
$$ ##$EXP= <AAC13HSQC>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 1 0 0 0 0 0 0 0
$$ ##$FL1= 90
$$ ##$FL2= 90
$$ ##$FL3= 90
$$ ##$FL4= 90
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1887019.23076923
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <SINE.100>
$$ ##$GPNAM1= <SINE.100>
$$ ##$GPNAM10= <SINE.100>
$$ ##$GPNAM11= <SINE.100>
$$ ##$GPNAM12= <SINE.100>
$$ ##$GPNAM13= <SINE.100>
$$ ##$GPNAM14= <SINE.100>
$$ ##$GPNAM15= <SINE.100>
$$ ##$GPNAM16= <SINE.100>
$$ ##$GPNAM17= <SINE.100>
$$ ##$GPNAM18= <SINE.100>
$$ ##$GPNAM19= <SINE.100>
$$ ##$GPNAM2= <SINE.100>
$$ ##$GPNAM20= <SINE.100>
$$ ##$GPNAM21= <SINE.100>
$$ ##$GPNAM22= <SINE.100>
$$ ##$GPNAM23= <SINE.100>
$$ ##$GPNAM24= <SINE.100>
$$ ##$GPNAM25= <SINE.100>
$$ ##$GPNAM26= <SINE.100>
$$ ##$GPNAM27= <SINE.100>
$$ ##$GPNAM28= <SINE.100>
$$ ##$GPNAM29= <SINE.100>
$$ ##$GPNAM3= <SINE.100>
$$ ##$GPNAM30= <SINE.100>
$$ ##$GPNAM31= <SINE.100>
$$ ##$GPNAM4= <SINE.100>
$$ ##$GPNAM5= <SINE.100>
$$ ##$GPNAM6= <SINE.100>
$$ ##$GPNAM7= <SINE.100>
$$ ##$GPNAM8= <SINE.100>
$$ ##$GPNAM9= <SINE.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 80 20.1 11 -5 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <grad_out>
$$ ##$GRPDLY= -1
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 256
$$ ##$HL2= 90
$$ ##$HL3= 90
$$ ##$HL4= 90
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 2.4e-05 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 47.9979016071205 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5289
$$ ##$LOCKGN= 126.699996948242
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 143.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -2
$$ ##$NLOGCH= 1
$$ ##$NS= 32
$$ ##$NUC1= <1H>
$$ ##$NUC2= <13C>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 2352.11138993918
$$ ##$O2= 8802.58583910631
$$ ##$O3= 2352.11138993918
$$ ##$O4= 2352.11138993918
$$ ##$O5= 2352.11138993918
$$ ##$O6= 2352.11138993918
$$ ##$O7= 2352.11138993918
$$ ##$O8= 2352.11138993918
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 10 10 20 11.12 22.24 19.8 30 60 20000 25 50 80000 80000 22 500 0 1000 2500
$$ 10000 600 2500 0 0 0 2000 250 0 10 2000 1000 1730 1900 20000 0 0 0 0 0
$$ 0 192 2000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1500
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 1
$$ ##$PCPD= (0..9)
$$ 100 60 70 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 -2.5 -0.6 120 120 120 120 120 120 50 7.04 19.44 15.38 18.3 116.89 6.44
$$ 120 120 -2.5 13.06 120 116.89 120 120 116.89 120 120 19.44 120 120 15.38
$$ 9.36 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 3
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <hsqcedetgpsisp2.3>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 26008
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 256 0 0 0 1 0 0 0 0 0 0 0 0 0 1 0 0 0 0 0 0 0 0
$$ ##$ROUTWD2= (0..23)
$$ 1 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RSEL= (0..9)
$$ 0 1 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.13235211139
$$ ##$SFO2= 125.766591585839
$$ ##$SFO3= 500.13235211139
$$ ##$SFO4= 500.13235211139
$$ ##$SFO5= 500.13235211139
$$ ##$SFO6= 500.13235211139
$$ ##$SFO7= 500.13235211139
$$ ##$SFO8= 500.13235211139
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 67.85 61.83 6.64 6.08 0 57.5 6.64 120 0 37.5 37.5 0 0 8.12 0 150 150
$$ 12.84 59.79 57.88 61.19 53.87 150 150 150 150 150 150 21.68 7.4 14.14
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gaus1.1000>
$$ ##$SPNAM10= <Squa100.1000>
$$ ##$SPNAM11= <Squa100.1000>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <Crp32,1.5,20.2>
$$ ##$SPNAM15= < >
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <Crp60_xfilt.2>
$$ ##$SPNAM19= <Sinc1.1000>
$$ ##$SPNAM2= <Gaus1_180r.1000>
$$ ##$SPNAM20= <Sinc1.1000>
$$ ##$SPNAM21= <Sinc1.1000>
$$ ##$SPNAM22= <Sinc1.1000>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <Crp60,20,20.10>
$$ ##$SPNAM3= <Crp60,0.5,20.1>
$$ ##$SPNAM30= <crp60_xfilt>
$$ ##$SPNAM31= <Crp32,1.5,20.2>
$$ ##$SPNAM4= <Bip720,100,10.1>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Squa100.1000>
$$ ##$SPNAM7= <Crp60comp.4>
$$ ##$SPNAM8= < >
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 16.0214000933815
$$ ##$SWIBOX= (0..15)
$$ 0 1 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 8012.82051282051
$$ ##$SWfinal= 0
$$ ##$TD= 1024
$$ ##$TD0= 1
$$ ##$TE= 298.1
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <user>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 1024
$$ ##$WBSW= 4
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 0
$$ ##$YL= 0
$$ ##$YMAX_a= 95191
$$ ##$YMIN_a= -97738
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-04 18:27:23.437 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 16:37:58.692 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 1K * 128
$$        22 19 78 CC 9C B3 1A 4C D8 F3 15 66 FF 81 BD BE>)
$$ ##END=
$$ $$ hash MD5
$$ $$ 91 6C 46 18 16 FF 81 31 90 02 10 B9 1E 9D D4 53
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-04 18:27:23.437 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 16:37:58.692 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 1K * 128
$$        22 19 78 CC 9C B3 1A 4C D8 F3 15 66 FF 81 BD BE>)
$$ (   2,<2021-09-04 18:38:40.413 -0400>,<rsamples>,<AV500>,<proc2d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        xfb F2: SI = 1K WDW = 4 SSB = 2 FT_mod = 6 PKNL = 1 PHC0 = -43.6052 PHC1 = 18.6 F1: SI = 1K ME_mod = 2 NCOEF = 32 WDW = 4 SSB = 2 FT_mod = 6 PHC0 = 3.437305 PHC1 = -5
$$        data hash MD5: 1K * 1K
$$        63 6D EB C0 00 3B 31 CA 73 94 23 A1 A3 F5 0B 8F>)
$$ ##END=
$$ $$ hash MD5
$$ $$ FC 4A F3 44 BF 05 51 0E 0D 23 62 A5 5E E2 D6 3F
##$PARAMETER FILE=	(clevels, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pdata/1/clevels, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 24	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 18:07:53.320 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/pdata/1/clevels
$$ $$ process /opt/topspin2.1pl8/prog/mod/dataserver
$$ ##$LEVELS= (0..255)
$$ -86567643.1 -48093135.1 -26718408.4 -14843560.2 -8246422.3 -4581345.7 -2545192.1
$$ -1413995.6 1413995.6 2545192.1 4581345.7 8246422.3 14843560.2 26718408.4
$$ 48093135.1 86567643.1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$LEVSIGN= 3
$$ ##$MAXLEV= 8
$$ ##$METHOD= 0
$$ ##$NEGBASE= -1413995.6
$$ ##$NEGINCR= 1.8
$$ ##$POSBASE= 1413995.6
$$ ##$POSINCR= 1.8
$$ ##END=
##$PARAMETER FILE=	(cpdprg2, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/cpdprg2, 0)
$$ #setphase
$$ bilev "l31=(nsdone+ds)%4+1"
$$ 1 p63*0.5:sp14:0 pl=sp14
$$   lo to 1 times l31
$$   p63:sp31:0 pl=sp31
$$ 2 p63:sp31:150
$$   p63:sp31:60
$$   p63:sp31:150
$$   p63:sp31:0
$$   p63:sp31:0 
$$   p63:sp31:150
$$   p63:sp31:60
$$   p63:sp31:150
$$   p63:sp31:0
$$   p63:sp31:180 
$$   p63:sp31:330
$$   p63:sp31:240
$$   p63:sp31:330
$$   p63:sp31:180
$$   p63:sp31:180 
$$   p63:sp31:330
$$   p63:sp31:240
$$   p63:sp31:330
$$   p63:sp31:180
$$   p63:sp31:0
$$   jump to 2
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/savethree.jdx, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		CNST2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"CNST2=CNST[2]"
$$ 		INV_REL	"CNST[2]=CNST2"
$$ 		FORMAT	"%14.7f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		CNST17
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"CNST17=CNST[17]"
$$ 		INV_REL	"CNST[17]=CNST17"
$$ 		FORMAT	"%14.7f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D0=D[0]"
$$ 		INV_REL	"D[0]=D0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D4
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D4=D[4]"
$$ 		INV_REL	"D[4]=D4"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D11
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D11=D[11]"
$$ 		INV_REL	"D[11]=D11"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D16=D[16]"
$$ 		INV_REL	"D[16]=D16"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D21
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D21=D[21]"
$$ 		INV_REL	"D[21]=D21"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D24
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D24=D[24]"
$$ 		INV_REL	"D[24]=D24"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		IN0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"IN0=IN[0]"
$$ 		INV_REL	"IN[0]=IN0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		L31
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"L31=L[31]"
$$ 		INV_REL	"L[31]=L31"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P2=P[2]"
$$ 		INV_REL	"P[2]=P2"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P28
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P28=P[28]"
$$ 		INV_REL	"P[28]=P28"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f2 ========"
$$ NAME		CPDPRG2
$$ 		TEXT	" "
$$ END
$$ NAME		NUC2
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P3=P[3]"
$$ 		INV_REL	"P[3]=P3"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P14
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P14=P[14]"
$$ 		INV_REL	"P[14]=P14"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P24
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P24=P[24]"
$$ 		INV_REL	"P[24]=P24"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P31
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P31=P[31]"
$$ 		INV_REL	"P[31]=P31"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P63
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P63=P[63]"
$$ 		INV_REL	"P[63]=P63"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL0=PL[0]"
$$ 		INV_REL	"PL[0]=PL0"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL2=PL[2]"
$$ 		INV_REL	"PL[2]=PL2"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL12
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL12=PL[12]"
$$ 		INV_REL	"PL[12]=PL12"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL0W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL0W=306.7*pow(10.0,(-6-PL[0])/10.0)"
$$ 		INV_REL	"PL[0]=-6-4.3425*log(PL0W/306.7)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL2W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL2W=306.7*pow(10.0,(-6-PL[2])/10.0)"
$$ 		INV_REL	"PL[2]=-6-4.3425*log(PL2W/306.7)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL12W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL12W=306.7*pow(10.0,(-6-PL[12])/10.0)"
$$ 		INV_REL	"PL[12]=-6-4.3425*log(PL12W/306.7)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO2
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP3=SP[3]"
$$ 		INV_REL	"SP[3]=SP3"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP7
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP7=SP[7]"
$$ 		INV_REL	"SP[7]=SP7"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP14
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP14=SP[14]"
$$ 		INV_REL	"SP[14]=SP14"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP18
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP18=SP[18]"
$$ 		INV_REL	"SP[18]=SP18"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP31
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP31=SP[31]"
$$ 		INV_REL	"SP[31]=SP31"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM3
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM7
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM14
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM18
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM31
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL3=SPOAL[3]"
$$ 		INV_REL	"SPOAL[3]=SPOAL3"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL7
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL7=SPOAL[7]"
$$ 		INV_REL	"SPOAL[7]=SPOAL7"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL14
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL14=SPOAL[14]"
$$ 		INV_REL	"SPOAL[14]=SPOAL14"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL18
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL18=SPOAL[18]"
$$ 		INV_REL	"SPOAL[18]=SPOAL18"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL31
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL31=SPOAL[31]"
$$ 		INV_REL	"SPOAL[31]=SPOAL31"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS3=SPOFFS[3]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS7
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS7=SPOFFS[7]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS14
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS14=SPOFFS[14]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS18
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS18=SPOFFS[18]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS31
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS31=SPOFFS[31]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"====== GRADIENT CHANNEL ====="
$$ NAME		GPNAM1
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM2
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM3
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM4
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ1=GPZ[1]"
$$ 		INV_REL	"GPZ[1]=GPZ1"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ2=GPZ[2]"
$$ 		INV_REL	"GPZ[2]=GPZ2"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ3=GPZ[3]"
$$ 		INV_REL	"GPZ[3]=GPZ3"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ4
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ4=GPZ[4]"
$$ 		INV_REL	"GPZ[4]=GPZ4"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P16=P[16]"
$$ 		INV_REL	"P[16]=P16"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P19
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P19=P[19]"
$$ 		INV_REL	"P[19]=P19"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
##$PARAMETER FILE=	(proc2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pdata/1/proc2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 20	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 18:38:40.413 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/pdata/1/proc2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <        >
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F1>
$$ ##$AXNUC= <13C>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 0
$$ ##$LPBIN= 256
$$ ##$MAXI= 10000
$$ ##$MC2= 5
$$ ##$MEAN= 0
$$ ##$ME_mod= 2
$$ ##$MI= 1
$$ ##$NCOEF= 32
$$ ##$NC_proc= -1
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 152.8311
$$ ##$PC= 4
$$ ##$PHC0= 3.437305
$$ ##$PHC1= -5
$$ ##$PH_mod= 1
$$ ##$PKNL= no
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 100
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 1
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 125.757789004702
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 1024
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <13C.H2O+D2O>
$$ ##$SSB= 2
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 20834.2441339488
$$ ##$SYMM= 0
$$ ##$S_DEV= 989249
$$ ##$TDeff= 256
$$ ##$TDoff= 0
$$ ##$TI= <        >
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 4
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 367702553
$$ ##$YMIN_p= -19087955
$$ ##END=
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 20	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 18:38:40.413 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_no>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F2>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 35
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= -1
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 12.69681
$$ ##$PC= 1.4
$$ ##$PHC0= -43.6052
$$ ##$PHC1= 18.6
$$ ##$PH_mod= 1
$$ ##$PKNL= yes
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 100
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 0
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.130008466069
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 1024
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <13C.H2O+D2O>
$$ ##$SSB= 2
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 8012.82051282053
$$ ##$SYMM= 0
$$ ##$S_DEV= 989249
$$ ##$TDeff= 1024
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 100
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 4
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 367702553
$$ ##$YMIN_p= -19087955
$$ ##END=
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3"
$$ ;hsqcedetgpsisp2.3
$$ ;avance-version (10/03/18)
$$ ;HSQC
$$ ;2D H-1/X correlation via double inept transfer
$$ ;   using sensitivity improvement
$$ ;phase sensitive using Echo/Antiecho-TPPI gradient selection
$$ ;with decoupling during acquisition
$$ ;using trim pulses in inept transfer
$$ ;with multiplicity editing during selection step
$$ ;using shaped pulses for all 180degree pulses on f2 - channel
$$ ;for matched sweep adiabatic pulses
$$ ;with gradients in back-inept
$$ ;
$$ ;A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
$$ ;   Reson. 93, 151-170 (1991)
$$ ;L.E. Kay, P. Keifer & T. Saarinen, J. Am. Chem. Soc. 114,
$$ ;   10663-5 (1992)
$$ ;J. Schleucher, M. Schwendinger, M. Sattler, P. Schmidt, O. Schedletzky,
$$ ;   S.J. Glaser, O.W. Sorensen & C. Griesinger, J. Biomol. NMR 4,
$$ ;   301-306 (1994)
$$ ;W. Willker, D. Leibfritz, R. Kerssebaum & W. Bermel, Magn. Reson.
$$ ;   Chem. 31, 287-292 (1993)
$$ ;C. Zwahlen, P. Legault, S.J.F. Vincent, J. Greenblatt, R. Konrat &
$$ ;   L.E. Kay, J. Am. Chem. Soc. 119 6711-6721 (1997)
$$ ;(R.D. Boyer, R. Johnson & K. Krishnamurthy, 
$$ ;   J. Magn. Reson. 165, 253-259 (2003) )
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=2D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 35 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3" 2
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Grad.incl" 1
$$ ;Grad2.incl  -  include file for Gradient Spectroscopy
$$ ;   for 1
$$ ;
$$ ;avance-version (07/01/17)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ define list<gradient> EA=<EA>
$$ ;$Id: Grad2.incl,v 1.12 2007/01/22 14:22:35 ber Exp $
$$ # 36 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3" 2
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Delay.incl" 1
$$ ;Delay.incl  -  include file for commonly used delays
$$ ;
$$ ;version 00/02/07
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ ;general delays
$$ define delay DELTA
$$ define delay DELTA1
$$ define delay DELTA2
$$ define delay DELTA3
$$ define delay DELTA4
$$ define delay DELTA5
$$ define delay DELTA6
$$ define delay DELTA7
$$ define delay DELTA8
$$ define delay TAU
$$ define delay TAU1
$$ define delay TAU2
$$ define delay TAU3
$$ define delay TAU4
$$ define delay TAU5
$$ ;delays for centering pulses
$$ define delay CEN_HN1
$$ define delay CEN_HN2
$$ define delay CEN_HN3
$$ define delay CEN_HC1
$$ define delay CEN_HC2
$$ define delay CEN_HC3
$$ define delay CEN_HC4
$$ define delay CEN_HP1
$$ define delay CEN_HP2
$$ define delay CEN_CN1
$$ define delay CEN_CN2
$$ define delay CEN_CN3
$$ define delay CEN_CN4
$$ define delay CEN_CP1
$$ define delay CEN_CP2
$$ ;loop counters
$$ define loopcounter COUNTER
$$ define loopcounter SCALEF
$$ define loopcounter FACTOR1
$$ define loopcounter FACTOR2
$$ define loopcounter FACTOR3
$$ ;$Id: Delay.incl,v 1.12 2005/11/10 12:16:58 ber Exp $
$$ # 37 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3" 2
$$ "p2=p1*2"
$$ "d4=1s/(cnst2*4)"
$$ "d11=30m"
$$ "d0=3u"
$$ "in0=inf1/2"
$$ "DELTA=d21-p16-d16-p2-d0*2-p3*2/3.1416"
$$ "DELTA1=p16+d16+8u"
$$ "DELTA2=d4-larger(p2,p14)/2"
$$ "DELTA3=d24-cnst17*p24/2-p19-d16"
$$ "DELTA4=d4-larger(p2,p14)/2-p16-d16"
$$ "DELTA5=d21-p2+p3*2/3.1416"
$$ # 1 "mc_line 58 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3 expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ define loopcounter ST1CNT
$$ "ST1CNT = td1 / (2)"
$$ "MCWRK = 0.142857*d1"
$$ "MCREST = d1 - d1"
$$     dccorr
$$ # 58 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3"
$$ 1 ze
$$ # 1 "mc_line 58 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3 expanding definition of mc command after ze"
$$ # 59 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3"
$$   d11 pl12:f2
$$ # 1 "mc_line 60 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3 expanding start label for mc command"
$$ 2 MCWRK  * 2 do:f2
$$ LBLSTS1, MCWRK  * 4
$$ LBLF1, MCWRK 
$$   MCREST
$$ # 61 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3"
$$ 3 (p1 ph1)
$$   DELTA2 pl0:f2
$$   4u
$$   (center (p2 ph1) (p14:sp3 ph6):f2 )
$$   4u
$$   DELTA2 pl2:f2 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
$$   p28 ph1
$$   4u
$$   (p1 ph2) (p3 ph3):f2
$$   d0 
$$   (p2 ph7)
$$   d0
$$   p16:gp1*EA
$$   d16
$$   DELTA
$$   (p31:sp18 ph1):f2
$$   (p2 ph1) 
$$   DELTA5
$$   4u
$$   (p31:sp18 ph1):f2
$$   2u
$$   2u pl2:f2
$$   (center (p1 ph1) (p3 ph4):f2 )
$$   p19:gp3
$$   d16
$$   DELTA3
$$   (center (p2 ph1) (p24:sp7 ph1):f2 )
$$   DELTA3
$$   p19:gp3
$$   d16 pl2:f2
$$   (center (p1 ph2) (p3 ph5):f2 )
$$   p16:gp4
$$   d16
$$   DELTA4 pl0:f2
$$   (center (p2 ph1) (p14:sp3 ph1):f2 )
$$   DELTA4
$$   p16:gp4
$$   d16
$$   (p1 ph1)
$$   DELTA1
$$   (p2 ph1)
$$   4u
$$   p16:gp2
$$   d16 pl12:f2
$$   4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$   go=2 ph31 cpd2:f2
$$ # 1 "mc_line 107 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3 expanding mc command in line"
$$   MCWRK  do:f2 wr #0 if #0 zd igrad EA  MCWRK  ip5*2
$$   lo to LBLSTS1 times 2
$$   MCWRK id0  MCWRK  ip3*2  MCWRK  ip6*2  MCWRK  ip31*2
$$   lo to LBLF1 times ST1CNT
$$   MCWRK
$$ # 109 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3"
$$ exit
$$    
$$ ph1=0 
$$ ph2=1
$$ ph3=0 2
$$ ph4=0 0 2 2
$$ ph5=3 3 1 1
$$ ph6=0
$$ ph7=0 0 2 2
$$ ph31=2 0 0 2
$$   
$$ ;pl0 : 120dB
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;pl2 : f2 channel - power level for pulse (default)
$$ ;pl12: f2 channel - power level for CPD/BB decoupling
$$ ;sp3: f2 channel - shaped pulse (180degree inversion)
$$ ;spnam3: Crp60,0.5,20.1
$$ ;sp7: f2 channel - shaped pulse (180degree refocussing)
$$ ;spnam7: Crp60comp.4
$$ ;sp18: f2 channel - shaped pulse 180 degree (adiabatic matched sweep)
$$ ;spnam18: Crp60_xfilt.2
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;p2 : f1 channel - 180 degree high power pulse
$$ ;p3 : f2 channel -  90 degree high power pulse
$$ ;p14: f2 channel - 180 degree shaped pulse for inversion
$$ ;     = 500usec for Crp60,0.5,20.1
$$ ;p16: homospoil/gradient pulse
$$ ;p19: gradient pulse 2                                 [500 usec]
$$ ;p24: f2 channel - 180 degree shaped pulse for refocussing
$$ ;     = 2msec for Crp60comp.4
$$ ;p28: f1 channel - trim pulse
$$ ;p31: f2 channel - 180 degree shaped pulse for adiabatic matched sweep
$$ ;                      1730 us at 600.13 MHz, otherwise: 1730*sqrt(600/x)
$$ ;d0 : incremented delay (2D)                           [3 usec]
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;d4 : 1/(4J)XH
$$ ;d11: delay for disk I/O                               [30 msec]
$$ ;d16: delay for homospoil/gradient recovery
$$ ;d21: set d21 according to multiplicity selection
$$ ;        1/(2J(XH))  XH, XH3 positive, XH2 negative
$$ ;d24: 1/(8J)XH for all multiplicities
$$ ;     1/(4J)XH for XH
$$ ;cnst2: = J(XH)
$$ ;cnst17: = -0.5 for Crp60comp.4
$$ ;inf1: 1/SW(X) = 2 * DW(X)
$$ ;in0: 1/(2 * SW(X)) = DW(X)
$$ ;nd0: 2
$$ ;NS: 1 * n
$$ ;DS: >= 16
$$ ;td1: number of experiments
$$ ;FnMODE: echo-antiecho
$$ ;cpd2: decoupling according to sequence defined by cpdprg2
$$ ;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
$$ ;use gradient ratio:	gp 1 : gp 2 : gp 3 : gp 4
$$ ;			  80 : 20.1 :   11 :   -5    for C-13
$$ ;			  80 :  8.1 :   11 :   -5    for N-15
$$ ;for z-only gradients:
$$ ;gpz1: 80%
$$ ;gpz2: 20.1% for C-13, 8.1% for N-15
$$ ;gpz3: 11%
$$ ;gpz4: -5%
$$ ;use gradient files:   
$$ ;gpnam1: SINE.100
$$ ;gpnam2: SINE.100
$$ ;gpnam3: SINE.100
$$ ;gpnam4: SINE.100
$$ ;cnst17: Factor to compensate for coupling evolution during a pulse
$$ ;       (usually +1). A positive factor indicates that coupling 
$$ ;       evolution continues during the pulse, whereas a negative 
$$ ;       factor is necessary if the coupling is (partially) refocussed.
$$ ;$Id: hsqcedetgpsisp2.3,v 1.4.2.2 2010/03/30 11:51:22 ber Exp $
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pdata/1/title, 0)
$$ echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
$$ (w/ gradients in back-INEPT w/matched adiabatic sweep)
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/uxnmr.par, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Bruker/Granaticin_D
1H spectrum
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	8
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Bruker/Granaticin_D
1H spectrum
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	9
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Bruker/Granaticin_D
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	10
##DATA TYPE=	nD NMR SPECTRUM
##DATA CLASS=	NTUPLES
##NUMDIM=	2
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13275071499998603
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	noesygpphpp
##LONGDATE=	2021/09/05 12:25:16.000
##.ACQUISITIONMODE=	SIMULTANEOUS
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqu2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/acqu2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 129	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 09:10:34.758 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/acqu2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/go
$$ ##$BF1= 500.13
$$ ##$FnMODE= 5
$$ ##$NUC1= <1H>
$$ ##$O1= 2750.715
$$ ##$SFO1= 500.132750715
$$ ##$SW= 12
$$ ##$SW_h= 6001.59300858
$$ ##$TD= 128
$$ ##END=
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 12	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 09:10:38.400 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= -6.36618283677107
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_getlcosy>
$$ ##$AUTOPOS= <>
$$ ##$BF1= 500.13
$$ ##$BF2= 500.13
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 1
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 7.057885e-05 1.5 0 0 0 0 0 0 0.8 0 0 0.03 2e-05 3e-06 0 0 0.0001 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0
$$ ##$DATE= 1630869916
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 6.5
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 32
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 1
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 0 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 18
$$ ##$DS= 16
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 0
$$ ##$DSPFVS= 12
$$ ##$DTYPA= 0
$$ ##$EXP= </opt/topspin2.1pl8/exp/stan/nmr>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 0 0 0 0 0 0 0 0
$$ ##$FL1= 83
$$ ##$FL2= 83
$$ ##$FL3= 83
$$ ##$FL4= 83
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1887019.23076923
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <SINE.100>
$$ ##$GPNAM1= <SINE.100>
$$ ##$GPNAM10= <SINE.100>
$$ ##$GPNAM11= <SINE.100>
$$ ##$GPNAM12= <SINE.100>
$$ ##$GPNAM13= <SINE.100>
$$ ##$GPNAM14= <SINE.100>
$$ ##$GPNAM15= <SINE.100>
$$ ##$GPNAM16= <SINE.100>
$$ ##$GPNAM17= <SINE.100>
$$ ##$GPNAM18= <SINE.100>
$$ ##$GPNAM19= <SINE.100>
$$ ##$GPNAM2= <SINE.100>
$$ ##$GPNAM20= <SINE.100>
$$ ##$GPNAM21= <SINE.100>
$$ ##$GPNAM22= <SINE.100>
$$ ##$GPNAM23= <SINE.100>
$$ ##$GPNAM24= <SINE.100>
$$ ##$GPNAM25= <SINE.100>
$$ ##$GPNAM26= <SINE.100>
$$ ##$GPNAM27= <SINE.100>
$$ ##$GPNAM28= <SINE.100>
$$ ##$GPNAM29= <SINE.100>
$$ ##$GPNAM3= <SINE.100>
$$ ##$GPNAM30= <SINE.100>
$$ ##$GPNAM31= <SINE.100>
$$ ##$GPNAM4= <SINE.100>
$$ ##$GPNAM5= <SINE.100>
$$ ##$GPNAM6= <SINE.100>
$$ ##$GPNAM7= <SINE.100>
$$ ##$GPNAM8= <SINE.100>
$$ ##$GPNAM9= <SINE.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 40 -40 20 10 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <grad_out>
$$ ##$GRPDLY= -1
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 256
$$ ##$HL2= 55
$$ ##$HL3= 83
$$ ##$HL4= 83
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 0.0001666 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 166.622428173716 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5288
$$ ##$LOCKGN= 126.199996948242
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 143.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -2
$$ ##$NLOGCH= 1
$$ ##$NS= 200
$$ ##$NUC1= <1H>
$$ ##$NUC2= <off>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 2750.715
$$ ##$O2= 2302.1734813824
$$ ##$O3= 2302.1734813824
$$ ##$O4= 2302.1734813824
$$ ##$O5= 2302.1734813824
$$ ##$O6= 2302.1734813824
$$ ##$O7= 2302.1734813824
$$ ##$O8= 2302.1734813824
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 10 10 20 0 0 19.8 30 60 20000 0 0 80000 80000 0 0 0 1000 2500 10000 600
$$ 2500 0 0 0 0 250 0 10 2000 1200 0 0 20000 0 0 0 0 0 0 0 2400 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 1
$$ ##$PCPD= (0..9)
$$ 100 60 100 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 -2.5 120 120 120 120 120 120 120 50 7.04 19.44 120 120 120 120 120
$$ 120 -2.5 13.06 120 120 120 120 120 120 120 19.44 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 1
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <noesygpphpp>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 256
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 128 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1 1 0 0
$$ ##$ROUTWD2= (0..23)
$$ 0 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 1 0 1 1 0 0
$$ ##$RSEL= (0..9)
$$ 0 0 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 19 19 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.132750715
$$ ##$SFO2= 500.132302173481
$$ ##$SFO3= 500.132302173481
$$ ##$SFO4= 500.132302173481
$$ ##$SFO5= 500.132302173481
$$ ##$SFO6= 500.132302173481
$$ ##$SFO7= 500.132302173481
$$ ##$SFO8= 500.132302173481
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 67.85 61.83 120 120 0 57.5 120 120 0 34.48 34.48 0 0 120 0 150 150 120
$$ 59.79 57.88 61.19 53.87 150 150 150 150 150 150 21.68 150 120
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gaus1.1000>
$$ ##$SPNAM10= <Sinc1.1000>
$$ ##$SPNAM11= <Sinc1.1000>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <>
$$ ##$SPNAM15= <>
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <>
$$ ##$SPNAM19= <Sinc1.1000>
$$ ##$SPNAM2= <Gaus1_180r.1000>
$$ ##$SPNAM20= <Sinc1.1000>
$$ ##$SPNAM21= <Sinc1.1000>
$$ ##$SPNAM22= <Sinc1.1000>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <Crp60,20,20.10>
$$ ##$SPNAM3= <>
$$ ##$SPNAM30= <gauss>
$$ ##$SPNAM31= <>
$$ ##$SPNAM4= <>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Squa100.1000>
$$ ##$SPNAM7= <>
$$ ##$SPNAM8= < >
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 12.0160404932969
$$ ##$SWIBOX= (0..15)
$$ 0 0 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 6009.61538461538
$$ ##$SWfinal= 0
$$ ##$TD= 2048
$$ ##$TD0= 1
$$ ##$TE= 294.9
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 0 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <jhjj>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <user>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 1024
$$ ##$WBSW= 4
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 0
$$ ##$YL= 0
$$ ##$YMAX_a= 846503
$$ ##$YMIN_a= -806359
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-06 09:10:34.850 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-05 15:16:12.161 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 2K * 128
$$        DC 12 1A 84 92 46 89 71 FE 6F 12 57 1C F6 58 A3>)
$$ ##END=
$$ $$ hash MD5
$$ $$ 29 61 E8 C7 A8 DA 36 8A B6 2F A8 46 4B 7C 1F 81
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-06 09:10:34.850 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-05 15:16:12.161 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 2K * 128
$$        DC 12 1A 84 92 46 89 71 FE 6F 12 57 1C F6 58 A3>)
$$ (   2,<2021-09-06 09:14:39.376 -0400>,<rsamples>,<AV500>,<proc2d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        xfb F2: SI = 1K WDW = 4 SSB = 2 FT_mod = 6 PKNL = 1 PHC0 = 84.59727 PHC1 = -10.6 F1: SI = 1K ME_mod = 2 NCOEF = 8 WDW = 4 SSB = 2 FT_mod = 4 PHC0 = 90 PHC1 = -180
$$        data hash MD5: 1K * 1K
$$        EA 60 2A 97 DD BE 27 F9 F1 45 D4 9B 59 C2 8E 6B>)
$$ ##END=
$$ $$ hash MD5
$$ $$ EA 63 62 41 42 2F E5 FE AB 42 2C 0D B0 C8 4A B3
##$PARAMETER FILE=	(clevels, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pdata/1/clevels, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 8	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 09:14:39.401 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/pdata/1/clevels
$$ $$ process /opt/topspin2.1pl8/prog/mod/dataserver
$$ ##$LEVELS= (0..255)
$$ -10485125.1560448 -5825069.531136 -3236149.73952 -1797860.9664 -998811.648
$$ -554895.36 -308275.2 -171264 171264 308275.2 554895.36 998811.648 1797860.9664
$$ 3236149.73952 5825069.531136 10485125.1560448 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0
$$ ##$LEVSIGN= 3
$$ ##$MAXLEV= 8
$$ ##$METHOD= 0
$$ ##$NEGBASE= -171264
$$ ##$NEGINCR= 1.8
$$ ##$POSBASE= 171264
$$ ##$POSINCR= 1.8
$$ ##END=
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/savethree.jdx, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D0=D[0]"
$$ 		INV_REL	"D[0]=D0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D8
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D8=D[8]"
$$ 		INV_REL	"D[8]=D8"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D11
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D11=D[11]"
$$ 		INV_REL	"D[11]=D11"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D12
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D12=D[12]"
$$ 		INV_REL	"D[12]=D12"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D16=D[16]"
$$ 		INV_REL	"D[16]=D16"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		IN0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"IN0=IN[0]"
$$ 		INV_REL	"IN[0]=IN0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P2=P[2]"
$$ 		INV_REL	"P[2]=P2"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P17
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P17=P[17]"
$$ 		INV_REL	"P[17]=P17"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10=PL[10]"
$$ 		INV_REL	"PL[10]=PL10"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10W=45.4*pow(10.0,(-6-PL[10])/10.0)"
$$ 		INV_REL	"PL[10]=-6-4.3425*log(PL10W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"====== GRADIENT CHANNEL ====="
$$ NAME		GPNAM1
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM2
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ1=GPZ[1]"
$$ 		INV_REL	"GPZ[1]=GPZ1"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ2=GPZ[2]"
$$ 		INV_REL	"GPZ[2]=GPZ2"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P16=P[16]"
$$ 		INV_REL	"P[16]=P16"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
##$PARAMETER FILE=	(proc2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pdata/1/proc2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 2	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 09:14:39.376 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/pdata/1/proc2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <        >
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F1>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 9.8000005086263
$$ ##$F2P= -0.199999491373698
$$ ##$FCOR= 1
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 4
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 0
$$ ##$LPBIN= 256
$$ ##$MAXI= 10000
$$ ##$MC2= 4
$$ ##$MEAN= 0
$$ ##$ME_mod= 2
$$ ##$MI= 1
$$ ##$NCOEF= 8
$$ ##$NC_proc= 3
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 11.50003
$$ ##$PC= 4
$$ ##$PHC0= 90
$$ ##$PHC1= -180
$$ ##$PH_mod= 1
$$ ##$PKNL= no
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 1
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.13
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 1024
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <RRRRRRRR>
$$ ##$SSB= 2
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 6001.59300858
$$ ##$SYMM= 0
$$ ##$S_DEV= 1338
$$ ##$TDeff= 256
$$ ##$TDoff= 0
$$ ##$TI= <        >
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 4
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 202816396
$$ ##$YMIN_p= -25249015
$$ ##END=
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 2	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 09:14:39.376 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_2dhom>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F2>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 9.8000005086263
$$ ##$F2P= -0.199999491373698
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 35
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= 3
$$ ##$NLEV= 6
$$ ##$NOISF1= 0.15
$$ ##$NOISF2= 0.1
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 11.50805
$$ ##$PC= 1
$$ ##$PHC0= 84.59727
$$ ##$PHC1= -10.6
$$ ##$PH_mod= 1
$$ ##$PKNL= yes
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 0
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.13
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 1024
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <RRRRRRRRRRRRRRR>
$$ ##$SSB= 2
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 6009.6153846154
$$ ##$SYMM= 0
$$ ##$S_DEV= 1338
$$ ##$TDeff= 2048
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 100
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 4
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 202816396
$$ ##$YMIN_p= -25249015
$$ ##END=
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp"
$$ ;noesygpphpp
$$ ;avance-version (07/04/04)
$$ ;2D homonuclear correlation via dipolar coupling 
$$ ;dipolar coupling may be due to noe or chemical exchange.
$$ ;phase sensitive
$$ ;with gradient pulses in mixing time
$$ ;using purge pulses before d1
$$ ;
$$ ;J. Jeener, B.H. Meier, P. Bachmann & R.R. Ernst, J. Chem. Phys. 71,
$$ ;   4546-4553 (1979)
$$ ;R. Wagner & S. Berger, J. Magn. Reson. 123 A, 119-121 (1996)
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=2D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 20 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp" 2
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Grad.incl" 1
$$ ;Grad2.incl  -  include file for Gradient Spectroscopy
$$ ;   for 1
$$ ;
$$ ;avance-version (07/01/17)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ define list<gradient> EA=<EA>
$$ ;$Id: Grad2.incl,v 1.12 2007/01/22 14:22:35 ber Exp $
$$ # 21 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp" 2
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Delay.incl" 1
$$ ;Delay.incl  -  include file for commonly used delays
$$ ;
$$ ;version 00/02/07
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ ;general delays
$$ define delay DELTA
$$ define delay DELTA1
$$ define delay DELTA2
$$ define delay DELTA3
$$ define delay DELTA4
$$ define delay DELTA5
$$ define delay DELTA6
$$ define delay DELTA7
$$ define delay DELTA8
$$ define delay TAU
$$ define delay TAU1
$$ define delay TAU2
$$ define delay TAU3
$$ define delay TAU4
$$ define delay TAU5
$$ ;delays for centering pulses
$$ define delay CEN_HN1
$$ define delay CEN_HN2
$$ define delay CEN_HN3
$$ define delay CEN_HC1
$$ define delay CEN_HC2
$$ define delay CEN_HC3
$$ define delay CEN_HC4
$$ define delay CEN_HP1
$$ define delay CEN_HP2
$$ define delay CEN_CN1
$$ define delay CEN_CN2
$$ define delay CEN_CN3
$$ define delay CEN_CN4
$$ define delay CEN_CP1
$$ define delay CEN_CP2
$$ ;loop counters
$$ define loopcounter COUNTER
$$ define loopcounter SCALEF
$$ define loopcounter FACTOR1
$$ define loopcounter FACTOR2
$$ define loopcounter FACTOR3
$$ ;$Id: Delay.incl,v 1.12 2005/11/10 12:16:58 ber Exp $
$$ # 22 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp" 2
$$ "p2=p1*2"
$$ "d11=30m"
$$ "d12=20u"
$$ "in0=inf1"
$$ "d0=in0/2-p1*4/3.1416"
$$ "TAU=d8*0.5-p16-d16"
$$ "acqt0=-p1*2/3.1416"
$$ # 1 "mc_line 41 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ define loopcounter ST1CNT
$$ "ST1CNT = td1 / (2)"
$$ "MCWRK = 0.333333*d11"
$$ "MCREST = d11 - d11"
$$     dccorr
$$ # 41 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp"
$$ 1 ze
$$ # 1 "mc_line 41 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp expanding definition of mc command after ze"
$$ # 42 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp"
$$ # 1 "mc_line 42 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp expanding start label for mc command"
$$ 2 MCWRK 
$$ LBLSTS1, MCWRK 
$$ LBLF1, MCWRK
$$   MCREST
$$ # 43 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp"
$$ 3 d12 pl10:f1
$$   p17 ph4
$$   p17*2 ph5
$$   d1 pl1:f1
$$   p1 ph1
$$   d0
$$   p1 ph2
$$   TAU setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
$$   p16:gp1
$$   d16
$$   3u
$$   (p2 ph4):f1
$$   3u
$$   p16:gp2
$$   d16
$$   TAU setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$   p1 ph3
$$   go=2 ph31
$$ # 1 "mc_line 63 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp expanding mc command in line"
$$   MCWRK  wr #0 if #0 zd ip1
$$   lo to LBLSTS1 times 2
$$   MCWRK id0
$$   lo to LBLF1 times ST1CNT
$$   MCWRK
$$ # 64 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp"
$$ exit
$$ ph1=0 2 
$$ ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
$$ ph3=0 0 2 2 1 1 3 3
$$ ph4=0
$$ ph5=1
$$ ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;pl10: f1 channel - power level for TOCSY-spinlock
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;p2 : f1 channel - 180 degree high power pulse
$$ ;p16: homospoil/gradient pulse                            [1 msec]
$$ ;p17: f1 channel - trim pulse                             [2.5 msec]
$$ ;d0 : incremented delay (2D)
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;d8 : mixing time
$$ ;d12: delay for power switching                           [20 usec]
$$ ;d16: delay for homospoil/gradient recovery
$$ ;inf1: 1/SW = 2 * DW
$$ ;in0: 1/(1 * SW) = 2 * DW
$$ ;nd0: 1
$$ ;NS: 2 * n
$$ ;DS: 16
$$ ;td1: number of experiments
$$ ;FnMODE: States-TPPI, TPPI, States or QSEQ
$$ ;use gradient ratio:    gp 1 : gp 2
$$ ;                         40 :  -40
$$ ;for z-only gradients:
$$ ;gpz1: 40%
$$ ;gpz2: -40%
$$ ;use gradient files:   
$$ ;gpnam1: SINE.100
$$ ;gpnam2: SINE.100
$$ ;Processing
$$ ;PHC0(F1): 90
$$ ;PHC1(F1): -180
$$ ;FCOR(F1): 1
$$ ;$Id: noesygpphpp,v 1.5 2007/04/11 13:34:31 ber Exp $
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pdata/1/title, 0)
$$ 1H spectrum
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/uxnmr.par, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1DselTOCSY1.fid
SELMLGP
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	11
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1DselTOCSY1.fid
SELMLGP
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	12
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1DselTOCSY1.fid
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	13
##DATA TYPE=	NMR SPECTRUM
##DATA CLASS=	XYDATA
##NUMDIM=	1
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13048512609998397
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	selmlgp
##LONGDATE=	2021/09/06 07:14:35.000
##.ACQUISITIONMODE=	SIMULTANEOUS (DQD)
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY1.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 39	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 10:15:37.314 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/2/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= 1000000
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_sel180zg>
$$ ##$AUTOPOS= <>
$$ ##$BF1= 500.13
$$ ##$BF2= 500.13
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 1
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 0 2 0 0 0 0 0 0 0.3 0.12 0 0.03 0 3e-06 3e-06 0 0.0002 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0
$$ ##$DATE= 1630937675
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 6.5
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 16
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 1
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 18
$$ ##$DS= 2
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 0
$$ ##$DSPFVS= 12
$$ ##$DTYPA= 0
$$ ##$EXP= <SELMLGP>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 0 0 0 0 0 0 0 0
$$ ##$FL1= 90
$$ ##$FL2= 90
$$ ##$FL3= 90
$$ ##$FL4= 90
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1895000
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <sine.100>
$$ ##$GPNAM1= <SINE.100>
$$ ##$GPNAM10= <sine.100>
$$ ##$GPNAM11= <sine.100>
$$ ##$GPNAM12= <sine.100>
$$ ##$GPNAM13= <sine.100>
$$ ##$GPNAM14= <sine.100>
$$ ##$GPNAM15= <sine.100>
$$ ##$GPNAM16= <sine.100>
$$ ##$GPNAM17= <sine.100>
$$ ##$GPNAM18= <sine.100>
$$ ##$GPNAM19= <sine.100>
$$ ##$GPNAM2= <SINE.100>
$$ ##$GPNAM20= <sine.100>
$$ ##$GPNAM21= <sine.100>
$$ ##$GPNAM22= <sine.100>
$$ ##$GPNAM23= <sine.100>
$$ ##$GPNAM24= <sine.100>
$$ ##$GPNAM25= <sine.100>
$$ ##$GPNAM26= <sine.100>
$$ ##$GPNAM27= <sine.100>
$$ ##$GPNAM28= <sine.100>
$$ ##$GPNAM29= <sine.100>
$$ ##$GPNAM3= <SINE.100>
$$ ##$GPNAM30= <sine.100>
$$ ##$GPNAM31= <sine.100>
$$ ##$GPNAM4= <SINE.100>
$$ ##$GPNAM5= <sine.100>
$$ ##$GPNAM6= <sine.100>
$$ ##$GPNAM7= <sine.100>
$$ ##$GPNAM8= <sine.100>
$$ ##$GPNAM9= <sine.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 15 17 40 -40 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <grad_out>
$$ ##$GRPDLY= -1
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 90
$$ ##$HL2= 90
$$ ##$HL3= 90
$$ ##$HL4= 90
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 72 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5288
$$ ##$LOCKGN= 126.199996948242
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 143.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -2
$$ ##$NLOGCH= 1
$$ ##$NS= 32
$$ ##$NUC1= <1H>
$$ ##$NUC2= <off>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 485.1261
$$ ##$O2= 2221.69412245421
$$ ##$O3= 2221.69412245421
$$ ##$O4= 2221.69412245421
$$ ##$O5= 2221.69412245421
$$ ##$O6= 2221.69412245421
$$ ##$O7= 2221.69412245421
$$ ##$O8= 2221.69412245421
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 8.8 8.8 17.6 0 0 16.675 25 50 20 0 0 0 80000 34 0 200000 1000 1600 0 1000
$$ 25 0 0 0 0 0 250000 8.8 2000 400 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 0
$$ ##$PCPD= (0..9)
$$ 100 100 100 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 0 120 120 120 -6 120 -3 120 120 9.07 120 120 120 120 120 120 -3 0 120
$$ 0.5 120 64 120 120 6 120 120 120 120 120 -6 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 1
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <selmlgp>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 8192
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1 1 0 0
$$ ##$ROUTWD2= (0..23)
$$ 0 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 1 0 1 1 0 0
$$ ##$RSEL= (0..9)
$$ 0 0 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.1304851261
$$ ##$SFO2= 500.132221694122
$$ ##$SFO3= 500.132221694122
$$ ##$SFO4= 500.132221694122
$$ ##$SFO5= 500.132221694122
$$ ##$SFO6= 500.132221694122
$$ ##$SFO7= 500.132221694122
$$ ##$SFO8= 500.132221694122
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 69.76585 70 0 0 0 120 0 0 0 0 0 0 0 0 0 150 150 150 150 150 150 150 150
$$ 150 150 150 150 150 150 150 150
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gauss>
$$ ##$SPNAM10= <gauss>
$$ ##$SPNAM11= <gauss>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <gauss>
$$ ##$SPNAM15= <gauss>
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <gauss>
$$ ##$SPNAM19= <gauss>
$$ ##$SPNAM2= <Gaus1.1000>
$$ ##$SPNAM20= <gauss>
$$ ##$SPNAM21= <gauss>
$$ ##$SPNAM22= <gauss>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <gauss>
$$ ##$SPNAM3= <>
$$ ##$SPNAM30= <gauss>
$$ ##$SPNAM31= <gauss>
$$ ##$SPNAM4= <gauss>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Gaus1.1000>
$$ ##$SPNAM7= <>
$$ ##$SPNAM8= <gauss>
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 -86.47523 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 19.9947819567101
$$ ##$SWIBOX= (0..15)
$$ 0 0 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 10000
$$ ##$SWfinal= 0
$$ ##$TD= 32768
$$ ##$TD0= 1
$$ ##$TE= 295.9
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <selective>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 1024
$$ ##$WBSW= 4
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 0
$$ ##$YL= 0
$$ ##$YMAX_a= 64647
$$ ##$YMIN_a= -51743
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
$$ 
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY1.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/2/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-06 10:15:33.874 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-06 10:13:16.931 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 32K
$$        C2 13 3B B0 A2 2A 50 6A B9 DC 89 30 F2 06 BC BF>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 84 EC F3 FE 7A 5C 82 48 11 23 65 81 CF 39 64 DA
$$ 
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY1.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/2/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-06 10:15:33.874 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-06 10:13:16.931 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 32K
$$        C2 13 3B B0 A2 2A 50 6A B9 DC 89 30 F2 06 BC BF>)
$$ (   2,<2021-09-06 10:15:42.577 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        ef LB = 0.1 FT_mod = 6 PKNL = 1 SI = 64K 
$$        data hash MD5: 64K
$$        D1 8F 5E 99 F0 0F 83 0F 60 A0 46 8B CC 57 92 06>)
$$ (   3,<2021-09-06 10:15:43.080 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <apk 
$$        data hash MD5: 64K
$$        F1 B1 DC B8 B6 B8 97 0E ED D3 4F 74 49 DA 47 4A>)
$$ (   4,<2021-09-06 10:17:44.560 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <pk fgphup PHC0 = -105.8782 PHC1 = -129.55 
$$        data hash MD5: 64K
$$        43 7B 57 8E 5C C4 81 31 A0 F3 46 27 31 E9 9D 74>)
$$ (   5,<2021-09-06 10:42:17.524 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <pk fgphup PHC0 = -22.1707 PHC1 = 52.2 
$$        data hash MD5: 64K
$$        4A 16 45 F3 17 74 F9 CF 45 04 03 D9 3A 0B C3 65>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ AB 49 05 43 7F 05 14 8E 73 6A 7D D0 CB 54 B0 D2
$$ 
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY1.fid/fid, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY1.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ 
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ 
$$ 
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D9
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D9=D[9]"
$$ 		INV_REL	"D[9]=D9"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D16=D[16]"
$$ 		INV_REL	"D[16]=D16"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		L1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"L1=L[1]"
$$ 		INV_REL	"L[1]=L1"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ NAME		TD0
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P5
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P5=P[5]"
$$ 		INV_REL	"P[5]=P5"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P6
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P6=P[6]"
$$ 		INV_REL	"P[6]=P6"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P7
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P7=P[7]"
$$ 		INV_REL	"P[7]=P7"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P12
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P12=P[12]"
$$ 		INV_REL	"P[12]=P12"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P17
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P17=P[17]"
$$ 		INV_REL	"P[17]=P17"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL0=PL[0]"
$$ 		INV_REL	"PL[0]=PL0"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10=PL[10]"
$$ 		INV_REL	"PL[10]=PL10"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL0W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL0W=45.4*pow(10.0,(-6-PL[0])/10.0)"
$$ 		INV_REL	"PL[0]=-6-4.3425*log(PL0W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10W=45.4*pow(10.0,(-6-PL[10])/10.0)"
$$ 		INV_REL	"PL[10]=-6-4.3425*log(PL10W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP2=SP[2]"
$$ 		INV_REL	"SP[2]=SP2"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM2
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL2=SPOAL[2]"
$$ 		INV_REL	"SPOAL[2]=SPOAL2"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS2=SPOFFS[2]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"====== GRADIENT CHANNEL ====="
$$ NAME		GPNAM1
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ1=GPZ[1]"
$$ 		INV_REL	"GPZ[1]=GPZ1"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P16=P[16]"
$$ 		INV_REL	"P[16]=P16"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ 
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY1.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 18	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 10:42:17.523 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/2/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc1d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_1d>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.01
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 65536
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0.1
$$ ##$LEV0= 0
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= -5
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 10.9674
$$ ##$PC= 1
$$ ##$PHC0= -112.2464
$$ ##$PHC1= -111.3189
$$ ##$PH_mod= 1
$$ ##$PKNL= yes
$$ ##$PPARMOD= 0
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 4
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.13
$$ ##$SI= 65536
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 400
$$ ##$SIOLD= 65536
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <1H.CDCl3>
$$ ##$SSB= 0
$$ ##$STSI= 65536
$$ ##$STSR= 0
$$ ##$SW_p= 10000
$$ ##$SYMM= 0
$$ ##$S_DEV= 0
$$ ##$TDeff= 32768
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 1
$$ ##$XDIM= 8192
$$ ##$YMAX_p= 116086526
$$ ##$YMIN_p= -355990710
$$ ##END=
$$ 
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY1.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$ ;selmlgp
$$ ;avance-version (02/05/31)
$$ ;1D homonuclear Hartman-Hahn transfer using
$$ ;   MLEV17 sequence for mixing
$$ ;   using selective refocussing with a shaped pulse
$$ ;
$$ ;H. Kessler, H. Oschkinat, C. Griesinger & W. Bermel,
$$ ;   J. Magn. Reson. 70, 106 (1986)
$$ ;J. Stonehouse, P. Adell, J. Keeler & A.J. Shaka, J. Am. Chem. Soc 116,
$$ ;   6037 (1994)
$$ ;K. Stott, J. Stonehouse, J. Keeler, T.L. Hwang & A.J. Shaka,
$$ ;   J. Am. Chem. Soc 117, 4199-4200 (1995)
$$ ;A. Bax & D.G. Davis, J. Magn. Reson. 65, 355-360 (1985)
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=1D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ 
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 22 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Grad.incl" 1
$$ ;Grad2.incl  -  include file for Gradient Spectroscopy
$$ ;   for 1
$$ ;
$$ ;avance-version (07/01/17)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ define list<gradient> EA=<EA>
$$ 
$$ 
$$ 
$$ ;$Id: Grad2.incl,v 1.12 2007/01/22 14:22:35 ber Exp $
$$ # 23 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Delay.incl" 1
$$ ;Delay.incl  -  include file for commonly used delays
$$ ;
$$ ;version 00/02/07
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ ;general delays
$$ 
$$ define delay DELTA
$$ define delay DELTA1
$$ define delay DELTA2
$$ define delay DELTA3
$$ define delay DELTA4
$$ define delay DELTA5
$$ define delay DELTA6
$$ define delay DELTA7
$$ define delay DELTA8
$$ 
$$ define delay TAU
$$ define delay TAU1
$$ define delay TAU2
$$ define delay TAU3
$$ define delay TAU4
$$ define delay TAU5
$$ 
$$ 
$$ ;delays for centering pulses
$$ 
$$ define delay CEN_HN1
$$ define delay CEN_HN2
$$ define delay CEN_HN3
$$ define delay CEN_HC1
$$ define delay CEN_HC2
$$ define delay CEN_HC3
$$ define delay CEN_HC4
$$ define delay CEN_HP1
$$ define delay CEN_HP2
$$ define delay CEN_CN1
$$ define delay CEN_CN2
$$ define delay CEN_CN3
$$ define delay CEN_CN4
$$ define delay CEN_CP1
$$ define delay CEN_CP2
$$ 
$$ 
$$ ;loop counters
$$ 
$$ define loopcounter COUNTER
$$ define loopcounter SCALEF
$$ define loopcounter FACTOR1
$$ define loopcounter FACTOR2
$$ define loopcounter FACTOR3
$$ 
$$ 
$$ 
$$ ;$Id: Delay.incl,v 1.12 2005/11/10 12:16:58 ber Exp $
$$ # 24 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp" 2
$$ 
$$ 
$$ 
$$ "p5=p6*.667"
$$ "p7=p6*2"
$$ 
$$ 
$$ "SCALEF=p7*2/p5+0.5"
$$ "FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF+0.5"
$$ "l1=FACTOR1*SCALEF"
$$ 
$$ 
$$ # 1 "mc_line 36 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ "MCWRK = 0.333333*30m"
$$ "MCREST = 30m - 30m"
$$     dccorr
$$ # 36 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$ 1 ze
$$ # 1 "mc_line 36 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding definition of mc command after ze"
$$ # 37 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$ # 1 "mc_line 37 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding start label for mc command"
$$ 2 MCWRK  * 2
$$ LBLF0, MCWRK
$$   MCREST
$$ # 38 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$   20u pl1:f1 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$   d1
$$   50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
$$   (p1 ph1):f1
$$   3u
$$   p16:gp1
$$   d16 pl0:f1
$$   p12:sp2:f1 ph2:r
$$   3u
$$   p16:gp1
$$   d16 pl10:f1
$$   (p17 ph26)
$$ 						;begin MLEV17
$$ 4 (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p5 ph23)
$$   lo to 4 times l1 
$$ 						;end MLEV17
$$   (p17 ph26) 
$$   go=2 ph31
$$ # 1 "mc_line 72 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding mc command in line"
$$   MCWRK wr #0
$$   MCWRK zd 
$$   lo to LBLF0 times td0
$$ 
$$   MCWRK
$$ # 73 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$   20u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$ exit
$$ 
$$ 
$$ ph1=0 2 
$$ ph2=0 0 1 1 2 2 3 3
$$ ph22=0
$$ ph23=1
$$ ph24=2
$$ ph25=3
$$ ph26=1
$$ ph31=0 2 2 0 
$$ 
$$ 
$$ ;pl0 : 120dB
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;pl10: f1 channel - power level for TOCSY-spinlock
$$ ;sp2: f1 channel - shaped pulse
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;p5 : f1 channel -  60 degree low power pulse
$$ ;p6 : f1 channel -  90 degree low power pulse
$$ ;p7 : f1 channel - 180 degree low power pulse
$$ ;p12: f1 channel - 180 degree shaped pulse
$$ ;p16: homospoil/gradient pulse                            [1 msec]
$$ ;p17: f1 channel - trim pulse                             [2.5 msec]
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;d9 : TOCSY mixing time
$$ ;d16: delay for homospoil/gradient recovery
$$ ;l1: loop for MLEV cycle: (((p6*64) + p5) * l1) + (p17*2) = mixing time
$$ ;NS: 2 * n, total number of scans: NS * TD0
$$ ;DS: 4
$$ 
$$ 
$$ ;phcor 2 : phasedifference between power levels sp1 and pl1
$$ 
$$ ;choose p12 according to desired selectivity
$$ ;the flip-angle is determined by the amplitude
$$ ;set O1 on resonance on the multiplet to be excited or use spoffs
$$ 
$$ 
$$ ;use gradient ratio:    gp 1
$$ ;                         15
$$ 
$$ ;for z-only gradients:
$$ ;gpz1: 15%
$$ 
$$ ;use gradient files:   
$$ ;gpnam1: SINE.100
$$ 
$$ 
$$ 
$$ ;$Id: selmlgp,v 1.13 2005/11/10 12:17:01 ber Exp $
$$ 
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY1.fid/pdata/1/title, 0)
$$ SELMLGP
$$ 
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY1.fid/uxnmr.par, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1DselTOCSY2.fid
SELMLGP
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	14
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1DselTOCSY2.fid
SELMLGP
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	15
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1DselTOCSY2.fid
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	16
##DATA TYPE=	NMR SPECTRUM
##DATA CLASS=	XYDATA
##NUMDIM=	1
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13256116573001009
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	selmlgp
##LONGDATE=	2021/09/06 07:21:58.000
##.ACQUISITIONMODE=	SIMULTANEOUS (DQD)
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY2.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 17	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 10:37:12.618 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/3/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= 1000000
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_sel180zg>
$$ ##$AUTOPOS= <>
$$ ##$BF1= 500.13
$$ ##$BF2= 500.13
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 1
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 0 2 0 0 0 0 0 0 0.3 0.12 0 0.03 0 3e-06 3e-06 0 0.0002 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0
$$ ##$DATE= 1630938118
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 6.5
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 16
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 1
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 18
$$ ##$DS= 2
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 0
$$ ##$DSPFVS= 12
$$ ##$DTYPA= 0
$$ ##$EXP= <>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 0 0 0 0 0 0 0 0
$$ ##$FL1= 90
$$ ##$FL2= 90
$$ ##$FL3= 90
$$ ##$FL4= 90
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1895000
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <sine.100>
$$ ##$GPNAM1= <SINE.100>
$$ ##$GPNAM10= <sine.100>
$$ ##$GPNAM11= <sine.100>
$$ ##$GPNAM12= <sine.100>
$$ ##$GPNAM13= <sine.100>
$$ ##$GPNAM14= <sine.100>
$$ ##$GPNAM15= <sine.100>
$$ ##$GPNAM16= <sine.100>
$$ ##$GPNAM17= <sine.100>
$$ ##$GPNAM18= <sine.100>
$$ ##$GPNAM19= <sine.100>
$$ ##$GPNAM2= <SINE.100>
$$ ##$GPNAM20= <sine.100>
$$ ##$GPNAM21= <sine.100>
$$ ##$GPNAM22= <sine.100>
$$ ##$GPNAM23= <sine.100>
$$ ##$GPNAM24= <sine.100>
$$ ##$GPNAM25= <sine.100>
$$ ##$GPNAM26= <sine.100>
$$ ##$GPNAM27= <sine.100>
$$ ##$GPNAM28= <sine.100>
$$ ##$GPNAM29= <sine.100>
$$ ##$GPNAM3= <SINE.100>
$$ ##$GPNAM30= <sine.100>
$$ ##$GPNAM31= <sine.100>
$$ ##$GPNAM4= <SINE.100>
$$ ##$GPNAM5= <sine.100>
$$ ##$GPNAM6= <sine.100>
$$ ##$GPNAM7= <sine.100>
$$ ##$GPNAM8= <sine.100>
$$ ##$GPNAM9= <sine.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 15 17 40 -40 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <grad_out>
$$ ##$GRPDLY= -1
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 90
$$ ##$HL2= 90
$$ ##$HL3= 90
$$ ##$HL4= 90
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 72 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5288
$$ ##$LOCKGN= 126.199996948242
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 143.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -2
$$ ##$NLOGCH= 1
$$ ##$NS= 256
$$ ##$NUC1= <1H>
$$ ##$NUC2= <off>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 2561.16573
$$ ##$O2= 2221.69412245421
$$ ##$O3= 2221.69412245421
$$ ##$O4= 2221.69412245421
$$ ##$O5= 2221.69412245421
$$ ##$O6= 2221.69412245421
$$ ##$O7= 2221.69412245421
$$ ##$O8= 2221.69412245421
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 8.8 8.8 17.6 0 0 16.675 25 50 20 0 0 0 80000 34 0 200000 1000 1600 0 1000
$$ 25 0 0 0 0 0 250000 8.8 2000 400 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 0
$$ ##$PCPD= (0..9)
$$ 100 100 100 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 0 120 120 120 -6 120 -3 120 120 9.07 120 120 120 120 120 120 -3 0 120
$$ 0.5 120 64 120 120 6 120 120 120 120 120 -6 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 1
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <selmlgp>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 8192
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1 1 0 0
$$ ##$ROUTWD2= (0..23)
$$ 0 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 1 0 1 1 0 0
$$ ##$RSEL= (0..9)
$$ 0 0 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.13256116573
$$ ##$SFO2= 500.132221694122
$$ ##$SFO3= 500.132221694122
$$ ##$SFO4= 500.132221694122
$$ ##$SFO5= 500.132221694122
$$ ##$SFO6= 500.132221694122
$$ ##$SFO7= 500.132221694122
$$ ##$SFO8= 500.132221694122
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 69.76585 70 0 0 0 120 0 0 0 0 0 0 0 0 0 150 150 150 150 150 150 150 150
$$ 150 150 150 150 150 150 150 150
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gauss>
$$ ##$SPNAM10= <gauss>
$$ ##$SPNAM11= <gauss>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <gauss>
$$ ##$SPNAM15= <gauss>
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <gauss>
$$ ##$SPNAM19= <gauss>
$$ ##$SPNAM2= <Gaus1.1000>
$$ ##$SPNAM20= <gauss>
$$ ##$SPNAM21= <gauss>
$$ ##$SPNAM22= <gauss>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <gauss>
$$ ##$SPNAM3= <>
$$ ##$SPNAM30= <gauss>
$$ ##$SPNAM31= <gauss>
$$ ##$SPNAM4= <gauss>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Gaus1.1000>
$$ ##$SPNAM7= <>
$$ ##$SPNAM8= <gauss>
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 -86.47523 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 19.9946989587952
$$ ##$SWIBOX= (0..15)
$$ 0 0 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 10000
$$ ##$SWfinal= 0
$$ ##$TD= 32768
$$ ##$TD0= 1
$$ ##$TE= 295.9
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <selective>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 1024
$$ ##$WBSW= 4
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 0
$$ ##$YL= 0
$$ ##$YMAX_a= 360393
$$ ##$YMIN_a= -352608
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
$$ 
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY2.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/3/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-06 10:37:09.156 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-06 10:20:24.271 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 32K
$$        20 CC F4 B7 C3 10 9B 51 7C BE 9E 80 E0 38 9C AE>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 74 43 47 88 10 FD C7 76 76 09 E7 F0 9F CE FC DE
$$ 
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY2.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/3/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-06 10:37:09.156 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-06 10:20:24.271 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 32K
$$        20 CC F4 B7 C3 10 9B 51 7C BE 9E 80 E0 38 9C AE>)
$$ (   2,<2021-09-06 10:37:15.165 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        ef LB = 0.1 FT_mod = 6 PKNL = 1 SI = 64K 
$$        data hash MD5: 64K
$$        A6 D1 B8 DA 6F D8 8E 75 FD 30 40 62 92 8B 5D 84>)
$$ (   3,<2021-09-06 10:37:15.566 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <apk 
$$        data hash MD5: 64K
$$        EC 5A 3C 03 86 17 59 CF 65 47 0B 7E 2E D9 C2 77>)
$$ (   4,<2021-09-06 10:42:52.993 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <pk fgphup PHC0 = 60.44831 PHC1 = -119.45 
$$        data hash MD5: 64K
$$        F4 10 FC 51 F9 17 FD EF 85 02 20 65 C3 2F F2 AB>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 4F AD 6B 3A 67 13 AA A8 EE 05 C4 33 08 1C 4B A2
$$ 
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY2.fid/fid, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY2.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ 
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ 
$$ 
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D9
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D9=D[9]"
$$ 		INV_REL	"D[9]=D9"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D16=D[16]"
$$ 		INV_REL	"D[16]=D16"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		L1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"L1=L[1]"
$$ 		INV_REL	"L[1]=L1"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ NAME		TD0
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P5
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P5=P[5]"
$$ 		INV_REL	"P[5]=P5"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P6
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P6=P[6]"
$$ 		INV_REL	"P[6]=P6"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P7
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P7=P[7]"
$$ 		INV_REL	"P[7]=P7"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P12
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P12=P[12]"
$$ 		INV_REL	"P[12]=P12"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P17
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P17=P[17]"
$$ 		INV_REL	"P[17]=P17"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL0=PL[0]"
$$ 		INV_REL	"PL[0]=PL0"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10=PL[10]"
$$ 		INV_REL	"PL[10]=PL10"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL0W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL0W=45.4*pow(10.0,(-6-PL[0])/10.0)"
$$ 		INV_REL	"PL[0]=-6-4.3425*log(PL0W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10W=45.4*pow(10.0,(-6-PL[10])/10.0)"
$$ 		INV_REL	"PL[10]=-6-4.3425*log(PL10W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP2=SP[2]"
$$ 		INV_REL	"SP[2]=SP2"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM2
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL2=SPOAL[2]"
$$ 		INV_REL	"SPOAL[2]=SPOAL2"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS2=SPOFFS[2]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"====== GRADIENT CHANNEL ====="
$$ NAME		GPNAM1
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ1=GPZ[1]"
$$ 		INV_REL	"GPZ[1]=GPZ1"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P16=P[16]"
$$ 		INV_REL	"P[16]=P16"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ 
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY2.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 20	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 10:42:52.992 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/3/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc1d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_1d>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.01
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 65536
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0.1
$$ ##$LEV0= 0
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= -2
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 15.1184
$$ ##$PC= 1
$$ ##$PHC0= 269.8418
$$ ##$PHC1= -191.6173
$$ ##$PH_mod= 1
$$ ##$PKNL= yes
$$ ##$PPARMOD= 0
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 4
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.13
$$ ##$SI= 65536
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 400
$$ ##$SIOLD= 65536
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <1H.CDCl3>
$$ ##$SSB= 0
$$ ##$STSI= 65536
$$ ##$STSR= 0
$$ ##$SW_p= 10000
$$ ##$SYMM= 0
$$ ##$S_DEV= 0
$$ ##$TDeff= 32768
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 1
$$ ##$XDIM= 8192
$$ ##$YMAX_p= 281917487
$$ ##$YMIN_p= -123921684
$$ ##END=
$$ 
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY2.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$ ;selmlgp
$$ ;avance-version (02/05/31)
$$ ;1D homonuclear Hartman-Hahn transfer using
$$ ;   MLEV17 sequence for mixing
$$ ;   using selective refocussing with a shaped pulse
$$ ;
$$ ;H. Kessler, H. Oschkinat, C. Griesinger & W. Bermel,
$$ ;   J. Magn. Reson. 70, 106 (1986)
$$ ;J. Stonehouse, P. Adell, J. Keeler & A.J. Shaka, J. Am. Chem. Soc 116,
$$ ;   6037 (1994)
$$ ;K. Stott, J. Stonehouse, J. Keeler, T.L. Hwang & A.J. Shaka,
$$ ;   J. Am. Chem. Soc 117, 4199-4200 (1995)
$$ ;A. Bax & D.G. Davis, J. Magn. Reson. 65, 355-360 (1985)
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=1D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ 
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 22 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Grad.incl" 1
$$ ;Grad2.incl  -  include file for Gradient Spectroscopy
$$ ;   for 1
$$ ;
$$ ;avance-version (07/01/17)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ define list<gradient> EA=<EA>
$$ 
$$ 
$$ 
$$ ;$Id: Grad2.incl,v 1.12 2007/01/22 14:22:35 ber Exp $
$$ # 23 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Delay.incl" 1
$$ ;Delay.incl  -  include file for commonly used delays
$$ ;
$$ ;version 00/02/07
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ ;general delays
$$ 
$$ define delay DELTA
$$ define delay DELTA1
$$ define delay DELTA2
$$ define delay DELTA3
$$ define delay DELTA4
$$ define delay DELTA5
$$ define delay DELTA6
$$ define delay DELTA7
$$ define delay DELTA8
$$ 
$$ define delay TAU
$$ define delay TAU1
$$ define delay TAU2
$$ define delay TAU3
$$ define delay TAU4
$$ define delay TAU5
$$ 
$$ 
$$ ;delays for centering pulses
$$ 
$$ define delay CEN_HN1
$$ define delay CEN_HN2
$$ define delay CEN_HN3
$$ define delay CEN_HC1
$$ define delay CEN_HC2
$$ define delay CEN_HC3
$$ define delay CEN_HC4
$$ define delay CEN_HP1
$$ define delay CEN_HP2
$$ define delay CEN_CN1
$$ define delay CEN_CN2
$$ define delay CEN_CN3
$$ define delay CEN_CN4
$$ define delay CEN_CP1
$$ define delay CEN_CP2
$$ 
$$ 
$$ ;loop counters
$$ 
$$ define loopcounter COUNTER
$$ define loopcounter SCALEF
$$ define loopcounter FACTOR1
$$ define loopcounter FACTOR2
$$ define loopcounter FACTOR3
$$ 
$$ 
$$ 
$$ ;$Id: Delay.incl,v 1.12 2005/11/10 12:16:58 ber Exp $
$$ # 24 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp" 2
$$ 
$$ 
$$ 
$$ "p5=p6*.667"
$$ "p7=p6*2"
$$ 
$$ 
$$ "SCALEF=p7*2/p5+0.5"
$$ "FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF+0.5"
$$ "l1=FACTOR1*SCALEF"
$$ 
$$ 
$$ # 1 "mc_line 36 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ "MCWRK = 0.333333*30m"
$$ "MCREST = 30m - 30m"
$$     dccorr
$$ # 36 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$ 1 ze
$$ # 1 "mc_line 36 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding definition of mc command after ze"
$$ # 37 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$ # 1 "mc_line 37 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding start label for mc command"
$$ 2 MCWRK  * 2
$$ LBLF0, MCWRK
$$   MCREST
$$ # 38 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$   20u pl1:f1 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$   d1
$$   50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
$$   (p1 ph1):f1
$$   3u
$$   p16:gp1
$$   d16 pl0:f1
$$   p12:sp2:f1 ph2:r
$$   3u
$$   p16:gp1
$$   d16 pl10:f1
$$   (p17 ph26)
$$ 						;begin MLEV17
$$ 4 (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p5 ph23)
$$   lo to 4 times l1 
$$ 						;end MLEV17
$$   (p17 ph26) 
$$   go=2 ph31
$$ # 1 "mc_line 72 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding mc command in line"
$$   MCWRK wr #0
$$   MCWRK zd 
$$   lo to LBLF0 times td0
$$ 
$$   MCWRK
$$ # 73 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$   20u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$ exit
$$ 
$$ 
$$ ph1=0 2 
$$ ph2=0 0 1 1 2 2 3 3
$$ ph22=0
$$ ph23=1
$$ ph24=2
$$ ph25=3
$$ ph26=1
$$ ph31=0 2 2 0 
$$ 
$$ 
$$ ;pl0 : 120dB
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;pl10: f1 channel - power level for TOCSY-spinlock
$$ ;sp2: f1 channel - shaped pulse
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;p5 : f1 channel -  60 degree low power pulse
$$ ;p6 : f1 channel -  90 degree low power pulse
$$ ;p7 : f1 channel - 180 degree low power pulse
$$ ;p12: f1 channel - 180 degree shaped pulse
$$ ;p16: homospoil/gradient pulse                            [1 msec]
$$ ;p17: f1 channel - trim pulse                             [2.5 msec]
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;d9 : TOCSY mixing time
$$ ;d16: delay for homospoil/gradient recovery
$$ ;l1: loop for MLEV cycle: (((p6*64) + p5) * l1) + (p17*2) = mixing time
$$ ;NS: 2 * n, total number of scans: NS * TD0
$$ ;DS: 4
$$ 
$$ 
$$ ;phcor 2 : phasedifference between power levels sp1 and pl1
$$ 
$$ ;choose p12 according to desired selectivity
$$ ;the flip-angle is determined by the amplitude
$$ ;set O1 on resonance on the multiplet to be excited or use spoffs
$$ 
$$ 
$$ ;use gradient ratio:    gp 1
$$ ;                         15
$$ 
$$ ;for z-only gradients:
$$ ;gpz1: 15%
$$ 
$$ ;use gradient files:   
$$ ;gpnam1: SINE.100
$$ 
$$ 
$$ 
$$ ;$Id: selmlgp,v 1.13 2005/11/10 12:17:01 ber Exp $
$$ 
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY2.fid/pdata/1/title, 0)
$$ SELMLGP
$$ 
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY2.fid/uxnmr.par, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1DselTOCSY3.fid
SELMLGP
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	17
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1DselTOCSY3.fid
SELMLGP
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	18
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1DselTOCSY3.fid
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	19
##DATA TYPE=	NMR SPECTRUM
##DATA CLASS=	XYDATA
##NUMDIM=	1
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13207203859002448
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	selmlgp
##LONGDATE=	2021/09/06 07:39:20.000
##.ACQUISITIONMODE=	SIMULTANEOUS (DQD)
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY3.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 20	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 10:55:44.172 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/4/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= 1000000
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_sel180zg>
$$ ##$AUTOPOS= <>
$$ ##$BF1= 500.13
$$ ##$BF2= 500.13
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 1
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 0 2 0 0 0 0 0 0 0.3 0.12 0 0.03 0 3e-06 3e-06 0 0.0002 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0
$$ ##$DATE= 1630939160
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 6.5
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 16
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 1
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 18
$$ ##$DS= 2
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 0
$$ ##$DSPFVS= 12
$$ ##$DTYPA= 0
$$ ##$EXP= <>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 0 0 0 0 0 0 0 0
$$ ##$FL1= 90
$$ ##$FL2= 90
$$ ##$FL3= 90
$$ ##$FL4= 90
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1895000
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <sine.100>
$$ ##$GPNAM1= <SINE.100>
$$ ##$GPNAM10= <sine.100>
$$ ##$GPNAM11= <sine.100>
$$ ##$GPNAM12= <sine.100>
$$ ##$GPNAM13= <sine.100>
$$ ##$GPNAM14= <sine.100>
$$ ##$GPNAM15= <sine.100>
$$ ##$GPNAM16= <sine.100>
$$ ##$GPNAM17= <sine.100>
$$ ##$GPNAM18= <sine.100>
$$ ##$GPNAM19= <sine.100>
$$ ##$GPNAM2= <SINE.100>
$$ ##$GPNAM20= <sine.100>
$$ ##$GPNAM21= <sine.100>
$$ ##$GPNAM22= <sine.100>
$$ ##$GPNAM23= <sine.100>
$$ ##$GPNAM24= <sine.100>
$$ ##$GPNAM25= <sine.100>
$$ ##$GPNAM26= <sine.100>
$$ ##$GPNAM27= <sine.100>
$$ ##$GPNAM28= <sine.100>
$$ ##$GPNAM29= <sine.100>
$$ ##$GPNAM3= <SINE.100>
$$ ##$GPNAM30= <sine.100>
$$ ##$GPNAM31= <sine.100>
$$ ##$GPNAM4= <SINE.100>
$$ ##$GPNAM5= <sine.100>
$$ ##$GPNAM6= <sine.100>
$$ ##$GPNAM7= <sine.100>
$$ ##$GPNAM8= <sine.100>
$$ ##$GPNAM9= <sine.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 15 17 40 -40 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <grad_out>
$$ ##$GRPDLY= -1
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 90
$$ ##$HL2= 90
$$ ##$HL3= 90
$$ ##$HL4= 90
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 72 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5288
$$ ##$LOCKGN= 126.199996948242
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 143.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -2
$$ ##$NLOGCH= 1
$$ ##$NS= 256
$$ ##$NUC1= <1H>
$$ ##$NUC2= <off>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 2072.03859
$$ ##$O2= 2221.69412245421
$$ ##$O3= 2221.69412245421
$$ ##$O4= 2221.69412245421
$$ ##$O5= 2221.69412245421
$$ ##$O6= 2221.69412245421
$$ ##$O7= 2221.69412245421
$$ ##$O8= 2221.69412245421
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 8.8 8.8 17.6 0 0 16.675 25 50 20 0 0 0 80000 34 0 200000 1000 1600 0 1000
$$ 25 0 0 0 0 0 250000 8.8 2000 400 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 0
$$ ##$PCPD= (0..9)
$$ 100 100 100 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 0 120 120 120 -6 120 -3 120 120 9.07 120 120 120 120 120 120 -3 0 120
$$ 0.5 120 64 120 120 6 120 120 120 120 120 -6 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 1
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <selmlgp>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 8192
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1 1 0 0
$$ ##$ROUTWD2= (0..23)
$$ 0 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 1 0 1 1 0 0
$$ ##$RSEL= (0..9)
$$ 0 0 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.13207203859
$$ ##$SFO2= 500.132221694122
$$ ##$SFO3= 500.132221694122
$$ ##$SFO4= 500.132221694122
$$ ##$SFO5= 500.132221694122
$$ ##$SFO6= 500.132221694122
$$ ##$SFO7= 500.132221694122
$$ ##$SFO8= 500.132221694122
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 69.76585 70 0 0 0 120 0 0 0 0 0 0 0 0 0 150 150 150 150 150 150 150 150
$$ 150 150 150 150 150 150 150 150
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gauss>
$$ ##$SPNAM10= <gauss>
$$ ##$SPNAM11= <gauss>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <gauss>
$$ ##$SPNAM15= <gauss>
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <gauss>
$$ ##$SPNAM19= <gauss>
$$ ##$SPNAM2= <Gaus1.1000>
$$ ##$SPNAM20= <gauss>
$$ ##$SPNAM21= <gauss>
$$ ##$SPNAM22= <gauss>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <gauss>
$$ ##$SPNAM3= <>
$$ ##$SPNAM30= <gauss>
$$ ##$SPNAM31= <gauss>
$$ ##$SPNAM4= <gauss>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Gaus1.1000>
$$ ##$SPNAM7= <>
$$ ##$SPNAM8= <gauss>
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 -86.47523 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 19.9947185135298
$$ ##$SWIBOX= (0..15)
$$ 0 0 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 10000
$$ ##$SWfinal= 0
$$ ##$TD= 32768
$$ ##$TD0= 1
$$ ##$TE= 295.9
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <selective>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 1024
$$ ##$WBSW= 4
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 0
$$ ##$YL= 0
$$ ##$YMAX_a= 141308
$$ ##$YMIN_a= -196430
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
$$ 
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY3.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/4/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-06 10:55:40.759 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-06 10:38:59.110 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 32K
$$        B6 22 75 18 D0 9F 8F FF E6 EC A8 13 FF AB 09 90>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 48 88 12 D4 76 43 52 9D 80 E9 3F 61 00 64 4C DD
$$ 
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY3.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/4/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-06 10:55:40.759 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-06 10:38:59.110 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 32K
$$        B6 22 75 18 D0 9F 8F FF E6 EC A8 13 FF AB 09 90>)
$$ (   2,<2021-09-06 10:57:37.228 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        ef LB = 0.1 FT_mod = 6 PKNL = 1 SI = 64K 
$$        data hash MD5: 64K
$$        A3 EF D5 B0 8B 24 86 93 44 FA 92 31 9E AA 6A AB>)
$$ (   3,<2021-09-06 10:57:37.674 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <apk 
$$        data hash MD5: 64K
$$        05 DB D8 49 C5 70 64 7B C1 80 C0 F5 FD 94 B1 D5>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 18 71 38 07 53 7B 51 8D 16 4F 7B CF 93 44 4F F2
$$ 
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY3.fid/fid, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY3.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ 
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ 
$$ 
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D9
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D9=D[9]"
$$ 		INV_REL	"D[9]=D9"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D16=D[16]"
$$ 		INV_REL	"D[16]=D16"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		L1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"L1=L[1]"
$$ 		INV_REL	"L[1]=L1"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ NAME		TD0
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P5
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P5=P[5]"
$$ 		INV_REL	"P[5]=P5"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P6
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P6=P[6]"
$$ 		INV_REL	"P[6]=P6"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P7
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P7=P[7]"
$$ 		INV_REL	"P[7]=P7"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P12
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P12=P[12]"
$$ 		INV_REL	"P[12]=P12"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P17
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P17=P[17]"
$$ 		INV_REL	"P[17]=P17"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL0=PL[0]"
$$ 		INV_REL	"PL[0]=PL0"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10=PL[10]"
$$ 		INV_REL	"PL[10]=PL10"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL0W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL0W=45.4*pow(10.0,(-6-PL[0])/10.0)"
$$ 		INV_REL	"PL[0]=-6-4.3425*log(PL0W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10W=45.4*pow(10.0,(-6-PL[10])/10.0)"
$$ 		INV_REL	"PL[10]=-6-4.3425*log(PL10W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP2=SP[2]"
$$ 		INV_REL	"SP[2]=SP2"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM2
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL2=SPOAL[2]"
$$ 		INV_REL	"SPOAL[2]=SPOAL2"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS2=SPOFFS[2]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"====== GRADIENT CHANNEL ====="
$$ NAME		GPNAM1
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ1=GPZ[1]"
$$ 		INV_REL	"GPZ[1]=GPZ1"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P16=P[16]"
$$ 		INV_REL	"P[16]=P16"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ 
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY3.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 24	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 10:57:37.674 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_TOCSY_MeOD/4/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc1d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_1d>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.01
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 65536
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0.1
$$ ##$LEV0= 0
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= -4
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 14.1404
$$ ##$PC= 1
$$ ##$PHC0= 23.42105
$$ ##$PHC1= -51.98872
$$ ##$PH_mod= 1
$$ ##$PKNL= yes
$$ ##$PPARMOD= 0
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 4
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.13
$$ ##$SI= 65536
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 400
$$ ##$SIOLD= 65536
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <1H.CDCl3>
$$ ##$SSB= 0
$$ ##$STSI= 65536
$$ ##$STSR= 0
$$ ##$SW_p= 10000
$$ ##$SYMM= 0
$$ ##$S_DEV= 0
$$ ##$TDeff= 32768
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 1
$$ ##$XDIM= 8192
$$ ##$YMAX_p= 375009927
$$ ##$YMIN_p= -214278208
$$ ##END=
$$ 
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY3.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$ ;selmlgp
$$ ;avance-version (02/05/31)
$$ ;1D homonuclear Hartman-Hahn transfer using
$$ ;   MLEV17 sequence for mixing
$$ ;   using selective refocussing with a shaped pulse
$$ ;
$$ ;H. Kessler, H. Oschkinat, C. Griesinger & W. Bermel,
$$ ;   J. Magn. Reson. 70, 106 (1986)
$$ ;J. Stonehouse, P. Adell, J. Keeler & A.J. Shaka, J. Am. Chem. Soc 116,
$$ ;   6037 (1994)
$$ ;K. Stott, J. Stonehouse, J. Keeler, T.L. Hwang & A.J. Shaka,
$$ ;   J. Am. Chem. Soc 117, 4199-4200 (1995)
$$ ;A. Bax & D.G. Davis, J. Magn. Reson. 65, 355-360 (1985)
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=1D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ 
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 22 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Grad.incl" 1
$$ ;Grad2.incl  -  include file for Gradient Spectroscopy
$$ ;   for 1
$$ ;
$$ ;avance-version (07/01/17)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ define list<gradient> EA=<EA>
$$ 
$$ 
$$ 
$$ ;$Id: Grad2.incl,v 1.12 2007/01/22 14:22:35 ber Exp $
$$ # 23 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Delay.incl" 1
$$ ;Delay.incl  -  include file for commonly used delays
$$ ;
$$ ;version 00/02/07
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ ;general delays
$$ 
$$ define delay DELTA
$$ define delay DELTA1
$$ define delay DELTA2
$$ define delay DELTA3
$$ define delay DELTA4
$$ define delay DELTA5
$$ define delay DELTA6
$$ define delay DELTA7
$$ define delay DELTA8
$$ 
$$ define delay TAU
$$ define delay TAU1
$$ define delay TAU2
$$ define delay TAU3
$$ define delay TAU4
$$ define delay TAU5
$$ 
$$ 
$$ ;delays for centering pulses
$$ 
$$ define delay CEN_HN1
$$ define delay CEN_HN2
$$ define delay CEN_HN3
$$ define delay CEN_HC1
$$ define delay CEN_HC2
$$ define delay CEN_HC3
$$ define delay CEN_HC4
$$ define delay CEN_HP1
$$ define delay CEN_HP2
$$ define delay CEN_CN1
$$ define delay CEN_CN2
$$ define delay CEN_CN3
$$ define delay CEN_CN4
$$ define delay CEN_CP1
$$ define delay CEN_CP2
$$ 
$$ 
$$ ;loop counters
$$ 
$$ define loopcounter COUNTER
$$ define loopcounter SCALEF
$$ define loopcounter FACTOR1
$$ define loopcounter FACTOR2
$$ define loopcounter FACTOR3
$$ 
$$ 
$$ 
$$ ;$Id: Delay.incl,v 1.12 2005/11/10 12:16:58 ber Exp $
$$ # 24 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp" 2
$$ 
$$ 
$$ 
$$ "p5=p6*.667"
$$ "p7=p6*2"
$$ 
$$ 
$$ "SCALEF=p7*2/p5+0.5"
$$ "FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF+0.5"
$$ "l1=FACTOR1*SCALEF"
$$ 
$$ 
$$ # 1 "mc_line 36 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ "MCWRK = 0.333333*30m"
$$ "MCREST = 30m - 30m"
$$     dccorr
$$ # 36 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$ 1 ze
$$ # 1 "mc_line 36 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding definition of mc command after ze"
$$ # 37 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$ # 1 "mc_line 37 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding start label for mc command"
$$ 2 MCWRK  * 2
$$ LBLF0, MCWRK
$$   MCREST
$$ # 38 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$   20u pl1:f1 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$   d1
$$   50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
$$   (p1 ph1):f1
$$   3u
$$   p16:gp1
$$   d16 pl0:f1
$$   p12:sp2:f1 ph2:r
$$   3u
$$   p16:gp1
$$   d16 pl10:f1
$$   (p17 ph26)
$$ 						;begin MLEV17
$$ 4 (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph22 p7 ph23 p6 ph22)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p6 ph24 p7 ph25 p6 ph24)
$$   (p5 ph23)
$$   lo to 4 times l1 
$$ 						;end MLEV17
$$   (p17 ph26) 
$$   go=2 ph31
$$ # 1 "mc_line 72 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp expanding mc command in line"
$$   MCWRK wr #0
$$   MCWRK zd 
$$   lo to LBLF0 times td0
$$ 
$$   MCWRK
$$ # 73 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/selmlgp"
$$   20u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$ exit
$$ 
$$ 
$$ ph1=0 2 
$$ ph2=0 0 1 1 2 2 3 3
$$ ph22=0
$$ ph23=1
$$ ph24=2
$$ ph25=3
$$ ph26=1
$$ ph31=0 2 2 0 
$$ 
$$ 
$$ ;pl0 : 120dB
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;pl10: f1 channel - power level for TOCSY-spinlock
$$ ;sp2: f1 channel - shaped pulse
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;p5 : f1 channel -  60 degree low power pulse
$$ ;p6 : f1 channel -  90 degree low power pulse
$$ ;p7 : f1 channel - 180 degree low power pulse
$$ ;p12: f1 channel - 180 degree shaped pulse
$$ ;p16: homospoil/gradient pulse                            [1 msec]
$$ ;p17: f1 channel - trim pulse                             [2.5 msec]
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;d9 : TOCSY mixing time
$$ ;d16: delay for homospoil/gradient recovery
$$ ;l1: loop for MLEV cycle: (((p6*64) + p5) * l1) + (p17*2) = mixing time
$$ ;NS: 2 * n, total number of scans: NS * TD0
$$ ;DS: 4
$$ 
$$ 
$$ ;phcor 2 : phasedifference between power levels sp1 and pl1
$$ 
$$ ;choose p12 according to desired selectivity
$$ ;the flip-angle is determined by the amplitude
$$ ;set O1 on resonance on the multiplet to be excited or use spoffs
$$ 
$$ 
$$ ;use gradient ratio:    gp 1
$$ ;                         15
$$ 
$$ ;for z-only gradients:
$$ ;gpz1: 15%
$$ 
$$ ;use gradient files:   
$$ ;gpnam1: SINE.100
$$ 
$$ 
$$ 
$$ ;$Id: selmlgp,v 1.13 2005/11/10 12:17:01 ber Exp $
$$ 
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY3.fid/pdata/1/title, 0)
$$ SELMLGP
$$ 
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1DselTOCSY3.fid/uxnmr.par, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1H.fid
1H spectrum
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	20
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1H.fid
1H spectrum
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	21
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/1H.fid
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	22
##DATA TYPE=	NMR SPECTRUM
##DATA CLASS=	XYDATA
##NUMDIM=	1
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13300077999997484
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	zg30
##LONGDATE=	2021/09/04 07:26:47.000
##.ACQUISITIONMODE=	SIMULTANEOUS (DQD)
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1H.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 17	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 10:26:55.130 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_1H_MeOD/1/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= -2.10084033613445
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_zgglp>
$$ ##$AUTOPOS= <>
$$ ##$BF1= 500.13
$$ ##$BF2= 500.13
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 0
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 0 0.5 0 0 0 0 0 0 0 0 0 0.03 0 0 0 0 0.0001 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$DATE= 1630765607
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 17.52416
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 64
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 3
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 10 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 19
$$ ##$DS= 4
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 4
$$ ##$DSPFVS= 21
$$ ##$DTYPA= 0
$$ ##$EXP= <AA1H>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 0 0 0 0 0 0 0 0
$$ ##$FL1= 90
$$ ##$FL2= 90
$$ ##$FL3= 90
$$ ##$FL4= 90
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1887080.64516129
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <sine.100>
$$ ##$GPNAM1= <sine.100>
$$ ##$GPNAM10= <sine.100>
$$ ##$GPNAM11= <sine.100>
$$ ##$GPNAM12= <sine.100>
$$ ##$GPNAM13= <sine.100>
$$ ##$GPNAM14= <sine.100>
$$ ##$GPNAM15= <sine.100>
$$ ##$GPNAM16= <sine.100>
$$ ##$GPNAM17= <sine.100>
$$ ##$GPNAM18= <sine.100>
$$ ##$GPNAM19= <sine.100>
$$ ##$GPNAM2= <sine.100>
$$ ##$GPNAM20= <sine.100>
$$ ##$GPNAM21= <sine.100>
$$ ##$GPNAM22= <sine.100>
$$ ##$GPNAM23= <sine.100>
$$ ##$GPNAM24= <sine.100>
$$ ##$GPNAM25= <sine.100>
$$ ##$GPNAM26= <sine.100>
$$ ##$GPNAM27= <sine.100>
$$ ##$GPNAM28= <sine.100>
$$ ##$GPNAM29= <sine.100>
$$ ##$GPNAM3= <sine.100>
$$ ##$GPNAM30= <sine.100>
$$ ##$GPNAM31= <sine.100>
$$ ##$GPNAM4= <sine.100>
$$ ##$GPNAM5= <sine.100>
$$ ##$GPNAM6= <sine.100>
$$ ##$GPNAM7= <sine.100>
$$ ##$GPNAM8= <sine.100>
$$ ##$GPNAM9= <sine.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <>
$$ ##$GRPDLY= 76
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 1
$$ ##$HL2= 35
$$ ##$HL3= 16
$$ ##$HL4= 17
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5288
$$ ##$LOCKGN= 131.899993896484
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 146.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -3
$$ ##$NLOGCH= 1
$$ ##$NS= 16
$$ ##$NUC1= <1H>
$$ ##$NUC2= <off>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 3000.78
$$ ##$O2= 2000.52000002415
$$ ##$O3= 2000.52000002415
$$ ##$O4= 2000.52000002415
$$ ##$O5= 2000.52000002415
$$ ##$O6= 2000.52000002415
$$ ##$O7= 2000.52000002415
$$ ##$O8= 2000.52000002415
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 10 10 20 0 0 19.8 30 60 20000 0 0 80000 80000 0 0 0 1000 2500 10000 600
$$ 2500 0 0 0 0 250 0 10 2000 1000 0 0 20000 0 0 0 0 0 0 0 2000 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 0
$$ ##$PCPD= (0..9)
$$ 100 60 100 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 -2.5 120 120 120 120 120 120 120 50 7.04 19.44 120 120 120 120 120
$$ 120 -2.5 13.06 120 120 120 120 120 120 120 19.44 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 1
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <zg30>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 228.1
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1 1 0 0
$$ ##$ROUTWD2= (0..23)
$$ 0 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 1 0 1 1 0 0
$$ ##$RSEL= (0..9)
$$ 0 0 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 4 83 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.13300078
$$ ##$SFO2= 500.13200052
$$ ##$SFO3= 500.13200052
$$ ##$SFO4= 500.13200052
$$ ##$SFO5= 500.13200052
$$ ##$SFO6= 500.13200052
$$ ##$SFO7= 500.13200052
$$ ##$SFO8= 500.13200052
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 67.85 61.83 120 120 0 57.5 120 120 0 37.5 37.5 0 0 120 0 150 150 120
$$ 59.79 57.88 61.19 53.87 150 150 150 150 150 150 21.68 150 120
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gaus1.1000>
$$ ##$SPNAM10= <Squa100.1000>
$$ ##$SPNAM11= <Squa100.1000>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <>
$$ ##$SPNAM15= <>
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <>
$$ ##$SPNAM19= <Sinc1.1000>
$$ ##$SPNAM2= <Gaus1_180r.1000>
$$ ##$SPNAM20= <Sinc1.1000>
$$ ##$SPNAM21= <Sinc1.1000>
$$ ##$SPNAM22= <Sinc1.1000>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <Crp60,20,20.10>
$$ ##$SPNAM3= <>
$$ ##$SPNAM30= <gauss>
$$ ##$SPNAM31= <>
$$ ##$SPNAM4= <>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Squa100.1000>
$$ ##$SPNAM7= <>
$$ ##$SPNAM8= < >
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 20.1559288140729
$$ ##$SWIBOX= (0..15)
$$ 0 0 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 10080.6451612903
$$ ##$SWfinal= 0
$$ ##$TD= 32768
$$ ##$TD0= 1
$$ ##$TE= 298.1
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 10 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <user>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 1024
$$ ##$WBSW= 4
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 3
$$ ##$YL= 3
$$ ##$YMAX_a= 338863
$$ ##$YMIN_a= -361516
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
$$ 
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1H.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_1H_MeOD/1/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-04 10:26:47.083 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 10:25:55.651 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 32K
$$        D4 8D 92 A7 C6 61 61 F8 99 CA 4E 80 98 4B B8 1A>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 0F 74 3E 0B DE 1E EF 7F 2A 42 A4 BD F2 FB CA 19
$$ 
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1H.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_1H_MeOD/1/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-04 10:26:47.083 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 10:25:55.651 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 32K
$$        D4 8D 92 A7 C6 61 61 F8 99 CA 4E 80 98 4B B8 1A>)
$$ (   2,<2021-09-04 10:26:55.256 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        efp LB = 0.3 FT_mod = 6 PKNL = 1 PHC0 = 150.4168 PHC1 = -5.562334 SI = 32K 
$$        data hash MD5: 32K
$$        C2 60 49 14 31 AE FA A3 67 78 E6 82 9B B5 9D 44>)
$$ (   3,<2021-09-04 10:44:48.649 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <pk fgphup PHC0 = -2.075 PHC1 = 0 
$$        data hash MD5: 32K
$$        6A E0 CA 4C 35 15 B9 D4 46 AC C8 F9 99 6A A4 51>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 46 BA 20 46 F5 F6 81 55 49 B0 6E B6 CD 73 3E 59
$$ 
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1H.fid/fid, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1H.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ 
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ 
$$ 
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		TD0
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ 
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1H.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 7	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 10:44:48.648 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_1H_MeOD/1/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc1d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_1dglp>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.1
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= 15
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 32768
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0.3
$$ ##$LEV0= 0
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= -4
$$ ##$NLEV= 6
$$ ##$NOISF1= 6.21
$$ ##$NOISF2= 5.81
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 16.07803
$$ ##$PC= 1
$$ ##$PHC0= 148.3418
$$ ##$PHC1= -5.562334
$$ ##$PH_mod= 1
$$ ##$PKNL= yes
$$ ##$PPARMOD= 0
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 0
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.13
$$ ##$SI= 32768
$$ ##$SIGF1= 3
$$ ##$SIGF2= 2
$$ ##$SINO= 400
$$ ##$SIOLD= 32768
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <1H.CDCl3>
$$ ##$SSB= 0
$$ ##$STSI= 32768
$$ ##$STSR= 0
$$ ##$SW_p= 10080.6451612903
$$ ##$SYMM= 0
$$ ##$S_DEV= 0
$$ ##$TDeff= 32768
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 1
$$ ##$XDIM= 8192
$$ ##$YMAX_p= 459847296
$$ ##$YMIN_p= -135483
$$ ##END=
$$ 
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1H.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30"
$$ ;zg30
$$ ;avance-version (07/04/03)
$$ ;1D sequence
$$ ;using 30 degree flip angle
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=1D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ 
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 13 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30" 2
$$ 
$$ 
$$ 
$$ "acqt0=-p1*0.66/3.1416"
$$ 
$$ 
$$ # 1 "mc_line 19 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30 expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ "MCWRK = 0.333333*30m"
$$ "MCREST = 30m - 30m"
$$     dccorr
$$ # 19 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30"
$$ 1 ze
$$ # 1 "mc_line 19 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30 expanding definition of mc command after ze"
$$ # 20 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30"
$$ # 1 "mc_line 20 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30 expanding start label for mc command"
$$ 2 MCWRK  * 2
$$ LBLF0, MCWRK
$$   MCREST
$$ # 21 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30"
$$   d1
$$   p1*0.33 ph1
$$   go=2 ph31
$$ # 1 "mc_line 24 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30 expanding mc command in line"
$$   MCWRK wr #0
$$   MCWRK zd 
$$   lo to LBLF0 times td0
$$ 
$$   MCWRK
$$ # 25 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30"
$$ exit
$$ 
$$ 
$$ ph1=0 2 2 0 1 3 3 1
$$ ph31=0 2 2 0 1 3 3 1
$$ 
$$ 
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;NS: 1 * n, total number of scans: NS * TD0
$$ 
$$ 
$$ 
$$ ;$Id: zg30,v 1.9 2007/04/11 13:34:31 ber Exp $
$$ 
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1H.fid/pdata/1/title, 0)
$$ 1H spectrum
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/1H.fid/uxnmr.par, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/13C.fid
echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
(w/ gradients in back-INEPT w/matched adiabatic sweep)
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	23
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/13C.fid
echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
(w/ gradients in back-INEPT w/matched adiabatic sweep)
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	24
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/13C.fid
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	25
##DATA TYPE=	NMR SPECTRUM
##DATA CLASS=	XYDATA
##NUMDIM=	1
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13300077999997484
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	zg30
##LONGDATE=	2021/09/04 15:57:08.000
##.ACQUISITIONMODE=	SIMULTANEOUS (DQD)
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/13C.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 17	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 18:57:15.941 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/3/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= -2.10084033613445
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_zgglp>
$$ ##$AUTOPOS= <>
$$ ##$BF1= 500.13
$$ ##$BF2= 500.13
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 0
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 0 0.5 0 0 0 0 0 0 0 0 0 0.03 0 0 0 0 0.0001 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$DATE= 1630796228
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 17.52416
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 64
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 3
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 10 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 19
$$ ##$DS= 4
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 4
$$ ##$DSPFVS= 21
$$ ##$DTYPA= 0
$$ ##$EXP= </opt/topspin2.1pl8/exp/stan/nmr>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 0 0 0 0 0 0 0 0
$$ ##$FL1= 90
$$ ##$FL2= 90
$$ ##$FL3= 90
$$ ##$FL4= 90
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1887080.64516129
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <sine.100>
$$ ##$GPNAM1= <sine.100>
$$ ##$GPNAM10= <sine.100>
$$ ##$GPNAM11= <sine.100>
$$ ##$GPNAM12= <sine.100>
$$ ##$GPNAM13= <sine.100>
$$ ##$GPNAM14= <sine.100>
$$ ##$GPNAM15= <sine.100>
$$ ##$GPNAM16= <sine.100>
$$ ##$GPNAM17= <sine.100>
$$ ##$GPNAM18= <sine.100>
$$ ##$GPNAM19= <sine.100>
$$ ##$GPNAM2= <sine.100>
$$ ##$GPNAM20= <sine.100>
$$ ##$GPNAM21= <sine.100>
$$ ##$GPNAM22= <sine.100>
$$ ##$GPNAM23= <sine.100>
$$ ##$GPNAM24= <sine.100>
$$ ##$GPNAM25= <sine.100>
$$ ##$GPNAM26= <sine.100>
$$ ##$GPNAM27= <sine.100>
$$ ##$GPNAM28= <sine.100>
$$ ##$GPNAM29= <sine.100>
$$ ##$GPNAM3= <sine.100>
$$ ##$GPNAM30= <sine.100>
$$ ##$GPNAM31= <sine.100>
$$ ##$GPNAM4= <sine.100>
$$ ##$GPNAM5= <sine.100>
$$ ##$GPNAM6= <sine.100>
$$ ##$GPNAM7= <sine.100>
$$ ##$GPNAM8= <sine.100>
$$ ##$GPNAM9= <sine.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <>
$$ ##$GRPDLY= 76
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 1
$$ ##$HL2= 35
$$ ##$HL3= 16
$$ ##$HL4= 17
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5289
$$ ##$LOCKGN= 126.699996948242
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 148.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -3
$$ ##$NLOGCH= 1
$$ ##$NS= 16
$$ ##$NUC1= <1H>
$$ ##$NUC2= <off>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 3000.78
$$ ##$O2= 2000.52000002415
$$ ##$O3= 2000.52000002415
$$ ##$O4= 2000.52000002415
$$ ##$O5= 2000.52000002415
$$ ##$O6= 2000.52000002415
$$ ##$O7= 2000.52000002415
$$ ##$O8= 2000.52000002415
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 10 10 20 0 0 19.8 30 60 20000 0 0 80000 80000 0 0 0 1000 2500 10000 600
$$ 2500 0 0 0 0 250 0 10 2000 1200 0 0 20000 0 0 0 0 0 0 0 2400 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 0
$$ ##$PCPD= (0..9)
$$ 100 60 100 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 -2.5 120 120 120 120 120 120 120 50 7.04 19.44 120 120 120 120 120
$$ 120 -2.5 13.06 120 120 120 120 120 120 120 19.44 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 1
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <zg30>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 322.5
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1 1 0 0
$$ ##$ROUTWD2= (0..23)
$$ 0 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 1 0 1 1 0 0
$$ ##$RSEL= (0..9)
$$ 0 0 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 4 83 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.13300078
$$ ##$SFO2= 500.13200052
$$ ##$SFO3= 500.13200052
$$ ##$SFO4= 500.13200052
$$ ##$SFO5= 500.13200052
$$ ##$SFO6= 500.13200052
$$ ##$SFO7= 500.13200052
$$ ##$SFO8= 500.13200052
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 67.85 61.83 120 120 0 57.5 120 120 0 34.48 34.48 0 0 120 0 150 150 120
$$ 59.79 57.88 61.19 53.87 150 150 150 150 150 150 21.68 150 120
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gaus1.1000>
$$ ##$SPNAM10= <Sinc1.1000>
$$ ##$SPNAM11= <Sinc1.1000>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <>
$$ ##$SPNAM15= <>
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <>
$$ ##$SPNAM19= <Sinc1.1000>
$$ ##$SPNAM2= <Gaus1_180r.1000>
$$ ##$SPNAM20= <Sinc1.1000>
$$ ##$SPNAM21= <Sinc1.1000>
$$ ##$SPNAM22= <Sinc1.1000>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <Crp60,20,20.10>
$$ ##$SPNAM3= <>
$$ ##$SPNAM30= <gauss>
$$ ##$SPNAM31= <>
$$ ##$SPNAM4= <>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Squa100.1000>
$$ ##$SPNAM7= <>
$$ ##$SPNAM8= < >
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 20.1559288140729
$$ ##$SWIBOX= (0..15)
$$ 0 0 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 10080.6451612903
$$ ##$SWfinal= 0
$$ ##$TD= 32768
$$ ##$TD0= 1
$$ ##$TE= 298.1
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 10 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <user>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 1024
$$ ##$WBSW= 4
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 3
$$ ##$YL= 3
$$ ##$YMAX_a= 361591
$$ ##$YMIN_a= -459495
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
$$ 
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/13C.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/3/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-04 18:57:08.455 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 18:56:16.546 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 32K
$$        3A A1 E0 7F 6E 0D A4 DD 98 A3 EA CD AB 80 79 98>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 4B A8 0D 3C 65 47 CE EC F7 7F 30 D7 4F 90 7A D6
$$ 
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/13C.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/3/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-04 18:57:08.455 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 18:56:16.546 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 32K
$$        3A A1 E0 7F 6E 0D A4 DD 98 A3 EA CD AB 80 79 98>)
$$ (   2,<2021-09-04 18:57:16.068 -0400>,<rsamples>,<AV500>,<proc1d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        efp LB = 0.3 FT_mod = 6 PKNL = 1 PHC0 = 192.9956 PHC1 = -0.09920409 SI = 32K 
$$        data hash MD5: 32K
$$        9C 40 DE 89 A6 C9 30 7E 92 81 24 CE 2C D7 EB 87>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 4F C7 EE A0 7D 8C B5 D3 94 B0 6D 49 B9 0B 67 08
$$ 
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/13C.fid/fid, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/13C.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ 
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ 
$$ 
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		TD0
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ 
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/13C.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 7	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 23:15:25.340 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/3/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/dataserver
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_1dglp>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.1
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= 15
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 32768
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0.3
$$ ##$LEV0= 0
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= -4
$$ ##$NLEV= 6
$$ ##$NOISF1= 6.21
$$ ##$NOISF2= 5.81
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 16.05357
$$ ##$PC= 1
$$ ##$PHC0= 192.9956
$$ ##$PHC1= -0.09920409
$$ ##$PH_mod= 1
$$ ##$PKNL= yes
$$ ##$PPARMOD= 0
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 0
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.130012232431
$$ ##$SI= 32768
$$ ##$SIGF1= 3
$$ ##$SIGF2= 2
$$ ##$SINO= 400
$$ ##$SIOLD= 32768
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <1H.CDCl3>
$$ ##$SSB= 0
$$ ##$STSI= 32768
$$ ##$STSR= 0
$$ ##$SW_p= 10080.6451612903
$$ ##$SYMM= 0
$$ ##$S_DEV= 0
$$ ##$TDeff= 32768
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 1
$$ ##$XDIM= 8192
$$ ##$YMAX_p= 506594061
$$ ##$YMIN_p= -159784
$$ ##END=
$$ 
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/13C.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30"
$$ ;zg30
$$ ;avance-version (07/04/03)
$$ ;1D sequence
$$ ;using 30 degree flip angle
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=1D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ 
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 13 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30" 2
$$ 
$$ 
$$ 
$$ "acqt0=-p1*0.66/3.1416"
$$ 
$$ 
$$ # 1 "mc_line 19 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30 expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ "MCWRK = 0.333333*30m"
$$ "MCREST = 30m - 30m"
$$     dccorr
$$ # 19 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30"
$$ 1 ze
$$ # 1 "mc_line 19 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30 expanding definition of mc command after ze"
$$ # 20 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30"
$$ # 1 "mc_line 20 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30 expanding start label for mc command"
$$ 2 MCWRK  * 2
$$ LBLF0, MCWRK
$$   MCREST
$$ # 21 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30"
$$   d1
$$   p1*0.33 ph1
$$   go=2 ph31
$$ # 1 "mc_line 24 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30 expanding mc command in line"
$$   MCWRK wr #0
$$   MCWRK zd 
$$   lo to LBLF0 times td0
$$ 
$$   MCWRK
$$ # 25 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/zg30"
$$ exit
$$ 
$$ 
$$ ph1=0 2 2 0 1 3 3 1
$$ ph31=0 2 2 0 1 3 3 1
$$ 
$$ 
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;NS: 1 * n, total number of scans: NS * TD0
$$ 
$$ 
$$ 
$$ ;$Id: zg30,v 1.9 2007/04/11 13:34:31 ber Exp $
$$ 
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/13C.fid/pdata/1/title, 0)
$$ echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
$$ (w/ gradients in back-INEPT w/matched adiabatic sweep)
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/13C.fid/uxnmr.par, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/COSY.fid
Cosy experiment with Z-gradient - cosygpppqf
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	26
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/COSY.fid
Cosy experiment with Z-gradient - cosygpppqf
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	27
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/COSY.fid
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	28
##DATA TYPE=	nD NMR SPECTRUM
##DATA CLASS=	NTUPLES
##NUMDIM=	2
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13300077999997484
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	cosygpppqf
##LONGDATE=	2021/09/04 07:43:17.000
##.ACQUISITIONMODE=	SIMULTANEOUS (DQD)
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqu2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/acqu2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 257	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 11:38:28.007 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_COSY_MeOD/2/acqu2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/go
$$ ##$BF1= 500.13
$$ ##$FnMODE= 1
$$ ##$NUC1= <1H>
$$ ##$O1= 3000.78
$$ ##$SFO1= 500.13300078
$$ ##$SW= 16.0199945158426
$$ ##$SW_h= 8012.1279296875
$$ ##$TD= 256
$$ ##END=
$$ 
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 10	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 11:38:31.095 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_COSY_MeOD/2/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= 1000000
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_getlcosy>
$$ ##$AUTOPOS= <>
$$ ##$BF1= 500.13
$$ ##$BF2= 500.13
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 1
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 10 10 30 40 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 3e-06 1.5 0 0 0 0 0 0 0 0 0 0.03 2e-05 4e-06 0 0 0.0001 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0
$$ ##$DATE= 1630766597
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 6.5
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 24
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 1
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 18
$$ ##$DS= 16
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 0
$$ ##$DSPFVS= 12
$$ ##$DTYPA= 0
$$ ##$EXP= <>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 0 0 0 0 0 0 0 0
$$ ##$FL1= 90
$$ ##$FL2= 90
$$ ##$FL3= 90
$$ ##$FL4= 90
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1887019.23076923
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <SINE.100>
$$ ##$GPNAM1= <SINE.100>
$$ ##$GPNAM10= <SINE.100>
$$ ##$GPNAM11= <SINE.100>
$$ ##$GPNAM12= <SINE.100>
$$ ##$GPNAM13= <SINE.100>
$$ ##$GPNAM14= <SINE.100>
$$ ##$GPNAM15= <SINE.100>
$$ ##$GPNAM16= <SINE.100>
$$ ##$GPNAM17= <SINE.100>
$$ ##$GPNAM18= <SINE.100>
$$ ##$GPNAM19= <SINE.100>
$$ ##$GPNAM2= <SINE.100>
$$ ##$GPNAM20= <SINE.100>
$$ ##$GPNAM21= <SINE.100>
$$ ##$GPNAM22= <SINE.100>
$$ ##$GPNAM23= <SINE.100>
$$ ##$GPNAM24= <SINE.100>
$$ ##$GPNAM25= <SINE.100>
$$ ##$GPNAM26= <SINE.100>
$$ ##$GPNAM27= <SINE.100>
$$ ##$GPNAM28= <SINE.100>
$$ ##$GPNAM29= <SINE.100>
$$ ##$GPNAM3= <SINE.100>
$$ ##$GPNAM30= <SINE.100>
$$ ##$GPNAM31= <SINE.100>
$$ ##$GPNAM4= <SINE.100>
$$ ##$GPNAM5= <SINE.100>
$$ ##$GPNAM6= <SINE.100>
$$ ##$GPNAM7= <SINE.100>
$$ ##$GPNAM8= <SINE.100>
$$ ##$GPNAM9= <SINE.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 10 10 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <grad_out>
$$ ##$GRPDLY= -1
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 90
$$ ##$HL2= 90
$$ ##$HL3= 90
$$ ##$HL4= 90
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 0.0001248 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 124.810787942449 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 28 1 1 1 28 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5288
$$ ##$LOCKGN= 131.899993896484
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 146.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -2
$$ ##$NLOGCH= 1
$$ ##$NS= 8
$$ ##$NUC1= <1H>
$$ ##$NUC2= <off>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 3000.78
$$ ##$O2= 3006.87752621798
$$ ##$O3= 3006.87752621798
$$ ##$O4= 3006.87752621798
$$ ##$O5= 3006.87752621798
$$ ##$O6= 3006.87752621798
$$ ##$O7= 3006.87752621798
$$ ##$O8= 3006.87752621798
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 10 10 20 0 0 19.8 30 60 20000 0 0 80000 80000 22 0 0 1000 2500 10000 600
$$ 2500 0 0 0 0 250 0 10 2000 1000 0 0 20000 0 0 0 0 0 0 0 2000 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 1
$$ ##$PCPD= (0..9)
$$ 100 60 100 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 -2.5 120 120 120 120 120 120 120 50 7.04 19.44 120 120 120 120 120
$$ 120 -2.5 13.06 120 120 120 120 120 120 120 19.44 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 1
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <cosygpppqf>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 2048
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 256 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1 1 0 0
$$ ##$ROUTWD2= (0..23)
$$ 0 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 1 0 1 1 0 0
$$ ##$RSEL= (0..9)
$$ 0 0 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.13300078
$$ ##$SFO2= 500.133006877526
$$ ##$SFO3= 500.133006877526
$$ ##$SFO4= 500.133006877526
$$ ##$SFO5= 500.133006877526
$$ ##$SFO6= 500.133006877526
$$ ##$SFO7= 500.133006877526
$$ ##$SFO8= 500.133006877526
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 67.85 61.83 120 120 0 57.5 120 120 0 37.5 37.5 0 0 120 0 150 150 120
$$ 59.79 57.88 61.19 53.87 150 150 150 150 150 150 21.68 150 120
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gaus1.1000>
$$ ##$SPNAM10= <Squa100.1000>
$$ ##$SPNAM11= <Squa100.1000>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <>
$$ ##$SPNAM15= <>
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <>
$$ ##$SPNAM19= <Sinc1.1000>
$$ ##$SPNAM2= <Gaus1_180r.1000>
$$ ##$SPNAM20= <Sinc1.1000>
$$ ##$SPNAM21= <Sinc1.1000>
$$ ##$SPNAM22= <Sinc1.1000>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <Crp60,20,20.10>
$$ ##$SPNAM3= <>
$$ ##$SPNAM30= <gauss>
$$ ##$SPNAM31= <>
$$ ##$SPNAM4= <>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Squa100.1000>
$$ ##$SPNAM7= <>
$$ ##$SPNAM8= < >
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 16.0213793137502
$$ ##$SWIBOX= (0..15)
$$ 0 0 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 8012.82051282051
$$ ##$SWfinal= 0
$$ ##$TD= 1024
$$ ##$TD0= 1
$$ ##$TE= 298.1
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <user>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 1024
$$ ##$WBSW= 4
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 0
$$ ##$YL= 0
$$ ##$YMAX_a= 211013
$$ ##$YMIN_a= -302570
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
$$ 
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_COSY_MeOD/2/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-04 11:38:28.099 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 10:42:36.846 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 1K * 256
$$        AB 8B 80 B4 65 C1 DB D6 84 BA 42 E2 EE F3 88 53>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 4B CB 1A FD C8 9F 22 D2 1A 70 2A 9A 32 DD 87 A4
$$ 
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_COSY_MeOD/2/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-04 11:38:28.099 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 10:42:36.846 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 1K * 256
$$        AB 8B 80 B4 65 C1 DB D6 84 BA 42 E2 EE F3 88 53>)
$$ (   2,<2021-09-04 11:38:34.726 -0400>,<rsamples>,<AV500>,<proc2d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        xfb F2: SI = 1K WDW = 4 SSB = 0 FT_mod = 6 PKNL = 1 F1: SI = 1K ME_mod = 2 NCOEF = 32 WDW = 4 SSB = 0 FT_mod = 6 PH_mod = 2
$$        data hash MD5: 1K * 1K
$$        21 09 05 24 AD B1 A2 69 44 F1 01 1F D2 6C 02 48>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ A3 61 6A C4 CA DA 5E 37 8A 95 37 C7 69 A5 B1 46
$$ 
##$PARAMETER FILE=	(clevels, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/pdata/1/clevels, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 8	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 10:53:17.966 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_COSY_MeOD/2/pdata/1/clevels
$$ $$ process /opt/topspin2.1pl8/prog/mod/dataserver
$$ ##$LEVELS= (0..255)
$$ -13692178.5716736 -7606765.873152 -4225981.04064 -2347767.2448 -1304315.136
$$ -724619.52 -402566.4 -223648 223648 402566.4 724619.52 1304315.136 2347767.2448
$$ 4225981.04064 7606765.873152 13692178.5716736 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0
$$ ##$LEVSIGN= 3
$$ ##$MAXLEV= 8
$$ ##$METHOD= 0
$$ ##$NEGBASE= -223648
$$ ##$NEGINCR= 1.8
$$ ##$POSBASE= 223648
$$ ##$POSINCR= 1.8
$$ ##END=
$$ 
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/ser, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ 
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ 
$$ 
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D0=D[0]"
$$ 		INV_REL	"D[0]=D0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D11
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D11=D[11]"
$$ 		INV_REL	"D[11]=D11"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D12
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D12=D[12]"
$$ 		INV_REL	"D[12]=D12"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D13
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D13=D[13]"
$$ 		INV_REL	"D[13]=D13"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D16=D[16]"
$$ 		INV_REL	"D[16]=D16"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		IN0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"IN0=IN[0]"
$$ 		INV_REL	"IN[0]=IN0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P0=P[0]"
$$ 		INV_REL	"P[0]=P0"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P17
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P17=P[17]"
$$ 		INV_REL	"P[17]=P17"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10=PL[10]"
$$ 		INV_REL	"PL[10]=PL10"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10W=45.4*pow(10.0,(-6-PL[10])/10.0)"
$$ 		INV_REL	"PL[10]=-6-4.3425*log(PL10W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"====== GRADIENT CHANNEL ====="
$$ NAME		GPNAM1
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ1=GPZ[1]"
$$ 		INV_REL	"GPZ[1]=GPZ1"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P16=P[16]"
$$ 		INV_REL	"P[16]=P16"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ 
##$PARAMETER FILE=	(proc2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/pdata/1/proc2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 15	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 11:38:34.726 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_COSY_MeOD/2/pdata/1/proc2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <        >
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F1>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= 15
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 9.6
$$ ##$F2P= -0.4
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 0
$$ ##$LPBIN= 512
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 2
$$ ##$MI= 1
$$ ##$NCOEF= 32
$$ ##$NC_proc= 2
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 14.01005
$$ ##$PC= 4
$$ ##$PHC0= 0
$$ ##$PHC1= 0
$$ ##$PH_mod= 2
$$ ##$PKNL= no
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 1
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.13
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 1024
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <1H.MeOD>
$$ ##$SSB= 0
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 8012.1279296875
$$ ##$SYMM= 0
$$ ##$S_DEV= 7681
$$ ##$TDeff= 512
$$ ##$TDoff= 0
$$ ##$TI= <        >
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 4
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 274065005
$$ ##$YMIN_p= 0
$$ ##END=
$$ 
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 15	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 11:38:34.725 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_COSY_MeOD/2/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_1dglp>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F2>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.1
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= 15
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 0
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= 2
$$ ##$NLEV= 6
$$ ##$NOISF1= 6.21
$$ ##$NOISF2= 5.81
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 14.01074
$$ ##$PC= 1
$$ ##$PHC0= 0
$$ ##$PHC1= 0
$$ ##$PH_mod= 0
$$ ##$PKNL= yes
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 0
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.13
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 400
$$ ##$SIOLD= 32768
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <1H.CDCl3>
$$ ##$SSB= 0
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 8012.8205128205
$$ ##$SYMM= 0
$$ ##$S_DEV= 7681
$$ ##$TDeff= 1024
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 4
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 274065005
$$ ##$YMIN_p= 0
$$ ##END=
$$ 
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/cosygpppqf"
$$ ;cosygpppqf
$$ ;avance-version (07/04/05)
$$ ;2D homonuclear shift correlation
$$ ;using gradient pulses for selection
$$ ;using purge pulses before d1
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=2D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ 
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 14 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/cosygpppqf" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Grad.incl" 1
$$ ;Grad2.incl  -  include file for Gradient Spectroscopy
$$ ;   for 1
$$ ;
$$ ;avance-version (07/01/17)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ define list<gradient> EA=<EA>
$$ 
$$ 
$$ 
$$ ;$Id: Grad2.incl,v 1.12 2007/01/22 14:22:35 ber Exp $
$$ # 15 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/cosygpppqf" 2
$$ 
$$ 
$$ 
$$ "d11=30m"
$$ "d12=20u"
$$ "d13=4u"
$$ 
$$ 
$$ "in0=inf1"
$$ 
$$ "d0=3u"
$$ 
$$ 
$$ # 1 "mc_line 28 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/cosygpppqf expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ "MCWRK = 0.500000*d11"
$$ "MCREST = d11 - d11"
$$     dccorr
$$ # 28 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/cosygpppqf"
$$ 1 ze
$$ # 1 "mc_line 28 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/cosygpppqf expanding definition of mc command after ze"
$$ # 29 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/cosygpppqf"
$$ # 1 "mc_line 29 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/cosygpppqf expanding start label for mc command"
$$ 2 MCWRK 
$$ LBLF1, MCWRK
$$   MCREST
$$ # 30 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/cosygpppqf"
$$ 
$$ 3 d12 pl10:f1
$$   p17 ph3
$$   p17*2 ph4
$$   d1 pl1:f1
$$ 
$$   p1 ph1
$$   d0
$$   50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
$$   p16:gp1
$$   d16
$$   p0 ph2
$$   d13
$$   p16:gp1
$$   d16
$$   4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$   go=2 ph31
$$ # 1 "mc_line 47 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/cosygpppqf expanding mc command in line"
$$   MCWRK  wr #0 if #0 zd id0 
$$   lo to LBLF1 times td1
$$   MCWRK
$$ # 48 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/cosygpppqf"
$$ exit
$$ 
$$ 
$$ ph1=0 2
$$ ph2=0 0 2 2
$$ ph3=0
$$ ph4=1
$$ ph31=0 2
$$ 
$$ 
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;pl10: f1 channel - power level for TOCSY-spinlock
$$ ;p0 : f1 channel -  20 to 90 degree high power pulse
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;p16: homospoil/gradient pulse
$$ ;p17: f1 channel - trim pulse                             [2.5 msec]
$$ ;d0 : incremented delay (2D)                              [3 usec]
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;d13: short delay                                         [4 usec]
$$ ;d12: delay for power switching                           [20 usec]
$$ ;d16: delay for homospoil/gradient recovery
$$ ;inf1: 1/SW = 2 * DW
$$ ;in0: 1/(1 * SW) = 2 * DW
$$ ;nd0: 1
$$ ;NS: 1 * n
$$ ;DS: 16
$$ ;td1: number of experiments
$$ ;FnMODE: QF
$$ 
$$ ;use gradient ratio:	gp 1
$$ ;			  10
$$ 
$$ ;for z-only gradients:
$$ ;gpz1: 10%
$$ 
$$ ;use gradient files:   
$$ ;gpnam1: SINE.100
$$ 
$$ 
$$ 
$$ ;$Id: cosygpppqf,v 1.4 2007/04/11 13:34:29 ber Exp $
$$ 
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/pdata/1/title, 0)
$$ Cosy experiment with Z-gradient - cosygpppqf
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/COSY.fid/uxnmr.par, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/HMBC.fid
echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
(w/ gradients in back-INEPT w/matched adiabatic sweep)
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	29
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/HMBC.fid
echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
(w/ gradients in back-INEPT w/matched adiabatic sweep)
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	30
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/HMBC.fid
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	31
##DATA TYPE=	nD NMR SPECTRUM
##DATA CLASS=	NTUPLES
##NUMDIM=	2
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13300077999997484
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	hmbcgplpndqf
##LONGDATE=	2021/09/04 16:48:51.000
##.ACQUISITIONMODE=	SIMULTANEOUS (DQD)
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqu2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/acqu2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 187	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-05 11:23:28.114 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/acqu2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/go
$$ ##$BF1= 125.757789
$$ ##$FnMODE= 1
$$ ##$NUC1= <13C>
$$ ##$O1= 13833.35679
$$ ##$SFO1= 125.77162235679
$$ ##$SW= 225
$$ ##$SW_h= 28298.6150302777
$$ ##$TD= 123
$$ ##END=
$$ 
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 28	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-05 11:26:29.657 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= 1000000
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_getlinv>
$$ ##$AUTOPOS= <>
$$ ##$BF1= 500.13
$$ ##$BF2= 125.757789
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 1
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 50 9 1 1 1 1 1 1 1 50 30 40 1 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <garp>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <waltz16>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 3e-06 1.5 0.003448276 0.0023 0 0 0.05555556 0.4 0 0 0 0.03 2e-05 3e-06
$$ 0 0 0.0001 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$DATE= 1630799331
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 6.5
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 16
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 1
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 18
$$ ##$DS= 16
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 0
$$ ##$DSPFVS= 12
$$ ##$DTYPA= 0
$$ ##$EXP= </opt/topspin2.1pl8/exp/stan/nmr>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 1 0 0 0 0 0 0 0
$$ ##$FL1= 90
$$ ##$FL2= 90
$$ ##$FL3= 90
$$ ##$FL4= 90
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1892985.61151079
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <SINE.100>
$$ ##$GPNAM1= <SINE.100>
$$ ##$GPNAM10= <SINE.100>
$$ ##$GPNAM11= <SINE.100>
$$ ##$GPNAM12= <SINE.100>
$$ ##$GPNAM13= <SINE.100>
$$ ##$GPNAM14= <SINE.100>
$$ ##$GPNAM15= <SINE.100>
$$ ##$GPNAM16= <SINE.100>
$$ ##$GPNAM17= <SINE.100>
$$ ##$GPNAM18= <SINE.100>
$$ ##$GPNAM19= <SINE.100>
$$ ##$GPNAM2= <SINE.100>
$$ ##$GPNAM20= <SINE.100>
$$ ##$GPNAM21= <SINE.100>
$$ ##$GPNAM22= <SINE.100>
$$ ##$GPNAM23= <SINE.100>
$$ ##$GPNAM24= <SINE.100>
$$ ##$GPNAM25= <SINE.100>
$$ ##$GPNAM26= <SINE.100>
$$ ##$GPNAM27= <SINE.100>
$$ ##$GPNAM28= <SINE.100>
$$ ##$GPNAM29= <SINE.100>
$$ ##$GPNAM3= <SINE.100>
$$ ##$GPNAM30= <SINE.100>
$$ ##$GPNAM31= <SINE.100>
$$ ##$GPNAM4= <SINE.100>
$$ ##$GPNAM5= <SINE.100>
$$ ##$GPNAM6= <SINE.100>
$$ ##$GPNAM7= <SINE.100>
$$ ##$GPNAM8= <SINE.100>
$$ ##$GPNAM9= <SINE.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 50 30 40.1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <grad_out>
$$ ##$GRPDLY= -1
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 90
$$ ##$HL2= 90
$$ ##$HL3= 90
$$ ##$HL4= 90
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 1.765e-05 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 35.3374184188895 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5289
$$ ##$LOCKGN= 126.699996948242
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 148.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -2
$$ ##$NLOGCH= 1
$$ ##$NS= 256
$$ ##$NUC1= <1H>
$$ ##$NUC2= <13C>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 3000.78
$$ ##$O2= 13833.35679
$$ ##$O3= 3150.81899998404
$$ ##$O4= 3150.81899998404
$$ ##$O5= 3150.81899998404
$$ ##$O6= 3150.81899998404
$$ ##$O7= 3150.81899998404
$$ ##$O8= 3150.81899998404
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 10 10 20 11.12 22.24 19.8 30 60 20000 25 50 80000 80000 22 500 0 1000 2500
$$ 10000 600 2500 0 0 0 2000 250 0 10 2000 1000 0 1900 20000 0 0 0 0 0 0 192
$$ 2000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1500
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 1
$$ ##$PCPD= (0..9)
$$ 100 60 70 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 -2.5 -0.6 120 120 120 120 120 120 50 7.04 19.44 15.38 18.3 116.89 6.44
$$ 120 120 -2.5 13.06 120 116.89 120 120 116.89 120 120 19.44 120 120 15.38
$$ 9.36 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 3
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <hmbcgplpndqf>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 23170.5
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 128 0 0 0 1 0 0 0 0 0 0 0 0 0 1 0 0 0 0 0 0 0 0
$$ ##$ROUTWD2= (0..23)
$$ 1 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RSEL= (0..9)
$$ 0 1 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.13300078
$$ ##$SFO2= 125.77162235679
$$ ##$SFO3= 500.133150819
$$ ##$SFO4= 500.133150819
$$ ##$SFO5= 500.133150819
$$ ##$SFO6= 500.133150819
$$ ##$SFO7= 500.133150819
$$ ##$SFO8= 500.133150819
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 67.85 61.83 6.64 6.08 0 57.5 6.64 120 0 37.5 37.5 0 0 8.12 0 150 150
$$ 12.84 59.79 57.88 61.19 53.87 150 150 150 150 150 150 21.68 150 14.14
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gaus1.1000>
$$ ##$SPNAM10= <Squa100.1000>
$$ ##$SPNAM11= <Squa100.1000>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <Crp32,1.5,20.2>
$$ ##$SPNAM15= < >
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <Crp60_xfilt.2>
$$ ##$SPNAM19= <Sinc1.1000>
$$ ##$SPNAM2= <Gaus1_180r.1000>
$$ ##$SPNAM20= <Sinc1.1000>
$$ ##$SPNAM21= <Sinc1.1000>
$$ ##$SPNAM22= <Sinc1.1000>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <Crp60,20,20.10>
$$ ##$SPNAM3= <Crp60,0.5,20.1>
$$ ##$SPNAM30= <gauss>
$$ ##$SPNAM31= <Crp32,1.5,20.2>
$$ ##$SPNAM4= <Bip720,100,10.1>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Squa100.1000>
$$ ##$SPNAM7= <Crp60comp.4>
$$ ##$SPNAM8= < >
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 17.9808285823384
$$ ##$SWIBOX= (0..15)
$$ 0 1 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 8992.80575539568
$$ ##$SWfinal= 0
$$ ##$TD= 4096
$$ ##$TD0= 1
$$ ##$TE= 298.1
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <user>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 2048
$$ ##$WBSW= 26
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 0
$$ ##$YL= 0
$$ ##$YMAX_a= 179445
$$ ##$YMIN_a= -181406
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
$$ 
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-05 11:26:26.749 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 19:40:41.231 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        terminated by command 'stop'
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 4K * 123
$$        7A 0F 09 02 AC 04 9B B3 F0 25 BD E2 84 A6 30 0D>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 20 E3 E4 ED B0 CF AF B2 FB 0D 02 24 E9 07 C1 71
$$ 
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-05 11:26:26.749 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 19:40:41.231 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        terminated by command 'stop'
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 4K * 123
$$        7A 0F 09 02 AC 04 9B B3 F0 25 BD E2 84 A6 30 0D>)
$$ (   2,<2021-09-05 11:26:31.312 -0400>,<rsamples>,<AV500>,<proc2d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        xfb F2: SI = 2K WDW = 3 SSB = 0 FT_mod = 6 PKNL = 1 F1: SI = 1K ME_mod = 2 NCOEF = 32 WDW = 3 SSB = 0 FT_mod = 6 PH_mod = 2
$$        data hash MD5: 2K * 1K
$$        70 53 4B E1 BC 92 7F 9C D6 A7 33 0B 5F B2 E9 89>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 50 AE 17 31 06 25 30 18 F3 AC 73 A2 4B 6A E3 7B
$$ 
##$PARAMETER FILE=	(clevels, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pdata/1/clevels, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 16	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 23:17:33.990 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/pdata/1/clevels
$$ $$ process /opt/topspin2.1pl8/prog/mod/dataserver
$$ ##$LEVELS= (0..255)
$$ -562879119.7 -312710622.1 -173728123.4 -96515624.1 -53619791.2 -29788772.9
$$ -16549318.3 -9194065.7 9194065.7 16549318.3 29788772.9 53619791.2 96515624.1
$$ 173728123.4 312710622.1 562879119.7 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0
$$ ##$LEVSIGN= 3
$$ ##$MAXLEV= 8
$$ ##$METHOD= 0
$$ ##$NEGBASE= -9194065.7
$$ ##$NEGINCR= 1.8
$$ ##$POSBASE= 9194065.7
$$ ##$POSINCR= 1.8
$$ ##END=
$$ 
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/ser, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ 
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ 
$$ 
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		CNST2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"CNST2=CNST[2]"
$$ 		INV_REL	"CNST[2]=CNST2"
$$ 		FORMAT	"%14.7f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		CNST13
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"CNST13=CNST[13]"
$$ 		INV_REL	"CNST[13]=CNST13"
$$ 		FORMAT	"%14.7f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D0=D[0]"
$$ 		INV_REL	"D[0]=D0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D2=D[2]"
$$ 		INV_REL	"D[2]=D2"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D6
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D6=D[6]"
$$ 		INV_REL	"D[6]=D6"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D16=D[16]"
$$ 		INV_REL	"D[16]=D16"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		IN0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"IN0=IN[0]"
$$ 		INV_REL	"IN[0]=IN0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P2=P[2]"
$$ 		INV_REL	"P[2]=P2"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f2 ========"
$$ NAME		NUC2
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P3=P[3]"
$$ 		INV_REL	"P[3]=P3"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL2=PL[2]"
$$ 		INV_REL	"PL[2]=PL2"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL2W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL2W=306.7*pow(10.0,(-6-PL[2])/10.0)"
$$ 		INV_REL	"PL[2]=-6-4.3425*log(PL2W/306.7)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO2
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"====== GRADIENT CHANNEL ====="
$$ NAME		GPNAM1
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM2
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM3
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ1=GPZ[1]"
$$ 		INV_REL	"GPZ[1]=GPZ1"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ2=GPZ[2]"
$$ 		INV_REL	"GPZ[2]=GPZ2"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ3=GPZ[3]"
$$ 		INV_REL	"GPZ[3]=GPZ3"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P16=P[16]"
$$ 		INV_REL	"P[16]=P16"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ 
##$PARAMETER FILE=	(proc2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pdata/1/proc2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 15	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-05 11:26:31.312 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/pdata/1/proc2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <        >
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F1>
$$ ##$AXNUC= <13C>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 0
$$ ##$LPBIN= 246
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 2
$$ ##$MI= 1
$$ ##$NCOEF= 32
$$ ##$NC_proc= 0
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 222.5124
$$ ##$PC= 4
$$ ##$PHC0= 0
$$ ##$PHC1= 0
$$ ##$PH_mod= 2
$$ ##$PKNL= no
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 1
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 125.757788992341
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 1024
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <1H.DMSO>
$$ ##$SSB= 0
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 28298.6150302777
$$ ##$SYMM= 0
$$ ##$S_DEV= 3214342
$$ ##$TDeff= 246
$$ ##$TDoff= 0
$$ ##$TI= <        >
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 3
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 265985858
$$ ##$YMIN_p= 0
$$ ##END=
$$ 
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 15	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-05 11:26:31.312 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/2/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_2dpl>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F2>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 2048
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 35
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= 0
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 14.9729
$$ ##$PC= 1.4
$$ ##$PHC0= 0
$$ ##$PHC1= 0
$$ ##$PH_mod= 0
$$ ##$PKNL= yes
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 0
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.130008784643
$$ ##$SI= 2048
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 2048
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <1H.DMSO>
$$ ##$SSB= 0
$$ ##$STSI= 2048
$$ ##$STSR= 0
$$ ##$SW_p= 8992.8057553957
$$ ##$SYMM= 0
$$ ##$S_DEV= 3214342
$$ ##$TDeff= 4096
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 100
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 3
$$ ##$XDIM= 2048
$$ ##$YMAX_p= 265985858
$$ ##$YMIN_p= 0
$$ ##END=
$$ 
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf"
$$ ;hmbcgplpndqf
$$ ;avance-version (07/04/04)
$$ ;HMBC
$$ ;2D H-1/X correlation via heteronuclear zero and double quantum
$$ ;   coherence
$$ ;optimized on long range couplings
$$ ;with low-pass J-filter to suppress one-bond correlations
$$ ;no decoupling during acquisition
$$ ;using gradient pulses for selection
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=2D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ 
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 18 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Grad.incl" 1
$$ ;Grad2.incl  -  include file for Gradient Spectroscopy
$$ ;   for 1
$$ ;
$$ ;avance-version (07/01/17)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ define list<gradient> EA=<EA>
$$ 
$$ 
$$ 
$$ ;$Id: Grad2.incl,v 1.12 2007/01/22 14:22:35 ber Exp $
$$ # 19 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf" 2
$$ 
$$ 
$$   
$$ "p2=p1*2"
$$ "d2=1s/(cnst2*2)"
$$ "d6=1s/(cnst13*2)"
$$ 
$$ 
$$ "d0=3u"
$$ 
$$ "in0=inf1/2"
$$ 
$$ 
$$ # 1 "mc_line 32 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ "MCWRK = 0.500000*d1"
$$ "MCREST = d1 - d1"
$$     dccorr
$$ # 32 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf"
$$ 1 ze 
$$ # 1 "mc_line 32 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf expanding definition of mc command after ze"
$$ # 33 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf"
$$ # 1 "mc_line 33 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf expanding start label for mc command"
$$ 2 MCWRK 
$$ LBLF1, MCWRK
$$   MCREST
$$ # 34 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf"
$$ 3 p1 ph1
$$   d2
$$   p3:f2 ph3
$$   d6
$$   p3:f2 ph4
$$   d0
$$   50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
$$   p16:gp1
$$   d16
$$   p2 ph2
$$   50u
$$   p16:gp2
$$   d16
$$   d0
$$   p3:f2 ph5
$$   4u
$$   p16:gp3
$$   d16
$$   4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$   go=2 ph31
$$ # 1 "mc_line 54 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf expanding mc command in line"
$$   MCWRK  wr #0 if #0 zd id0 
$$   lo to LBLF1 times td1
$$   MCWRK
$$ # 55 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hmbcgplpndqf"
$$ exit 
$$   
$$ 
$$ ph1=0 
$$ ph2=0 0 0 0 2 2 2 2
$$ ph3=0 0 2 2
$$ ph4=0 2
$$ ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
$$ ph31=0 2 0 2 0 2 0 2 2 0 2 0 2 0 2 0
$$ 
$$ 
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;pl2 : f2 channel - power level for pulse (default)
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;p2 : f1 channel - 180 degree high power pulse
$$ ;p3 : f2 channel -  90 degree high power pulse
$$ ;p16: homospoil/gradient pulse
$$ ;d0 : incremented delay (2D)                  [3 usec]
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;d2 : 1/(2J)XH
$$ ;d6 : delay for evolution of long range couplings
$$ ;d16: delay for homospoil/gradient recovery
$$ ;cnst2: = J(XH)
$$ ;cnst13: = J(XH) long range
$$ ;inf1: 1/SW(X) = 2 * DW(X)
$$ ;in0: 1/(2 * SW(X)) = DW(X)
$$ ;nd0: 2
$$ ;NS: 2 * n
$$ ;DS: 16
$$ ;td1: number of experiments
$$ ;FnMODE: QF
$$ 
$$ 
$$ ;use gradient ratio: 	gp 1 : gp 2 : gp 3
$$ ;			  50 :   30 : 40.1   for C-13
$$ ;			  70 :   30 : 50.1   for N-15
$$ 
$$ ;for z-only gradients:
$$ ;gpz1: 50% for C-13, 70% for N-15
$$ ;gpz2: 30%
$$ ;gpz3: 40.1% for C-13, 50.1% for N-15
$$ 
$$ ;use gradient files:   
$$ ;gpnam1: SINE.100
$$ ;gpnam2: SINE.100
$$ ;gpnam3: SINE.100
$$ 
$$ 
$$ 
$$ ;$Id: hmbcgplpndqf,v 1.4 2007/04/11 13:34:29 ber Exp $
$$ 
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/pdata/1/title, 0)
$$ echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
$$ (w/ gradients in back-INEPT w/matched adiabatic sweep)
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HMBC.fid/uxnmr.par, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/HSQC.fid
echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
(w/ gradients in back-INEPT w/matched adiabatic sweep)
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	32
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/HSQC.fid
echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
(w/ gradients in back-INEPT w/matched adiabatic sweep)
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	33
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/HSQC.fid
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	34
##DATA TYPE=	nD NMR SPECTRUM
##DATA CLASS=	NTUPLES
##NUMDIM=	2
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13235211138999148
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	hsqcedetgpsisp2.3
##LONGDATE=	2021/09/04 13:39:17.000
##.ACQUISITIONMODE=	SIMULTANEOUS (DQD)
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqu2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/acqu2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 257	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 18:27:21.880 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/acqu2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/go
$$ ##$BF1= 125.757789
$$ ##$FnMODE= 6
$$ ##$NUC1= <13C>
$$ ##$O1= 8802.58583910631
$$ ##$SFO1= 125.766591585839
$$ ##$SW= 165.658016737528
$$ ##$SW_h= 20834.2441339488
$$ ##$TD= 128
$$ ##END=
$$ 
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 19	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 18:27:26.135 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= 1000000
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_zg>
$$ ##$AUTOPOS= <1 >
$$ ##$BF1= 500.13
$$ ##$BF2= 125.757789
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 1
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 1 1 1 1 1 -0.5 1 1 1 80 30 20 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <garp>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <bi_p5m4sp_4sp.2>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 3e-06 1.5 0.00345 0.0023 0.001724138 0 0 0.484 0.12 0 0 0.03 2e-05 3e-06
$$ 0 0 0.0001 0 0 0 0 0.0036 0 0 0.00089 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$DATE= 1630787957
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 6.5
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 24
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 1
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 18
$$ ##$DS= 16
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 0
$$ ##$DSPFVS= 12
$$ ##$DTYPA= 0
$$ ##$EXP= <AAC13HSQC>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 1 0 0 0 0 0 0 0
$$ ##$FL1= 90
$$ ##$FL2= 90
$$ ##$FL3= 90
$$ ##$FL4= 90
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1887019.23076923
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <SINE.100>
$$ ##$GPNAM1= <SINE.100>
$$ ##$GPNAM10= <SINE.100>
$$ ##$GPNAM11= <SINE.100>
$$ ##$GPNAM12= <SINE.100>
$$ ##$GPNAM13= <SINE.100>
$$ ##$GPNAM14= <SINE.100>
$$ ##$GPNAM15= <SINE.100>
$$ ##$GPNAM16= <SINE.100>
$$ ##$GPNAM17= <SINE.100>
$$ ##$GPNAM18= <SINE.100>
$$ ##$GPNAM19= <SINE.100>
$$ ##$GPNAM2= <SINE.100>
$$ ##$GPNAM20= <SINE.100>
$$ ##$GPNAM21= <SINE.100>
$$ ##$GPNAM22= <SINE.100>
$$ ##$GPNAM23= <SINE.100>
$$ ##$GPNAM24= <SINE.100>
$$ ##$GPNAM25= <SINE.100>
$$ ##$GPNAM26= <SINE.100>
$$ ##$GPNAM27= <SINE.100>
$$ ##$GPNAM28= <SINE.100>
$$ ##$GPNAM29= <SINE.100>
$$ ##$GPNAM3= <SINE.100>
$$ ##$GPNAM30= <SINE.100>
$$ ##$GPNAM31= <SINE.100>
$$ ##$GPNAM4= <SINE.100>
$$ ##$GPNAM5= <SINE.100>
$$ ##$GPNAM6= <SINE.100>
$$ ##$GPNAM7= <SINE.100>
$$ ##$GPNAM8= <SINE.100>
$$ ##$GPNAM9= <SINE.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 80 20.1 11 -5 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <grad_out>
$$ ##$GRPDLY= -1
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 256
$$ ##$HL2= 90
$$ ##$HL3= 90
$$ ##$HL4= 90
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 2.4e-05 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 47.9979016071205 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5289
$$ ##$LOCKGN= 126.699996948242
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 143.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -2
$$ ##$NLOGCH= 1
$$ ##$NS= 32
$$ ##$NUC1= <1H>
$$ ##$NUC2= <13C>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 2352.11138993918
$$ ##$O2= 8802.58583910631
$$ ##$O3= 2352.11138993918
$$ ##$O4= 2352.11138993918
$$ ##$O5= 2352.11138993918
$$ ##$O6= 2352.11138993918
$$ ##$O7= 2352.11138993918
$$ ##$O8= 2352.11138993918
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 10 10 20 11.12 22.24 19.8 30 60 20000 25 50 80000 80000 22 500 0 1000 2500
$$ 10000 600 2500 0 0 0 2000 250 0 10 2000 1000 1730 1900 20000 0 0 0 0 0
$$ 0 192 2000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1500
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 1
$$ ##$PCPD= (0..9)
$$ 100 60 70 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 -2.5 -0.6 120 120 120 120 120 120 50 7.04 19.44 15.38 18.3 116.89 6.44
$$ 120 120 -2.5 13.06 120 116.89 120 120 116.89 120 120 19.44 120 120 15.38
$$ 9.36 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 3
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <hsqcedetgpsisp2.3>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 26008
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 256 0 0 0 1 0 0 0 0 0 0 0 0 0 1 0 0 0 0 0 0 0 0
$$ ##$ROUTWD2= (0..23)
$$ 1 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RSEL= (0..9)
$$ 0 1 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.13235211139
$$ ##$SFO2= 125.766591585839
$$ ##$SFO3= 500.13235211139
$$ ##$SFO4= 500.13235211139
$$ ##$SFO5= 500.13235211139
$$ ##$SFO6= 500.13235211139
$$ ##$SFO7= 500.13235211139
$$ ##$SFO8= 500.13235211139
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 67.85 61.83 6.64 6.08 0 57.5 6.64 120 0 37.5 37.5 0 0 8.12 0 150 150
$$ 12.84 59.79 57.88 61.19 53.87 150 150 150 150 150 150 21.68 7.4 14.14
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gaus1.1000>
$$ ##$SPNAM10= <Squa100.1000>
$$ ##$SPNAM11= <Squa100.1000>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <Crp32,1.5,20.2>
$$ ##$SPNAM15= < >
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <Crp60_xfilt.2>
$$ ##$SPNAM19= <Sinc1.1000>
$$ ##$SPNAM2= <Gaus1_180r.1000>
$$ ##$SPNAM20= <Sinc1.1000>
$$ ##$SPNAM21= <Sinc1.1000>
$$ ##$SPNAM22= <Sinc1.1000>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <Crp60,20,20.10>
$$ ##$SPNAM3= <Crp60,0.5,20.1>
$$ ##$SPNAM30= <crp60_xfilt>
$$ ##$SPNAM31= <Crp32,1.5,20.2>
$$ ##$SPNAM4= <Bip720,100,10.1>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Squa100.1000>
$$ ##$SPNAM7= <Crp60comp.4>
$$ ##$SPNAM8= < >
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 16.0214000933815
$$ ##$SWIBOX= (0..15)
$$ 0 1 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 8012.82051282051
$$ ##$SWfinal= 0
$$ ##$TD= 1024
$$ ##$TD0= 1
$$ ##$TE= 298.1
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <user>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 1024
$$ ##$WBSW= 4
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 0
$$ ##$YL= 0
$$ ##$YMAX_a= 95191
$$ ##$YMIN_a= -97738
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
$$ 
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-04 18:27:23.437 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 16:37:58.692 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 1K * 128
$$        22 19 78 CC 9C B3 1A 4C D8 F3 15 66 FF 81 BD BE>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 91 6C 46 18 16 FF 81 31 90 02 10 B9 1E 9D D4 53
$$ 
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-04 18:27:23.437 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-04 16:37:58.692 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 1K * 128
$$        22 19 78 CC 9C B3 1A 4C D8 F3 15 66 FF 81 BD BE>)
$$ (   2,<2021-09-04 18:38:40.413 -0400>,<rsamples>,<AV500>,<proc2d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        xfb F2: SI = 1K WDW = 4 SSB = 2 FT_mod = 6 PKNL = 1 PHC0 = -43.6052 PHC1 = 18.6 F1: SI = 1K ME_mod = 2 NCOEF = 32 WDW = 4 SSB = 2 FT_mod = 6 PHC0 = 3.437305 PHC1 = -5
$$        data hash MD5: 1K * 1K
$$        63 6D EB C0 00 3B 31 CA 73 94 23 A1 A3 F5 0B 8F>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ FC 4A F3 44 BF 05 51 0E 0D 23 62 A5 5E E2 D6 3F
$$ 
##$PARAMETER FILE=	(clevels, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pdata/1/clevels, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 24	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 18:07:53.320 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/pdata/1/clevels
$$ $$ process /opt/topspin2.1pl8/prog/mod/dataserver
$$ ##$LEVELS= (0..255)
$$ -86567643.1 -48093135.1 -26718408.4 -14843560.2 -8246422.3 -4581345.7 -2545192.1
$$ -1413995.6 1413995.6 2545192.1 4581345.7 8246422.3 14843560.2 26718408.4
$$ 48093135.1 86567643.1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$LEVSIGN= 3
$$ ##$MAXLEV= 8
$$ ##$METHOD= 0
$$ ##$NEGBASE= -1413995.6
$$ ##$NEGINCR= 1.8
$$ ##$POSBASE= 1413995.6
$$ ##$POSINCR= 1.8
$$ ##END=
$$ 
##$PARAMETER FILE=	(cpdprg2, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/cpdprg2, 0)
$$ #setphase
$$ bilev "l31=(nsdone+ds)%4+1"
$$ 1 p63*0.5:sp14:0 pl=sp14
$$   lo to 1 times l31
$$   p63:sp31:0 pl=sp31
$$ 2 p63:sp31:150
$$   p63:sp31:60
$$   p63:sp31:150
$$   p63:sp31:0
$$   p63:sp31:0 
$$   p63:sp31:150
$$   p63:sp31:60
$$   p63:sp31:150
$$   p63:sp31:0
$$   p63:sp31:180 
$$   p63:sp31:330
$$   p63:sp31:240
$$   p63:sp31:330
$$   p63:sp31:180
$$   p63:sp31:180 
$$   p63:sp31:330
$$   p63:sp31:240
$$   p63:sp31:330
$$   p63:sp31:180
$$   p63:sp31:0
$$   jump to 2
$$ 
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/ser, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ 
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ 
$$ 
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		CNST2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"CNST2=CNST[2]"
$$ 		INV_REL	"CNST[2]=CNST2"
$$ 		FORMAT	"%14.7f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		CNST17
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"CNST17=CNST[17]"
$$ 		INV_REL	"CNST[17]=CNST17"
$$ 		FORMAT	"%14.7f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D0=D[0]"
$$ 		INV_REL	"D[0]=D0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D4
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D4=D[4]"
$$ 		INV_REL	"D[4]=D4"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D11
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D11=D[11]"
$$ 		INV_REL	"D[11]=D11"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D16=D[16]"
$$ 		INV_REL	"D[16]=D16"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D21
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D21=D[21]"
$$ 		INV_REL	"D[21]=D21"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D24
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D24=D[24]"
$$ 		INV_REL	"D[24]=D24"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		IN0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"IN0=IN[0]"
$$ 		INV_REL	"IN[0]=IN0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		L31
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"L31=L[31]"
$$ 		INV_REL	"L[31]=L31"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P2=P[2]"
$$ 		INV_REL	"P[2]=P2"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P28
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P28=P[28]"
$$ 		INV_REL	"P[28]=P28"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f2 ========"
$$ NAME		CPDPRG2
$$ 		TEXT	" "
$$ END
$$ NAME		NUC2
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P3=P[3]"
$$ 		INV_REL	"P[3]=P3"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P14
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P14=P[14]"
$$ 		INV_REL	"P[14]=P14"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P24
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P24=P[24]"
$$ 		INV_REL	"P[24]=P24"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P31
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P31=P[31]"
$$ 		INV_REL	"P[31]=P31"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P63
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P63=P[63]"
$$ 		INV_REL	"P[63]=P63"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL0=PL[0]"
$$ 		INV_REL	"PL[0]=PL0"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL2=PL[2]"
$$ 		INV_REL	"PL[2]=PL2"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL12
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL12=PL[12]"
$$ 		INV_REL	"PL[12]=PL12"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL0W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL0W=306.7*pow(10.0,(-6-PL[0])/10.0)"
$$ 		INV_REL	"PL[0]=-6-4.3425*log(PL0W/306.7)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL2W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL2W=306.7*pow(10.0,(-6-PL[2])/10.0)"
$$ 		INV_REL	"PL[2]=-6-4.3425*log(PL2W/306.7)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL12W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL12W=306.7*pow(10.0,(-6-PL[12])/10.0)"
$$ 		INV_REL	"PL[12]=-6-4.3425*log(PL12W/306.7)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO2
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP3=SP[3]"
$$ 		INV_REL	"SP[3]=SP3"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP7
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP7=SP[7]"
$$ 		INV_REL	"SP[7]=SP7"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP14
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP14=SP[14]"
$$ 		INV_REL	"SP[14]=SP14"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP18
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP18=SP[18]"
$$ 		INV_REL	"SP[18]=SP18"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SP31
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 120
$$ 		REL	"SP31=SP[31]"
$$ 		INV_REL	"SP[31]=SP31"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM3
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM7
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM14
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM18
$$ 		TEXT	" "
$$ END
$$ NAME		SPNAM31
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL3=SPOAL[3]"
$$ 		INV_REL	"SPOAL[3]=SPOAL3"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL7
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL7=SPOAL[7]"
$$ 		INV_REL	"SPOAL[7]=SPOAL7"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL14
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL14=SPOAL[14]"
$$ 		INV_REL	"SPOAL[14]=SPOAL14"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL18
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL18=SPOAL[18]"
$$ 		INV_REL	"SPOAL[18]=SPOAL18"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOAL31
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1.0 1.0
$$ 		REL	"SPOAL31=SPOAL[31]"
$$ 		INV_REL	"SPOAL[31]=SPOAL31"
$$ 		FORMAT	"%14.3f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS3=SPOFFS[3]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS7
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS7=SPOFFS[7]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS14
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS14=SPOFFS[14]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS18
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS18=SPOFFS[18]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME		SPOFFS31
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -1e38 1e38
$$ 		REL	"SPOFFS31=SPOFFS[31]"
$$ 		INV_REL	"SPOFFS[0]=SPOFFS0"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.2f Hz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"====== GRADIENT CHANNEL ====="
$$ NAME		GPNAM1
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM2
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM3
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM4
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ1=GPZ[1]"
$$ 		INV_REL	"GPZ[1]=GPZ1"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ2=GPZ[2]"
$$ 		INV_REL	"GPZ[2]=GPZ2"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ3
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ3=GPZ[3]"
$$ 		INV_REL	"GPZ[3]=GPZ3"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ4
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ4=GPZ[4]"
$$ 		INV_REL	"GPZ[4]=GPZ4"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P16=P[16]"
$$ 		INV_REL	"P[16]=P16"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P19
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P19=P[19]"
$$ 		INV_REL	"P[19]=P19"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ 
##$PARAMETER FILE=	(proc2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pdata/1/proc2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 20	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 18:38:40.413 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/pdata/1/proc2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <        >
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F1>
$$ ##$AXNUC= <13C>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 0
$$ ##$LPBIN= 256
$$ ##$MAXI= 10000
$$ ##$MC2= 5
$$ ##$MEAN= 0
$$ ##$ME_mod= 2
$$ ##$MI= 1
$$ ##$NCOEF= 32
$$ ##$NC_proc= -1
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 152.8311
$$ ##$PC= 4
$$ ##$PHC0= 3.437305
$$ ##$PHC1= -5
$$ ##$PH_mod= 1
$$ ##$PKNL= no
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 100
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 1
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 125.757789004702
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 1024
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <13C.H2O+D2O>
$$ ##$SSB= 2
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 20834.2441339488
$$ ##$SYMM= 0
$$ ##$S_DEV= 989249
$$ ##$TDeff= 256
$$ ##$TDoff= 0
$$ ##$TI= <        >
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 4
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 367702553
$$ ##$YMIN_p= -19087955
$$ ##END=
$$ 
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 20	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-04 18:38:40.413 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_carbon_MeOD/1/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_no>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F2>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 0
$$ ##$F2P= 0
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 35
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= -1
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 12.69681
$$ ##$PC= 1.4
$$ ##$PHC0= -43.6052
$$ ##$PHC1= 18.6
$$ ##$PH_mod= 1
$$ ##$PKNL= yes
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 100
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 0
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.130008466069
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 1024
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <13C.H2O+D2O>
$$ ##$SSB= 2
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 8012.82051282053
$$ ##$SYMM= 0
$$ ##$S_DEV= 989249
$$ ##$TDeff= 1024
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 100
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 4
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 367702553
$$ ##$YMIN_p= -19087955
$$ ##END=
$$ 
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3"
$$ ;hsqcedetgpsisp2.3
$$ ;avance-version (10/03/18)
$$ ;HSQC
$$ ;2D H-1/X correlation via double inept transfer
$$ ;   using sensitivity improvement
$$ ;phase sensitive using Echo/Antiecho-TPPI gradient selection
$$ ;with decoupling during acquisition
$$ ;using trim pulses in inept transfer
$$ ;with multiplicity editing during selection step
$$ ;using shaped pulses for all 180degree pulses on f2 - channel
$$ ;for matched sweep adiabatic pulses
$$ ;with gradients in back-inept
$$ ;
$$ ;A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
$$ ;   Reson. 93, 151-170 (1991)
$$ ;L.E. Kay, P. Keifer & T. Saarinen, J. Am. Chem. Soc. 114,
$$ ;   10663-5 (1992)
$$ ;J. Schleucher, M. Schwendinger, M. Sattler, P. Schmidt, O. Schedletzky,
$$ ;   S.J. Glaser, O.W. Sorensen & C. Griesinger, J. Biomol. NMR 4,
$$ ;   301-306 (1994)
$$ ;W. Willker, D. Leibfritz, R. Kerssebaum & W. Bermel, Magn. Reson.
$$ ;   Chem. 31, 287-292 (1993)
$$ ;C. Zwahlen, P. Legault, S.J.F. Vincent, J. Greenblatt, R. Konrat &
$$ ;   L.E. Kay, J. Am. Chem. Soc. 119 6711-6721 (1997)
$$ ;(R.D. Boyer, R. Johnson & K. Krishnamurthy, 
$$ ;   J. Magn. Reson. 165, 253-259 (2003) )
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=2D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ 
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 35 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Grad.incl" 1
$$ ;Grad2.incl  -  include file for Gradient Spectroscopy
$$ ;   for 1
$$ ;
$$ ;avance-version (07/01/17)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ define list<gradient> EA=<EA>
$$ 
$$ 
$$ 
$$ ;$Id: Grad2.incl,v 1.12 2007/01/22 14:22:35 ber Exp $
$$ # 36 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Delay.incl" 1
$$ ;Delay.incl  -  include file for commonly used delays
$$ ;
$$ ;version 00/02/07
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ ;general delays
$$ 
$$ define delay DELTA
$$ define delay DELTA1
$$ define delay DELTA2
$$ define delay DELTA3
$$ define delay DELTA4
$$ define delay DELTA5
$$ define delay DELTA6
$$ define delay DELTA7
$$ define delay DELTA8
$$ 
$$ define delay TAU
$$ define delay TAU1
$$ define delay TAU2
$$ define delay TAU3
$$ define delay TAU4
$$ define delay TAU5
$$ 
$$ 
$$ ;delays for centering pulses
$$ 
$$ define delay CEN_HN1
$$ define delay CEN_HN2
$$ define delay CEN_HN3
$$ define delay CEN_HC1
$$ define delay CEN_HC2
$$ define delay CEN_HC3
$$ define delay CEN_HC4
$$ define delay CEN_HP1
$$ define delay CEN_HP2
$$ define delay CEN_CN1
$$ define delay CEN_CN2
$$ define delay CEN_CN3
$$ define delay CEN_CN4
$$ define delay CEN_CP1
$$ define delay CEN_CP2
$$ 
$$ 
$$ ;loop counters
$$ 
$$ define loopcounter COUNTER
$$ define loopcounter SCALEF
$$ define loopcounter FACTOR1
$$ define loopcounter FACTOR2
$$ define loopcounter FACTOR3
$$ 
$$ 
$$ 
$$ ;$Id: Delay.incl,v 1.12 2005/11/10 12:16:58 ber Exp $
$$ # 37 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3" 2
$$ 
$$ 
$$ 
$$ "p2=p1*2"
$$ "d4=1s/(cnst2*4)"
$$ "d11=30m"
$$ 
$$ 
$$ "d0=3u"
$$ 
$$ "in0=inf1/2"
$$ 
$$ 
$$ "DELTA=d21-p16-d16-p2-d0*2-p3*2/3.1416"
$$ "DELTA1=p16+d16+8u"
$$ "DELTA2=d4-larger(p2,p14)/2"
$$ "DELTA3=d24-cnst17*p24/2-p19-d16"
$$ "DELTA4=d4-larger(p2,p14)/2-p16-d16"
$$ "DELTA5=d21-p2+p3*2/3.1416"
$$ 
$$ 
$$ # 1 "mc_line 58 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3 expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ define loopcounter ST1CNT
$$ "ST1CNT = td1 / (2)"
$$ "MCWRK = 0.142857*d1"
$$ "MCREST = d1 - d1"
$$     dccorr
$$ # 58 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3"
$$ 1 ze
$$ # 1 "mc_line 58 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3 expanding definition of mc command after ze"
$$ # 59 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3"
$$   d11 pl12:f2
$$ # 1 "mc_line 60 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3 expanding start label for mc command"
$$ 2 MCWRK  * 2 do:f2
$$ LBLSTS1, MCWRK  * 4
$$ LBLF1, MCWRK 
$$   MCREST
$$ # 61 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3"
$$ 3 (p1 ph1)
$$   DELTA2 pl0:f2
$$   4u
$$   (center (p2 ph1) (p14:sp3 ph6):f2 )
$$   4u
$$   DELTA2 pl2:f2 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
$$   p28 ph1
$$   4u
$$   (p1 ph2) (p3 ph3):f2
$$   d0 
$$   (p2 ph7)
$$   d0
$$   p16:gp1*EA
$$   d16
$$   DELTA
$$   (p31:sp18 ph1):f2
$$   (p2 ph1) 
$$   DELTA5
$$   4u
$$   (p31:sp18 ph1):f2
$$   2u
$$   2u pl2:f2
$$   (center (p1 ph1) (p3 ph4):f2 )
$$   p19:gp3
$$   d16
$$   DELTA3
$$   (center (p2 ph1) (p24:sp7 ph1):f2 )
$$   DELTA3
$$   p19:gp3
$$   d16 pl2:f2
$$   (center (p1 ph2) (p3 ph5):f2 )
$$   p16:gp4
$$   d16
$$   DELTA4 pl0:f2
$$   (center (p2 ph1) (p14:sp3 ph1):f2 )
$$   DELTA4
$$   p16:gp4
$$   d16
$$   (p1 ph1)
$$   DELTA1
$$   (p2 ph1)
$$   4u
$$   p16:gp2
$$   d16 pl12:f2
$$   4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$   go=2 ph31 cpd2:f2
$$ # 1 "mc_line 107 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3 expanding mc command in line"
$$   MCWRK  do:f2 wr #0 if #0 zd igrad EA  MCWRK  ip5*2
$$   lo to LBLSTS1 times 2
$$   MCWRK id0  MCWRK  ip3*2  MCWRK  ip6*2  MCWRK  ip31*2
$$   lo to LBLF1 times ST1CNT
$$   MCWRK
$$ # 109 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/hsqcedetgpsisp2.3"
$$ exit
$$    
$$ 
$$ ph1=0 
$$ ph2=1
$$ ph3=0 2
$$ ph4=0 0 2 2
$$ ph5=3 3 1 1
$$ ph6=0
$$ ph7=0 0 2 2
$$ ph31=2 0 0 2
$$   
$$ 
$$ ;pl0 : 120dB
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;pl2 : f2 channel - power level for pulse (default)
$$ ;pl12: f2 channel - power level for CPD/BB decoupling
$$ ;sp3: f2 channel - shaped pulse (180degree inversion)
$$ ;spnam3: Crp60,0.5,20.1
$$ ;sp7: f2 channel - shaped pulse (180degree refocussing)
$$ ;spnam7: Crp60comp.4
$$ ;sp18: f2 channel - shaped pulse 180 degree (adiabatic matched sweep)
$$ ;spnam18: Crp60_xfilt.2
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;p2 : f1 channel - 180 degree high power pulse
$$ ;p3 : f2 channel -  90 degree high power pulse
$$ ;p14: f2 channel - 180 degree shaped pulse for inversion
$$ ;     = 500usec for Crp60,0.5,20.1
$$ ;p16: homospoil/gradient pulse
$$ ;p19: gradient pulse 2                                 [500 usec]
$$ ;p24: f2 channel - 180 degree shaped pulse for refocussing
$$ ;     = 2msec for Crp60comp.4
$$ ;p28: f1 channel - trim pulse
$$ ;p31: f2 channel - 180 degree shaped pulse for adiabatic matched sweep
$$ ;                      1730 us at 600.13 MHz, otherwise: 1730*sqrt(600/x)
$$ ;d0 : incremented delay (2D)                           [3 usec]
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;d4 : 1/(4J)XH
$$ ;d11: delay for disk I/O                               [30 msec]
$$ ;d16: delay for homospoil/gradient recovery
$$ ;d21: set d21 according to multiplicity selection
$$ ;        1/(2J(XH))  XH, XH3 positive, XH2 negative
$$ ;d24: 1/(8J)XH for all multiplicities
$$ ;     1/(4J)XH for XH
$$ ;cnst2: = J(XH)
$$ ;cnst17: = -0.5 for Crp60comp.4
$$ ;inf1: 1/SW(X) = 2 * DW(X)
$$ ;in0: 1/(2 * SW(X)) = DW(X)
$$ ;nd0: 2
$$ ;NS: 1 * n
$$ ;DS: >= 16
$$ ;td1: number of experiments
$$ ;FnMODE: echo-antiecho
$$ ;cpd2: decoupling according to sequence defined by cpdprg2
$$ ;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
$$ 
$$ 
$$ ;use gradient ratio:	gp 1 : gp 2 : gp 3 : gp 4
$$ ;			  80 : 20.1 :   11 :   -5    for C-13
$$ ;			  80 :  8.1 :   11 :   -5    for N-15
$$ 
$$ ;for z-only gradients:
$$ ;gpz1: 80%
$$ ;gpz2: 20.1% for C-13, 8.1% for N-15
$$ ;gpz3: 11%
$$ ;gpz4: -5%
$$ 
$$ ;use gradient files:   
$$ ;gpnam1: SINE.100
$$ ;gpnam2: SINE.100
$$ ;gpnam3: SINE.100
$$ ;gpnam4: SINE.100
$$ 
$$ 
$$ ;cnst17: Factor to compensate for coupling evolution during a pulse
$$ ;       (usually +1). A positive factor indicates that coupling 
$$ ;       evolution continues during the pulse, whereas a negative 
$$ ;       factor is necessary if the coupling is (partially) refocussed.
$$ 
$$ 
$$ 
$$ ;$Id: hsqcedetgpsisp2.3,v 1.4.2.2 2010/03/30 11:51:22 ber Exp $
$$ 
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/pdata/1/title, 0)
$$ echo/antiecho edited HSQC w/sensitivity improvement  w/adiabatic bilevel decoupling w/adiabatic refocussing
$$ (w/ gradients in back-INEPT w/matched adiabatic sweep)
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/HSQC.fid/uxnmr.par, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/NOESY.fid
1H spectrum
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	35
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	PAGE
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/NOESY.fid
1H spectrum
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##DATA TYPE=	LINK
##BLOCK_ID=	36
##BLOCKS=	1    
##ORIGIN=	Mestrelab Research S.L.
##OWNER=	benledingham
##$MNOVA/LINK_BLOCK_TYPE=	ITEM	$$ NMR Spectrum
##$MNOVA/ITEM/POLYGON=	(XY..XY)
5321,5835
8722,5835
8722,8208
5321,8208
5321,5835
##$MNOVA/ITEM/Z=	0
##$MNOVA/ITEM/ANGLE=	0
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
##TITLE=	Granaticin_D/NOESY.fid
##JCAMP-DX=	6.0	$$ MestReNova 14.1.2-25024
##BLOCK_ID=	37
##DATA TYPE=	nD NMR SPECTRUM
##DATA CLASS=	NTUPLES
##NUMDIM=	2
##ORIGIN=	Bruker BioSpin GmbH
##OWNER=	rsamples
##.OBSERVE FREQUENCY=	500.13275071499998603
##.OBSERVE NUCLEUS=	^1H
##.SOLVENT NAME=	MeOD
##.PULSE SEQUENCE=	noesygpphpp
##LONGDATE=	2021/09/05 12:25:16.000
##.ACQUISITIONMODE=	SIMULTANEOUS (DQD)
##$ORIGINAL FORMAT=	Bruker XWIN-NMR
##$MNOVA/SCALES_VERSION=	9
##$PARAMETER FILE=	(acqu2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/acqu2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 129	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 09:10:34.758 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/acqu2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/go
$$ ##$BF1= 500.13
$$ ##$FnMODE= 5
$$ ##$NUC1= <1H>
$$ ##$O1= 2750.715
$$ ##$SFO1= 500.132750715
$$ ##$SW= 12
$$ ##$SW_h= 6001.59300858
$$ ##$TD= 128
$$ ##END=
$$ 
##$PARAMETER FILE=	(acqus, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/acqus, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 12	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 09:10:38.400 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/acqus
$$ $$ process /opt/topspin2.1pl8/prog/mod/shimcntl
$$ ##$ACQT0= -6.36618283677107
$$ ##$AMP= (0..31)
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ 100 100 100 100 100 100 100 100 100 100 100 100 100 100
$$ ##$ANAVPT= -1
$$ ##$AQSEQ= 0
$$ ##$AQ_mod= 3
$$ ##$AUNM= <au_getlcosy>
$$ ##$AUTOPOS= <>
$$ ##$BF1= 500.13
$$ ##$BF2= 500.13
$$ ##$BF3= 500.13
$$ ##$BF4= 500.13
$$ ##$BF5= 500.13
$$ ##$BF6= 500.13
$$ ##$BF7= 500.13
$$ ##$BF8= 500.13
$$ ##$BYTORDA= 1
$$ ##$CFDGTYP= 2
$$ ##$CFRGTYP= 5
$$ ##$CHEMSTR= <none>
$$ ##$CNST= (0..63)
$$ 1 1 145 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$CPDPRG= <>
$$ ##$CPDPRG1= <>
$$ ##$CPDPRG2= <>
$$ ##$CPDPRG3= <>
$$ ##$CPDPRG4= <mlev>
$$ ##$CPDPRG5= <mlev>
$$ ##$CPDPRG6= <mlev>
$$ ##$CPDPRG7= <mlev>
$$ ##$CPDPRG8= <mlev>
$$ ##$CPDPRGB= <>
$$ ##$CPDPRGT= <>
$$ ##$D= (0..63)
$$ 7.057885e-05 1.5 0 0 0 0 0 0 0.8 0 0 0.03 2e-05 3e-06 0 0 0.0001 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0
$$ ##$DATE= 1630869916
$$ ##$DBL= (0..7)
$$ 120 120 120 120 120 120 120 120
$$ ##$DBP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DBP07= 0
$$ ##$DBPNAM0= <>
$$ ##$DBPNAM1= <>
$$ ##$DBPNAM2= <>
$$ ##$DBPNAM3= <>
$$ ##$DBPNAM4= <>
$$ ##$DBPNAM5= <>
$$ ##$DBPNAM6= <>
$$ ##$DBPNAM7= <>
$$ ##$DBPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DBPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DE= 6.5
$$ ##$DECBNUC= <off>
$$ ##$DECIM= 32
$$ ##$DECNUC= <off>
$$ ##$DECSTAT= 4
$$ ##$DIGMOD= 1
$$ ##$DIGTYP= 8
$$ ##$DL= (0..7)
$$ 0 120 120 120 120 120 120 120
$$ ##$DP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$DP07= 0
$$ ##$DPNAME0= <>
$$ ##$DPNAME1= <>
$$ ##$DPNAME2= <>
$$ ##$DPNAME3= <>
$$ ##$DPNAME4= <>
$$ ##$DPNAME5= <>
$$ ##$DPNAME6= <>
$$ ##$DPNAME7= <>
$$ ##$DPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$DPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$DQDMODE= 0
$$ ##$DR= 18
$$ ##$DS= 16
$$ ##$DSLIST= <SSSSSSSSSSSSSSS>
$$ ##$DSPFIRM= 0
$$ ##$DSPFVS= 12
$$ ##$DTYPA= 0
$$ ##$EXP= </opt/topspin2.1pl8/exp/stan/nmr>
$$ ##$F1LIST= <111111111111111>
$$ ##$F2LIST= <222222222222222>
$$ ##$F3LIST= <333333333333333>
$$ ##$FCUCHAN= (0..9)
$$ 0 2 0 0 0 0 0 0 0 0
$$ ##$FL1= 83
$$ ##$FL2= 83
$$ ##$FL3= 83
$$ ##$FL4= 83
$$ ##$FOV= 20
$$ ##$FQ1LIST= <freqlist>
$$ ##$FQ2LIST= <freqlist>
$$ ##$FQ3LIST= <freqlist>
$$ ##$FQ4LIST= <freqlist>
$$ ##$FQ5LIST= <freqlist>
$$ ##$FQ6LIST= <freqlist>
$$ ##$FQ7LIST= <freqlist>
$$ ##$FQ8LIST= <freqlist>
$$ ##$FRQLO3= 1887019.23076923
$$ ##$FRQLO3N= 0
$$ ##$FS= (0..7)
$$ 83 83 83 83 83 83 83 83
$$ ##$FTLPGN= 0
$$ ##$FW= 125000
$$ ##$FnMODE= 0
$$ ##$FnTYPE= 0
$$ ##$GP031= 0
$$ ##$GPNAM0= <SINE.100>
$$ ##$GPNAM1= <SINE.100>
$$ ##$GPNAM10= <SINE.100>
$$ ##$GPNAM11= <SINE.100>
$$ ##$GPNAM12= <SINE.100>
$$ ##$GPNAM13= <SINE.100>
$$ ##$GPNAM14= <SINE.100>
$$ ##$GPNAM15= <SINE.100>
$$ ##$GPNAM16= <SINE.100>
$$ ##$GPNAM17= <SINE.100>
$$ ##$GPNAM18= <SINE.100>
$$ ##$GPNAM19= <SINE.100>
$$ ##$GPNAM2= <SINE.100>
$$ ##$GPNAM20= <SINE.100>
$$ ##$GPNAM21= <SINE.100>
$$ ##$GPNAM22= <SINE.100>
$$ ##$GPNAM23= <SINE.100>
$$ ##$GPNAM24= <SINE.100>
$$ ##$GPNAM25= <SINE.100>
$$ ##$GPNAM26= <SINE.100>
$$ ##$GPNAM27= <SINE.100>
$$ ##$GPNAM28= <SINE.100>
$$ ##$GPNAM29= <SINE.100>
$$ ##$GPNAM3= <SINE.100>
$$ ##$GPNAM30= <SINE.100>
$$ ##$GPNAM31= <SINE.100>
$$ ##$GPNAM4= <SINE.100>
$$ ##$GPNAM5= <SINE.100>
$$ ##$GPNAM6= <SINE.100>
$$ ##$GPNAM7= <SINE.100>
$$ ##$GPNAM8= <SINE.100>
$$ ##$GPNAM9= <SINE.100>
$$ ##$GPX= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPY= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GPZ= (0..31)
$$ 0 40 -40 20 10 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$GRDPROG= <grad_out>
$$ ##$GRPDLY= -1
$$ ##$HDDUTY= 20
$$ ##$HDRATE= 20
$$ ##$HGAIN= (0..3)
$$ 0 0 0 0
$$ ##$HL1= 256
$$ ##$HL2= 55
$$ ##$HL3= 83
$$ ##$HL4= 83
$$ ##$HOLDER= 0
$$ ##$HPMOD= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$HPPRGN= 0
$$ ##$IN= (0..63)
$$ 0.0001666 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001 0.001
$$ 0.001 0.001 0.001 0.001
$$ ##$INF= (0..7)
$$ 0 166.622428173716 0 0 0 0 0 0
$$ ##$INP= (0..63)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$INSTRUM= <spect>
$$ ##$L= (0..31)
$$ 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1
$$ ##$LFILTER= 100
$$ ##$LGAIN= -5
$$ ##$LINPSTP= 10
$$ ##$LOCKED= yes
$$ ##$LOCKFLD= 5288
$$ ##$LOCKGN= 126.199996948242
$$ ##$LOCKPOW= -35
$$ ##$LOCKPPM= 3.29999995231628
$$ ##$LOCNUC= <2H>
$$ ##$LOCPHAS= 143.4
$$ ##$LOCSHFT= yes
$$ ##$LOCSW= 0
$$ ##$LTIME= 0.100000001490116
$$ ##$MASR= 4200
$$ ##$MASRLST= <masrlst>
$$ ##$NBL= 1
$$ ##$NC= -2
$$ ##$NLOGCH= 1
$$ ##$NS= 200
$$ ##$NUC1= <1H>
$$ ##$NUC2= <off>
$$ ##$NUC3= <off>
$$ ##$NUC4= <off>
$$ ##$NUC5= <off>
$$ ##$NUC6= <off>
$$ ##$NUC7= <off>
$$ ##$NUC8= <off>
$$ ##$NUCLEI= 0
$$ ##$NUCLEUS= <off>
$$ ##$O1= 2750.715
$$ ##$O2= 2302.1734813824
$$ ##$O3= 2302.1734813824
$$ ##$O4= 2302.1734813824
$$ ##$O5= 2302.1734813824
$$ ##$O6= 2302.1734813824
$$ ##$O7= 2302.1734813824
$$ ##$O8= 2302.1734813824
$$ ##$OBSCHAN= (0..9)
$$ 0 0 0 0 0 0 0 0 0 0
$$ ##$OVERFLW= 0
$$ ##$P= (0..63)
$$ 10 10 20 0 0 19.8 30 60 20000 0 0 80000 80000 0 0 0 1000 2500 10000 600
$$ 2500 0 0 0 0 250 0 10 2000 1200 0 0 20000 0 0 0 0 0 0 0 2400 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PACOIL= (0..15)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PAPS= 2
$$ ##$PARMODE= 1
$$ ##$PCPD= (0..9)
$$ 100 60 100 100 100 100 100 100 100 100
$$ ##$PHCOR= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$PHLIST= <>
$$ ##$PHP= 1
$$ ##$PH_ref= 0
$$ ##$PL= (0..63)
$$ 120 -2.5 120 120 120 120 120 120 120 50 7.04 19.44 120 120 120 120 120
$$ 120 -2.5 13.06 120 120 120 120 120 120 120 19.44 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120 120
$$ 120 120 120 120 120 120 120 120 120 120 120 120
$$ ##$PLSTEP= 0.1
$$ ##$PLSTRT= -6
$$ ##$POWMOD= 0
$$ ##$PQPHASE= 0
$$ ##$PQSCALE= 0
$$ ##$PR= 1
$$ ##$PRECHAN= (0..15)
$$ -1 1 -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$PRGAIN= 0
$$ ##$PROBHD= <5 mm PABBO BB-1H/D Z-GRD Z113652/0192
$$ >
$$ ##$PROSOL= no
$$ ##$PULPROG= <noesygpphpp>
$$ ##$PW= 0
$$ ##$PYNM= <acqu.py>
$$ ##$QNP= 1
$$ ##$RD= 0
$$ ##$RECCHAN= (0..15)
$$ 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RECPH= 0
$$ ##$RECPRE= (0..15)
$$ -1 0 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECPRFX= (0..15)
$$ -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1 -1
$$ ##$RECSEL= (0..15)
$$ 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$RG= 256
$$ ##$RO= 0
$$ ##$ROUTWD1= (0..23)
$$ 0 128 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 1 1 0 0
$$ ##$ROUTWD2= (0..23)
$$ 0 0 0 0 0 1 0 0 0 0 0 0 0 0 0 0 0 0 1 0 1 1 0 0
$$ ##$RSEL= (0..9)
$$ 0 0 2 0 0 0 0 0 0 0
$$ ##$S= (0..7)
$$ 83 19 19 83 83 83 83 83
$$ ##$SEOUT= 0
$$ ##$SFO1= 500.132750715
$$ ##$SFO2= 500.132302173481
$$ ##$SFO3= 500.132302173481
$$ ##$SFO4= 500.132302173481
$$ ##$SFO5= 500.132302173481
$$ ##$SFO6= 500.132302173481
$$ ##$SFO7= 500.132302173481
$$ ##$SFO8= 500.132302173481
$$ ##$SOLVENT= <MeOD>
$$ ##$SP= (0..31)
$$ 1 67.85 61.83 120 120 0 57.5 120 120 0 34.48 34.48 0 0 120 0 150 150 120
$$ 59.79 57.88 61.19 53.87 150 150 150 150 150 150 21.68 150 120
$$ ##$SP07= 0
$$ ##$SPECTR= 0
$$ ##$SPNAM0= <gauss>
$$ ##$SPNAM1= <Gaus1.1000>
$$ ##$SPNAM10= <Sinc1.1000>
$$ ##$SPNAM11= <Sinc1.1000>
$$ ##$SPNAM12= <gauss>
$$ ##$SPNAM13= <gauss>
$$ ##$SPNAM14= <>
$$ ##$SPNAM15= <>
$$ ##$SPNAM16= <gauss>
$$ ##$SPNAM17= <gauss>
$$ ##$SPNAM18= <>
$$ ##$SPNAM19= <Sinc1.1000>
$$ ##$SPNAM2= <Gaus1_180r.1000>
$$ ##$SPNAM20= <Sinc1.1000>
$$ ##$SPNAM21= <Sinc1.1000>
$$ ##$SPNAM22= <Sinc1.1000>
$$ ##$SPNAM23= <gauss>
$$ ##$SPNAM24= <gauss>
$$ ##$SPNAM25= <gauss>
$$ ##$SPNAM26= <gauss>
$$ ##$SPNAM27= <gauss>
$$ ##$SPNAM28= <gauss>
$$ ##$SPNAM29= <Crp60,20,20.10>
$$ ##$SPNAM3= <>
$$ ##$SPNAM30= <gauss>
$$ ##$SPNAM31= <>
$$ ##$SPNAM4= <>
$$ ##$SPNAM5= <gauss>
$$ ##$SPNAM6= <Squa100.1000>
$$ ##$SPNAM7= <>
$$ ##$SPNAM8= < >
$$ ##$SPNAM9= <gauss>
$$ ##$SPOAL= (0..31)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$SPOFFS= (0..31)
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ ##$SUBNAM0= <"">
$$ ##$SUBNAM1= <"">
$$ ##$SUBNAM2= <"">
$$ ##$SUBNAM3= <"">
$$ ##$SUBNAM4= <"">
$$ ##$SUBNAM5= <"">
$$ ##$SUBNAM6= <"">
$$ ##$SUBNAM7= <"">
$$ ##$SUBNAM8= <"">
$$ ##$SUBNAM9= <"">
$$ ##$SW= 12.0160404932969
$$ ##$SWIBOX= (0..15)
$$ 0 0 3 0 4 0 6 0 0 0 0 0 0 0 0 0
$$ ##$SW_h= 6009.61538461538
$$ ##$SWfinal= 0
$$ ##$TD= 2048
$$ ##$TD0= 1
$$ ##$TE= 294.9
$$ ##$TE2= 300
$$ ##$TE3= 300
$$ ##$TEG= 300
$$ ##$TL= (0..7)
$$ 0 120 120 120 120 120 120 120
$$ ##$TP= (0..7)
$$ 150 150 150 150 150 150 150 150
$$ ##$TP07= 0
$$ ##$TPNAME0= <>
$$ ##$TPNAME1= <>
$$ ##$TPNAME2= <>
$$ ##$TPNAME3= <jhjj>
$$ ##$TPNAME4= <>
$$ ##$TPNAME5= <>
$$ ##$TPNAME6= <>
$$ ##$TPNAME7= <>
$$ ##$TPOAL= (0..7)
$$ 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5
$$ ##$TPOFFS= (0..7)
$$ 0 0 0 0 0 0 0 0
$$ ##$TUNHIN= 0
$$ ##$TUNHOUT= 0
$$ ##$TUNXOUT= 0
$$ ##$USERA1= <user>
$$ ##$USERA2= <user>
$$ ##$USERA3= <user>
$$ ##$USERA4= <user>
$$ ##$USERA5= <user>
$$ ##$V9= 5
$$ ##$VALIST= <valist>
$$ ##$VCLIST= <CCCCCCCCCCCCCCC>
$$ ##$VD= 0
$$ ##$VDLIST= <DDDDDDDDDDDDDDD>
$$ ##$VPLIST= <PPPPPPPPPPPPPPP>
$$ ##$VTLIST= <TTTTTTTTTTTTTTT>
$$ ##$WBST= 1024
$$ ##$WBSW= 4
$$ ##$XGAIN= (0..3)
$$ 0 0 0 0
$$ ##$XL= 0
$$ ##$YL= 0
$$ ##$YMAX_a= 846503
$$ ##$YMIN_a= -806359
$$ ##$ZGOPTNS= <>
$$ ##$ZL1= 120
$$ ##$ZL2= 120
$$ ##$ZL3= 120
$$ ##$ZL4= 120
$$ ##END=
$$ 
##$PARAMETER FILE=	(audita.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/audita.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/audita.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-06 09:10:34.850 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-05 15:16:12.161 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 2K * 128
$$        DC 12 1A 84 92 46 89 71 FE 6F 12 57 1C F6 58 A3>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ 29 61 E8 C7 A8 DA 36 8A B6 2F A8 46 4B 7C 1F 81
$$ 
##$PARAMETER FILE=	(auditp.txt, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pdata/1/auditp.txt, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Audit trail, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.01
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/pdata/1/auditp.txt
$$ ##AUDIT TRAIL=  $$ (NUMBER, WHEN, WHO, WHERE, PROCESS, VERSION, WHAT)
$$ (   1,<2021-09-06 09:10:34.850 -0400>,<rsamples>,<AV500>,<go>,<TOPSPIN 2.1>,
$$       <created by zg
$$ 	started at 2021-09-05 15:16:12.161 -0400,
$$ 	POWCHK enabled, PULCHK disabled,
$$        configuration hash MD5:
$$        FD D2 2E 16 3F 13 2D E2 DD 83 6D E8 4C 8D D9 C7
$$        data hash MD5: 2K * 128
$$        DC 12 1A 84 92 46 89 71 FE 6F 12 57 1C F6 58 A3>)
$$ (   2,<2021-09-06 09:14:39.376 -0400>,<rsamples>,<AV500>,<proc2d>,<TOPSPIN 2.1>,
$$       <Start of raw data processing
$$        xfb F2: SI = 1K WDW = 4 SSB = 2 FT_mod = 6 PKNL = 1 PHC0 = 84.59727 PHC1 = -10.6 F1: SI = 1K ME_mod = 2 NCOEF = 8 WDW = 4 SSB = 2 FT_mod = 4 PHC0 = 90 PHC1 = -180
$$        data hash MD5: 1K * 1K
$$        EA 60 2A 97 DD BE 27 F9 F1 45 D4 9B 59 C2 8E 6B>)
$$ ##END=
$$ 
$$ $$ hash MD5
$$ $$ EA 63 62 41 42 2F E5 FE AB 42 2C 0D B0 C8 4A B3
$$ 
##$PARAMETER FILE=	(clevels, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pdata/1/clevels, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 8	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 09:14:39.401 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/pdata/1/clevels
$$ $$ process /opt/topspin2.1pl8/prog/mod/dataserver
$$ ##$LEVELS= (0..255)
$$ -10485125.1560448 -5825069.531136 -3236149.73952 -1797860.9664 -998811.648
$$ -554895.36 -308275.2 -171264 171264 308275.2 554895.36 998811.648 1797860.9664
$$ 3236149.73952 5825069.531136 10485125.1560448 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0
$$ 0 0 0 0 0 0 0 0 0 0 0
$$ ##$LEVSIGN= 3
$$ ##$MAXLEV= 8
$$ ##$METHOD= 0
$$ ##$NEGBASE= -171264
$$ ##$NEGINCR= 1.8
$$ ##$POSBASE= 171264
$$ ##$POSINCR= 1.8
$$ ##END=
$$ 
##$PARAMETER FILE=	(datafile, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/ser, 0)
$$ 
##$PARAMETER FILE=	(format.temp, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/format.temp, 0)
$$ EDIT_PAR COMMAND FILE
$$ 
$$ DI_MODE         LONG
$$ ED_ENTRY        ACQU
$$ ORDER           FILE
$$ 
$$ 
$$ HEADER		"F2 - Acquisition Parameters"
$$ T_NAME		Date_
$$ 		TYPE	R64
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 50000000
$$ 		REL	"Date_=itodate(DATE)"
$$ 		INV_REL	"DATE=datetoi(Date_,DATE)"
$$ 		FORMAT	"%14.0f"
$$ 		TEXT	" "
$$ END
$$ T_NAME		Time
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"Time=itotime(DATE)"
$$ 		INV_REL	"DATE=timetoi(Time,DATE)"
$$ 		FORMAT	"%14.2f"
$$ 		TEXT	" "
$$ END
$$ NAME		INSTRUM
$$ 		TEXT	" "
$$ END
$$ NAME		PROBHD
$$ 		FORMAT	"%14.14s"
$$ 		TEXT	" "
$$ END
$$ NAME		PULPROG
$$ 		TEXT	" "
$$ END
$$ NAME		TD
$$ 		TEXT	" "
$$ END
$$ NAME		SOLVENT
$$ 		TEXT	" "
$$ END
$$ NAME		NS
$$ 		TEXT	" "
$$ END
$$ NAME		DS
$$ 		TEXT	" "
$$ END
$$ T_NAME		SWH
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e8
$$ 		REL	"SWH=SW*SFO1"
$$ 		INV_REL "SW=SWH/SFO1"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.3f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          FIDRES
$$                 TYPE    R32
$$                 CLASS   ACQU
$$                 SUBRANGE 0.0 100000
$$                 REL     "FIDRES=SW*SFO1/TD"
$$                 INV_REL "TD = nextpow(SW*SFO1/FIDRES)"
$$ 		UNIT	"Hz"
$$ 		FORMAT	"%14.6f Hz"
$$ 		TEXT	" "
$$ END
$$ T_NAME          AQ
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000
$$ 		REL	"AQ=aqcalc(SW,SFO1,TD,DIGTYP)"
$$ 		INV_REL	"TD=tdcalc(SW,SFO1,1.0e6*AQ,DIGTYP)"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.7f sec"
$$ 		TEXT	" "
$$ END
$$ NAME		RG
$$ 		TEXT	" "
$$ END
$$ T_NAME          DW
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1000000
$$ 		REL	"DW=1/(2*SW*SFO1)"
$$ 		INV_REL	"SW=1000000/(2*(0.005+DW)*SFO1)"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.3lf usec"
$$ 		TEXT	" "
$$ END
$$ NAME		DE
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ NAME		TE
$$ 		FORMAT	"%14.1f K"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D0=D[0]"
$$ 		INV_REL	"D[0]=D0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D1=D[1]"
$$ 		INV_REL	"D[1]=D1"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D8
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D8=D[8]"
$$ 		INV_REL	"D[8]=D8"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D11
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D11=D[11]"
$$ 		INV_REL	"D[11]=D11"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D12
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D12=D[12]"
$$ 		INV_REL	"D[12]=D12"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		D16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"D16=D[16]"
$$ 		INV_REL	"D[16]=D16"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		IN0
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1e38
$$ 		REL	"IN0=IN[0]"
$$ 		INV_REL	"IN[0]=IN0"
$$ 		UNIT	"sec"
$$ 		FORMAT	"%14.8f sec"
$$ 		TEXT	" "
$$ END
$$ HEADER		"======== CHANNEL f1 ========"
$$ NAME		NUC1
$$ 		NONEDIT
$$ 		TEXT	" "
$$ END
$$ T_NAME		P1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P1=P[1]"
$$ 		INV_REL	"P[1]=P1"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P2=P[2]"
$$ 		INV_REL	"P[2]=P2"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P17
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P17=P[17]"
$$ 		INV_REL	"P[17]=P17"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1=PL[1]"
$$ 		INV_REL	"PL[1]=PL1"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10=PL[10]"
$$ 		INV_REL	"PL[10]=PL10"
$$ 		UNIT	"dB"
$$ 		FORMAT	"%14.2f dB"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL1W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL1W=45.4*pow(10.0,(-6-PL[1])/10.0)"
$$ 		INV_REL	"PL[1]=-6-4.3425*log(PL1W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ T_NAME		PL10W
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -6.0 1e38
$$ 		REL	"PL10W=45.4*pow(10.0,(-6-PL[10])/10.0)"
$$ 		INV_REL	"PL[10]=-6-4.3425*log(PL10W/45.4)"
$$ 		UNIT	"no"
$$ 		FORMAT	"%14.8f W"
$$ 		TEXT	" "
$$ END
$$ NAME		SFO1
$$ 		FORMAT	"%14.7f MHz"
$$ 		TEXT	" "
$$ END
$$ HEADER		"====== GRADIENT CHANNEL ====="
$$ NAME		GPNAM1
$$ 		TEXT	" "
$$ END
$$ NAME		GPNAM2
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ1
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ1=GPZ[1]"
$$ 		INV_REL	"GPZ[1]=GPZ1"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		GPZ2
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE -100.0 100.0
$$ 		REL	"GPZ2=GPZ[2]"
$$ 		INV_REL	"GPZ[2]=GPZ2"
$$ 		UNIT	"%"
$$ 		FORMAT	"%14.2f %"
$$ 		TEXT	" "
$$ END
$$ T_NAME		P16
$$ 		TYPE	R32
$$ 		CLASS	ACQU
$$ 		SUBRANGE 0.0 1.0e10
$$ 		REL	"P16=P[16]"
$$ 		INV_REL	"P[16]=P16"
$$ 		UNIT	"usec"
$$ 		FORMAT	"%14.2f usec"
$$ 		TEXT	" "
$$ END
$$ 
##$PARAMETER FILE=	(proc2s, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pdata/1/proc2s, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 2	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 09:14:39.376 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/pdata/1/proc2s
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <        >
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F1>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 9.8000005086263
$$ ##$F2P= -0.199999491373698
$$ ##$FCOR= 1
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 4
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 0
$$ ##$LPBIN= 256
$$ ##$MAXI= 10000
$$ ##$MC2= 4
$$ ##$MEAN= 0
$$ ##$ME_mod= 2
$$ ##$MI= 1
$$ ##$NCOEF= 8
$$ ##$NC_proc= 3
$$ ##$NLEV= 6
$$ ##$NOISF1= 0
$$ ##$NOISF2= 0
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 11.50003
$$ ##$PC= 4
$$ ##$PHC0= 90
$$ ##$PHC1= -180
$$ ##$PH_mod= 1
$$ ##$PKNL= no
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 1
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.13
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 1024
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <RRRRRRRR>
$$ ##$SSB= 2
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 6001.59300858
$$ ##$SYMM= 0
$$ ##$S_DEV= 1338
$$ ##$TDeff= 256
$$ ##$TDoff= 0
$$ ##$TI= <        >
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 0
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 4
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 202816396
$$ ##$YMIN_p= -25249015
$$ ##END=
$$ 
##$PARAMETER FILE=	(procs, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pdata/1/procs, 0)
SECTION BREAK -----------------------------------------------------------------------------------------------------------------
$$ ##TITLE= Parameter file, TOPSPIN		Version 2.1
$$ ##JCAMPDX= 5.0
$$ ##DATATYPE= Parameter Values
$$ ##NPOINTS= 2	$$ modification sequence number
$$ ##ORIGIN= Bruker BioSpin GmbH
$$ ##OWNER= rsamples
$$ $$ 2021-09-06 09:14:39.376 -0400  rsamples@AV500
$$ $$ /opt/nmrdata/data/rsamples/nmr/210904_ MB1136D2D20B_NOESY_MeOD/2/pdata/1/procs
$$ $$ process /opt/topspin2.1pl8/prog/mod/proc2d
$$ ##$ABSF1= 0
$$ ##$ABSF2= 0
$$ ##$ABSG= 0
$$ ##$ABSL= 0
$$ ##$ALPHA= 0
$$ ##$AQORDER= 0
$$ ##$ASSFAC= 0
$$ ##$ASSFACI= 0
$$ ##$ASSFACX= 0
$$ ##$ASSWID= 0
$$ ##$AUNMP= <proc_2dhom>
$$ ##$AXLEFT= 0
$$ ##$AXNAME= <F2>
$$ ##$AXNUC= <1H>
$$ ##$AXRIGHT= 0
$$ ##$AXTYPE= 0
$$ ##$AXUNIT= <>
$$ ##$AZFE= 0.1
$$ ##$AZFW= 0.5
$$ ##$BCFW= 0
$$ ##$BC_mod= 0
$$ ##$BYTORDP= 0
$$ ##$COROFFS= 0
$$ ##$CY= -3
$$ ##$DATMOD= 1
$$ ##$DC= 0
$$ ##$DFILT= <>
$$ ##$DTYPP= 0
$$ ##$F1P= 9.8000005086263
$$ ##$F2P= -0.199999491373698
$$ ##$FCOR= 0.5
$$ ##$FTSIZE= 1024
$$ ##$FT_mod= 6
$$ ##$GAMMA= 0
$$ ##$GB= 0
$$ ##$INTBC= 1
$$ ##$INTSCL= 1
$$ ##$ISEN= 128
$$ ##$LB= 0
$$ ##$LEV0= 35
$$ ##$LPBIN= 0
$$ ##$MAXI= 10000
$$ ##$MC2= 0
$$ ##$MEAN= 0
$$ ##$ME_mod= 0
$$ ##$MI= 0
$$ ##$NCOEF= 0
$$ ##$NC_proc= 3
$$ ##$NLEV= 6
$$ ##$NOISF1= 0.15
$$ ##$NOISF2= 0.1
$$ ##$NSP= 0
$$ ##$NTH_PI= 0
$$ ##$NZP= 0
$$ ##$OFFSET= 11.50805
$$ ##$PC= 1
$$ ##$PHC0= 84.59727
$$ ##$PHC1= -10.6
$$ ##$PH_mod= 1
$$ ##$PKNL= yes
$$ ##$PPARMOD= 1
$$ ##$PPDIAG= 0
$$ ##$PPIPTYP= 0
$$ ##$PPMPNUM= 2147483647
$$ ##$PPRESOL= 1
$$ ##$PSCAL= 0
$$ ##$PSIGN= 0
$$ ##$PYNMP= <proc.py>
$$ ##$REVERSE= no
$$ ##$SF= 500.13
$$ ##$SI= 1024
$$ ##$SIGF1= 0
$$ ##$SIGF2= 0
$$ ##$SINO= 16
$$ ##$SIOLD= 1024
$$ ##$SPECTYP= <>
$$ ##$SREGLST= <RRRRRRRRRRRRRRR>
$$ ##$SSB= 2
$$ ##$STSI= 1024
$$ ##$STSR= 0
$$ ##$SW_p= 6009.6153846154
$$ ##$SYMM= 0
$$ ##$S_DEV= 1338
$$ ##$TDeff= 2048
$$ ##$TDoff= 0
$$ ##$TI= <>
$$ ##$TILT= no
$$ ##$TM1= 0
$$ ##$TM2= 0
$$ ##$TOPLEV= 100
$$ ##$USERP1= <user>
$$ ##$USERP2= <user>
$$ ##$USERP3= <user>
$$ ##$USERP4= <user>
$$ ##$USERP5= <user>
$$ ##$WDW= 4
$$ ##$XDIM= 1024
$$ ##$YMAX_p= 202816396
$$ ##$YMIN_p= -25249015
$$ ##END=
$$ 
##$PARAMETER FILE=	(pulseprogram, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pulseprogram, 0)
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp"
$$ ;noesygpphpp
$$ ;avance-version (07/04/04)
$$ ;2D homonuclear correlation via dipolar coupling 
$$ ;dipolar coupling may be due to noe or chemical exchange.
$$ ;phase sensitive
$$ ;with gradient pulses in mixing time
$$ ;using purge pulses before d1
$$ ;
$$ ;J. Jeener, B.H. Meier, P. Bachmann & R.R. Ernst, J. Chem. Phys. 71,
$$ ;   4546-4553 (1979)
$$ ;R. Wagner & S. Berger, J. Magn. Reson. 123 A, 119-121 (1996)
$$ ;
$$ ;$CLASS=HighRes
$$ ;$DIM=2D
$$ ;$TYPE=
$$ ;$SUBTYPE=
$$ ;$COMMENT=
$$ 
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Avance.incl" 1
$$ ;Avance2.incl
$$ ;   for 1
$$ ;
$$ ;avance-version (09/07/02)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ ;$Id: Avance2.incl,v 1.17.2.2 2009/11/18 11:19:58 ber Exp $
$$ # 20 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Grad.incl" 1
$$ ;Grad2.incl  -  include file for Gradient Spectroscopy
$$ ;   for 1
$$ ;
$$ ;avance-version (07/01/17)
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ 
$$ define list<gradient> EA=<EA>
$$ 
$$ 
$$ 
$$ ;$Id: Grad2.incl,v 1.12 2007/01/22 14:22:35 ber Exp $
$$ # 21 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp" 2
$$ 
$$ # 1 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/Delay.incl" 1
$$ ;Delay.incl  -  include file for commonly used delays
$$ ;
$$ ;version 00/02/07
$$ ;
$$ ;$CLASS=HighRes Incl
$$ ;$COMMENT=
$$ 
$$ 
$$ ;general delays
$$ 
$$ define delay DELTA
$$ define delay DELTA1
$$ define delay DELTA2
$$ define delay DELTA3
$$ define delay DELTA4
$$ define delay DELTA5
$$ define delay DELTA6
$$ define delay DELTA7
$$ define delay DELTA8
$$ 
$$ define delay TAU
$$ define delay TAU1
$$ define delay TAU2
$$ define delay TAU3
$$ define delay TAU4
$$ define delay TAU5
$$ 
$$ 
$$ ;delays for centering pulses
$$ 
$$ define delay CEN_HN1
$$ define delay CEN_HN2
$$ define delay CEN_HN3
$$ define delay CEN_HC1
$$ define delay CEN_HC2
$$ define delay CEN_HC3
$$ define delay CEN_HC4
$$ define delay CEN_HP1
$$ define delay CEN_HP2
$$ define delay CEN_CN1
$$ define delay CEN_CN2
$$ define delay CEN_CN3
$$ define delay CEN_CN4
$$ define delay CEN_CP1
$$ define delay CEN_CP2
$$ 
$$ 
$$ ;loop counters
$$ 
$$ define loopcounter COUNTER
$$ define loopcounter SCALEF
$$ define loopcounter FACTOR1
$$ define loopcounter FACTOR2
$$ define loopcounter FACTOR3
$$ 
$$ 
$$ 
$$ ;$Id: Delay.incl,v 1.12 2005/11/10 12:16:58 ber Exp $
$$ # 22 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp" 2
$$ 
$$ 
$$ 
$$ "p2=p1*2"
$$ "d11=30m"
$$ "d12=20u"
$$ 
$$ 
$$ "in0=inf1"
$$ 
$$ "d0=in0/2-p1*4/3.1416"
$$ 
$$ 
$$ "TAU=d8*0.5-p16-d16"
$$ 
$$ 
$$ "acqt0=-p1*2/3.1416"
$$ 
$$ 
$$ # 1 "mc_line 41 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp expanding definition part of mc command before ze"
$$ define delay MCWRK
$$ define delay MCREST
$$ define loopcounter ST1CNT
$$ "ST1CNT = td1 / (2)"
$$ "MCWRK = 0.333333*d11"
$$ "MCREST = d11 - d11"
$$     dccorr
$$ # 41 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp"
$$ 1 ze
$$ # 1 "mc_line 41 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp expanding definition of mc command after ze"
$$ # 42 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp"
$$ # 1 "mc_line 42 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp expanding start label for mc command"
$$ 2 MCWRK 
$$ LBLSTS1, MCWRK 
$$ LBLF1, MCWRK
$$   MCREST
$$ # 43 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp"
$$ 
$$ 3 d12 pl10:f1
$$   p17 ph4
$$   p17*2 ph5
$$   d1 pl1:f1
$$ 
$$   p1 ph1
$$   d0
$$   p1 ph2
$$   TAU setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
$$   p16:gp1
$$   d16
$$   3u
$$   (p2 ph4):f1
$$   3u
$$   p16:gp2
$$   d16
$$   TAU setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
$$   p1 ph3
$$   go=2 ph31
$$ # 1 "mc_line 63 file /opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp expanding mc command in line"
$$   MCWRK  wr #0 if #0 zd ip1
$$   lo to LBLSTS1 times 2
$$   MCWRK id0
$$   lo to LBLF1 times ST1CNT
$$   MCWRK
$$ # 64 "/opt/topspin2.1pl8/exp/stan/nmr/lists/pp/noesygpphpp"
$$ exit
$$ 
$$ 
$$ ph1=0 2 
$$ ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
$$ ph3=0 0 2 2 1 1 3 3
$$ ph4=0
$$ ph5=1
$$ ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3
$$ 
$$ 
$$ ;pl1 : f1 channel - power level for pulse (default)
$$ ;pl10: f1 channel - power level for TOCSY-spinlock
$$ ;p1 : f1 channel -  90 degree high power pulse
$$ ;p2 : f1 channel - 180 degree high power pulse
$$ ;p16: homospoil/gradient pulse                            [1 msec]
$$ ;p17: f1 channel - trim pulse                             [2.5 msec]
$$ ;d0 : incremented delay (2D)
$$ ;d1 : relaxation delay; 1-5 * T1
$$ ;d8 : mixing time
$$ ;d12: delay for power switching                           [20 usec]
$$ ;d16: delay for homospoil/gradient recovery
$$ ;inf1: 1/SW = 2 * DW
$$ ;in0: 1/(1 * SW) = 2 * DW
$$ ;nd0: 1
$$ ;NS: 2 * n
$$ ;DS: 16
$$ ;td1: number of experiments
$$ ;FnMODE: States-TPPI, TPPI, States or QSEQ
$$ 
$$ 
$$ ;use gradient ratio:    gp 1 : gp 2
$$ ;                         40 :  -40
$$ 
$$ ;for z-only gradients:
$$ ;gpz1: 40%
$$ ;gpz2: -40%
$$ 
$$ ;use gradient files:   
$$ ;gpnam1: SINE.100
$$ ;gpnam2: SINE.100
$$ 
$$ 
$$ ;Processing
$$ 
$$ ;PHC0(F1): 90
$$ ;PHC1(F1): -180
$$ ;FCOR(F1): 1
$$ 
$$ 
$$ 
$$ ;$Id: noesygpphpp,v 1.5 2007/04/11 13:34:31 ber Exp $
$$ 
##$PARAMETER FILE=	(title, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/pdata/1/title, 0)
$$ 1H spectrum
##$PARAMETER FILE=	(uxnmr.par, ASCII, /Users/benledingham/Documents/Linington%20Labs/Article%20Pipeline/NMR%20Data/Raw/Bruker/Granaticin_D/NOESY.fid/uxnmr.par, 0)
